<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Time>
        <StartTime value="0"/>
        <StopTime value="2112"/>
        <!--    <Disabled>
        <SaveInterval value="10"/>
    </Disabled>
-->
        <!--    <Disabled>
        <RandomSeed value="0"/>
    </Disabled>
-->
        <TimeSymbol name="time" symbol="time"/>
        <RandomSeed value="555213149"/>
    </Time>
    <Description>
        <Title>18_Simulations_PFTalpha</Title>
        <Details>1000 ug/ml is max</Details>
    </Description>
    <Space>
        <SpaceSymbol name="location" symbol="l"/>
        <Lattice class="square">
            <Size symbol="size" value="200, 200, 0"/>
            <BoundaryConditions>
                <Condition boundary="x" type="constant"/>
                <Condition boundary="y" type="constant"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <Domain boundary-type="noflux">
                <Image path="hexagon_200.tif"/>
            </Domain>
            <NodeLength symbol="um" value="3"/>
        </Lattice>
    </Space>
    <Global>
        <Field name="MCP-1" symbol="M" value="0.0">
            <Diffusion rate="250"/>
        </Field>
        <Field name="mg/L IV Paracetamol" symbol="Pex" value="0">
            <Diffusion rate="0" well-mixed="true"/>
        </Field>
        <Field name="mitogens" symbol="MIT" value="0.0">
            <Diffusion rate="250"/>
        </Field>
        <Field name="TGF-beta" symbol="T" value="0.0">
            <Diffusion rate="2"/>
        </Field>
        <System name="System ODEs" solver="Heun [fixed, O(2)]" time-step="1.0">
            <DiffEqn symbol-ref="Pex">
                <Expression>- ku * Plocal - ke * Pex</Expression>
            </DiffEqn>
            <DiffEqn name="MCP-1 synthesis" symbol-ref="M">
                <Expression>rM - dM * M</Expression>
            </DiffEqn>
            <DiffEqn name="TGF-beta" symbol-ref="T">
                <Expression>T_macro + T_senescence - T_local * R * kon_t + koff_t * RT - T * dT</Expression>
            </DiffEqn>
            <DiffEqn symbol-ref="MIT">
                <Expression>rmit - dmit * MIT</Expression>
            </DiffEqn>
            <DiffEqn name="ODE for DAMP release" symbol-ref="D">
                <Expression>rD - dD * D</Expression>
            </DiffEqn>
            <DiffEqn name="efflux of unchanged APAP" symbol-ref="Efflux">
                <Expression>ke * Pex</Expression>
            </DiffEqn>
            <DiffEqn name="APAP uptake" symbol-ref="Uptake">
                <Expression>ku * Plocal</Expression>
            </DiffEqn>
        </System>
        <Mapper name="Sum Macrophages">
            <Input value="celltype.macrophages.id>0"/>
            <Output symbol-ref="macro_sum" mapping="sum"/>
        </Mapper>
        <Mapper name="Average MCP-1">
            <Input value="M"/>
            <Output symbol-ref="M_mean" mapping="average"/>
        </Mapper>
        <Variable symbol="proliferating" value="0.0"/>
        <Constant name="MCP-1 release rate" symbol="rM" value="0.0"/>
        <Constant name="Mitogen degradation rate" symbol="dmit" value="0.27"/>
        <Constant name="degradation of MCP1" symbol="dM" value="0.2"/>
        <Event name="Start APAP">
            <Condition>time>95</Condition>
            <Rule name="APAP exposure as plasma concentration" symbol-ref="Pex">
                <Expression>Pex_start</Expression>
            </Rule>
        </Event>
        <Constant name="DAMP release rate by necrotic cells" symbol="rD" value="0.0"/>
        <Constant name="degradation of DAMPs" symbol="dD" value="0.1"/>
        <Field name="DAMP concentration" symbol="D" value="0.0">
            <Diffusion rate="2"/>
        </Field>
        <Field name="portal area" symbol="portal_area" value="0"/>
        <NeighborhoodReporter name="portal area">
            <Input value="cell.type == celltype.PV.id"/>
            <Output symbol-ref="portal_area" mapping="average"/>
        </NeighborhoodReporter>
        <!--    <Disabled>
        <NeighborhoodReporter name="periportal area">
            <Input value="if(portal_area>0 &amp;&amp; portal_area&lt;0.7,1,0)"/>
            <Output symbol-ref="periportal_area" mapping="discrete"/>
        </NeighborhoodReporter>
    </Disabled>
-->
        <Field name="periportal area" symbol="periportal_area" value="0.0"/>
        <Constant name="degradation rate of TGF-beta" symbol="dT" value="0.3"/>
        <Variable name="TGF-beta produced by senescent cells" symbol="T_senescence" value="0.0"/>
        <Variable name="TGF-beta concentrations in hepatocytes" symbol="T_local" value="0.0"/>
        <Constant name="Binding rate of TGF-beta to the receptor" symbol="kon_t" value="0.25"/>
        <Constant name="Dissociation rate of TGF-beta from the receptor" symbol="koff_t" value="0.5"/>
        <Variable name="Occupied TGF-B receptor" symbol="RT" value="0.0"/>
        <Constant name="APAP uptake by hepatocytes" symbol="ku" value="0.04"/>
        <Constant name="APAP efflux through Central Vein" symbol="ke" value="0.00075"/>
        <Variable name="Free/unbound TGF-B receptor" symbol="R" value="0.0"/>
        <Constant name="radius for cell placement" symbol="radius" value="80"/>
        <Variable name="TGF-beta produced by macrophages" symbol="T_macro" value="0.0"/>
        <Variable name="" symbol="Plocal" value="0.0"/>
        <Variable name="Release rate of mitogens" symbol="rmit" value="0.0"/>
        <Variable name="Local MCP1 concentration" symbol="M_local" value="0.0"/>
        <Variable name="MCP-1 mean" symbol="M_mean" value="0.0"/>
        <Variable name="Macrophages" symbol="macrophages_total" value="0.0"/>
        <Variable name="Kupffer" symbol="kupffer_total" value="0.0"/>
        <Variable name="Hepatocytes" symbol="hepatocytes_total" value="0.0"/>
        <Variable name="Necrotic" symbol="necrotic_total" value="0.0"/>
        <Variable symbol="macro_sum" value="0.0"/>
        <Function symbol="real_time">
            <Expression>(time-96)/12</Expression>
        </Function>
        <Mapper name="Average APAP">
            <Input value="Pex"/>
            <Output symbol-ref="Pex_mean" mapping="average"/>
        </Mapper>
        <Variable name="APAP mean" symbol="Pex_mean" value="0.0"/>
        <Mapper name="Average DAMP">
            <Input value="D"/>
            <Output symbol-ref="D_mean" mapping="average"/>
        </Mapper>
        <Variable name="Mitogen mean" symbol="MIT_mean" value="0.0"/>
        <Variable name="DAMP mean" symbol="D_mean" value="0.0"/>
        <Variable name="TGFB mean" symbol="T_mean" value="0.0"/>
        <Mapper name="TGFB mean">
            <Input value="T"/>
            <Output symbol-ref="T_mean" mapping="average"/>
        </Mapper>
        <Mapper name="Mitogen mean">
            <Input value="MIT"/>
            <Output symbol-ref="MIT_mean" mapping="average"/>
        </Mapper>
        <Constant name="Number of pixels in x or y direction/2" symbol="dimension" value="100.0"/>
        <Constant name="cell volume of hepatocytes" symbol="cellvolume" value="35"/>
        <Variable name="Mean NAPQI-protein in perivenous area" symbol="C_mean" value="0.0"/>
        <Variable name="Total amount of oxidation" symbol="oxidation_total" value="0.0"/>
        <Variable name="Total amount of glucuronidation and sulfation" symbol="glucu_sulf_total" value="0.0"/>
        <Variable name="Total hepatocyte volume" symbol="volume_tot_hep" value="0.0"/>
        <Variable name="Total kuppfer cell volume" symbol="volume_tot_kupf" value="0.0"/>
        <Variable name="" symbol="P_pv_local" value="0.0"/>
        <Variable name="Maximum APAP in field" symbol="P_max" value="0.0"/>
        <Variable name="Total intracellular APAP" symbol="Pin_total" value="0.0"/>
        <Variable name="Max NAPQI" symbol="N_max" value="0.0"/>
        <Variable name="Max NAPQI-GSH complex" symbol="NG_max" value="0.0"/>
        <Variable name="Minimum GSH" symbol="G_min" value="0.0"/>
        <Variable name="Maximum NAPQI-protein complex" symbol="C_max" value="0.0"/>
        <Variable name="Maximum GSH" symbol="G_max" value="0.0"/>
        <System name="Percentages" solver="Dormand-Prince [adaptive, O(5)]">
            <Rule name="Percentage_gluc" symbol-ref="Perc_gluc_sulf">
                <Expression>if(glucu_sulf_total>0 or oxidation_total > 0,(glucu_sulf_total/(glucu_sulf_total+oxidation_total))*100,0)</Expression>
            </Rule>
            <Rule name="Percentage oxidation" symbol-ref="Perc_oxidation">
                <Expression>if(glucu_sulf_total>0 or oxidation_total > 0,(oxidation_total/(glucu_sulf_total+oxidation_total))*100,0)</Expression>
            </Rule>
            <Rule symbol-ref="efflux_perc">
                <Expression>if(efflux_total>0 or uptake_total > 0,(efflux_total/(efflux_total+uptake_total))*100,0)</Expression>
            </Rule>
            <Rule symbol-ref="uptake_perc">
                <Expression>if(efflux_total>0 or uptake_total > 0,(uptake_total/(efflux_total+uptake_total))*100,0)</Expression>
            </Rule>
        </System>
        <Variable name="Percentage of oxidation" symbol="Perc_oxidation" value="0.0"/>
        <Variable name="Percentage of glucuronidation and sulfation" symbol="Perc_gluc_sulf" value="0.0"/>
        <Variable name="Senescent" symbol="senescent_total" value="0.0"/>
        <Field name="APAP efflux" symbol="Efflux" value="0.0"/>
        <Field name="APAP uptake by hepatocytes" symbol="Uptake" value="0.0"/>
        <Mapper name="Total efflux" time-step="1.0">
            <Input value="Efflux"/>
            <Output symbol-ref="efflux_total" mapping="sum"/>
        </Mapper>
        <Variable name="Total efflux" symbol="efflux_total" value="0.0"/>
        <Variable name="Total uptake" symbol="uptake_total" value="0.0"/>
        <Mapper name="Total uptake" time-step="1.0">
            <Input value="Uptake"/>
            <Output symbol-ref="uptake_total" mapping="sum"/>
        </Mapper>
        <Variable name="Percentage of APAP efflux" symbol="efflux_perc" value="0"/>
        <Variable name="Percentage uptake" symbol="uptake_perc" value="0"/>
        <Variable name="MCP-1 in periportal area" symbol="M_pp" value="0.0"/>
        <Constant name="Initial APAP concentration (mg/L)" symbol="Pex_start" value="500"/>
        <Mapper name="periportal area">
            <Input value="if(portal_area>0 &amp;&amp; portal_area&lt;0.5,1,0)"/>
            <Output symbol-ref="periportal_area"/>
        </Mapper>
        <!--    <Disabled>
        <Field name="binary" symbol="binary" value="0.0"/>
    </Disabled>
-->
        <!--    <Disabled>
        <Mapper name="portal binary">
            <Input value="if(cell.type == celltype.PV.id,1,0)"/>
            <Output symbol-ref="binary" mapping="sum"/>
        </Mapper>
    </Disabled>
-->
        <Variable name="Total sulfation" symbol="sulf_total" value="0.0"/>
        <Variable name="Total glucuronidation" symbol="gluc_total" value="0.0"/>
        <Variable symbol="switch" value="0.0"/>
        <System name="Macrophage switch" solver="Heun [fixed, O(2)]" time-step="1.0">
            <Rule symbol-ref="switch">
                <Expression>if(macrophages_total > 100,switch+1,switch+0)</Expression>
            </Rule>
        </System>
        <Variable name="all time maximum of MCP-1 in periportal area" symbol="alltime_M_pp_max" value="0.0"/>
        <System solver="Heun [fixed, O(2)]" time-step="1.0">
            <Rule symbol-ref="alltime_M_pp_max">
                <Expression>if(M_pp > alltime_M_pp_max, M_pp, alltime_M_pp_max)</Expression>
            </Rule>
        </System>
    </Global>
    <CellTypes>
        <CellType name="CV" class="biological">
            <FreezeMotion>
                <Condition>1</Condition>
            </FreezeMotion>
            <Property name="cell type" symbol="celltype" value="3"/>
            <Mapper name="Local APAP concentration">
                <Input value="Pex"/>
                <Output symbol-ref="P_cv_local" mapping="average"/>
            </Mapper>
            <Property name="Local APAP concentration" symbol="P_cv_local" value="0.0"/>
        </CellType>
        <CellType name="PV" class="biological">
            <Property name="cell type" symbol="celltype" value="2"/>
            <FreezeMotion>
                <Condition>1</Condition>
            </FreezeMotion>
            <Mapper name="Local APAP concentration">
                <Input value="Pex"/>
                <Output symbol-ref="P_pv_local" mapping="average"/>
            </Mapper>
            <Mapper name="Local MCP1 concentration">
                <Input value="M"/>
                <Output symbol-ref="M_pp" mapping="average"/>
            </Mapper>
        </CellType>
        <CellType name="hepatocytes" class="biological">
            <VolumeConstraint name="target volume" target="vc" strength="1"/>
            <Property name="cell type" symbol="celltype" value="1"/>
            <Property name="cell volume" symbol="vc" value="cellvolume"/>
            <Property name="Occupied TGF-B receptor" symbol="RT" value="0.0"/>
            <Property symbol="T_local" value="0.0"/>
            <Property symbol="T_senescence" value="0.0"/>
            <Property name="Local APAP concentration" symbol="Plocal" value="0.0"/>
            <Property name="Intracellular P concentration" symbol="Pin" value="0.0"/>
            <Property name="Protein-NAPQI complex" symbol="C" value="0.0"/>
            <Property symbol="N" value="0.0"/>
            <Property name="p53 concentration " symbol="p53" value="0.204"/>
            <Property name="p53p concentration" symbol="p53p" value="0"/>
            <Property name="p21 concentration" symbol="p21" value="4.68634"/>
            <Property name="MDM2 protein" symbol="MDM2" value="0.26255"/>
            <Property name="distance from CV at t=0" symbol="distance" value="sqrt(((cell.center.x-dimension)^2)+((cell.center.y-dimension)^2))"/>
            <Property name="NAPQI-GSH complex" symbol="NG" value="0.0"/>
            <Property name="Sulfation (90%)" symbol="sulf" value="0.0"/>
            <Property name="Cyclin/CDK" symbol="K" value="4.68634"/>
            <Property name="PAPS enzymes for sulfation" symbol="S" value="bs / ds"/>
            <!--    <Disabled>
        <Property symbol="P450_local" value="(1/(1+exp(b*(distance_normal-a))))"/>
    </Disabled>
-->
            <Property name="cellular Cytochrome P450 abundance" symbol="P450_cell" value="(d_p450+(1/(1+exp(b*(distance_normal-a)))))/c_p450"/>
            <Property name="intracellular GSH" symbol="G_cell" value="(d_gsh+(1/(1+exp(-b*(distance_normal-a)))))/c_gsh"/>
            <Property name="normalized distance from CV at t=0" symbol="distance_normal" value="(distance/radius)"/>
            <Property symbol="neighb_nec" value="0.0"/>
            <Property name="chance of proliferation" symbol="p_proliferation" value="0.001"/>
            <Property name="local concentration of MCP-1" symbol="M_local" value="0.0"/>
            <Property name="local mitogen concentration" symbol="MIT_local" value="0.0"/>
            <Property name="chance of necrosis" symbol="p_necrosis" value="0"/>
            <!--    <Disabled>
        <Property symbol="necrosis" value="0.0"/>
    </Disabled>
-->
            <Property symbol="c_time" value="0.0"/>
            <Property symbol="senescence" value="0.0"/>
            <Property symbol="nt_hepmacro" value="0.0"/>
            <Property symbol="neigh_hepmacro" value="0.0"/>
            <Property name="number of divisions" symbol="divisions" value="0.0"/>
            <!--    <Disabled>
        <Property name="basal GSH production rate" symbol="GSH_deg" value="GSH_basal / GSH_dist"/>
    </Disabled>
-->
            <Constant name="GSH degradation rate" symbol="dGSH" value="0.006944444"/>
            <Constant name="rate of glucuronidation" symbol="kg" value="0.010381944"/>
            <Constant name="PAPS degradation rate" symbol="ds" value="0.006944444"/>
            <Constant name="APAP conversion rate to NAPQI by CYT P450" symbol="kP450" value="0.00109375"/>
            <Constant name="conversion rate of NAPQI to APAP" symbol="kN" value="0.000109375"/>
            <Constant name="rate of sulfation" symbol="ks" value="0.0010381944"/>
            <Constant name="Basal PAPS production" symbol="bs" value="0.0694444"/>
            <!--    <Disabled>
        <Constant name="rate of NAPQI binding to GSH" symbol="kGSH" value="0.05"/>
    </Disabled>
-->
            <!--    <Disabled>
        <Constant name="rate of NAPQI-protein complex formation" symbol="kpsh" value="0.3819444"/>
    </Disabled>
-->
            <Constant name="distance constant b" symbol="b" value="10"/>
            <Constant name="distance constant a" symbol="a" value="0.5"/>
            <System name="Cell ODEs" solver="Dormand-Prince [adaptive, O(5)]" time-scaling="1.0">
                <DiffEqn name="intracellular APAP ODE" symbol-ref="Pin">
                    <Expression>ku * Plocal - Pin * kP450 * P450_cell - Pin * kg - ks * S * Pin + N * kN</Expression>
                </DiffEqn>
                <DiffEqn name="NAPQI ODE" symbol-ref="N">
                    <Expression>Pin * kP450 * P450_cell - N * kGSH * G_cell - N * kpsh - N * kN</Expression>
                </DiffEqn>
                <DiffEqn name="TGFB_bound ODE" symbol-ref="RT">
                    <Expression>T_local * R * kon_t - koff_t * RT</Expression>
                </DiffEqn>
                <DiffEqn name="NAPQI-protein complex ODE" symbol-ref="C">
                    <Expression>N * kpsh - C * dc</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="p53">
                    <Expression>ks_p53 + k_dp * p53p - k_p * p53 * C - kd_p53 * p53 - kd_p53_mdm2 * MDM2 * p53</Expression>
                </DiffEqn>
                <DiffEqn name="" symbol-ref="p53p">
                    <Expression>k_p * p53 * C - k_dp * p53p - kd_p53p * p53p - kd_p53p_mdm2 * MDM2 * p53p</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="MDM2">
                    <Expression>ks_mdm2 + k_pft * (ks_mdm2_p53p * p53p^4) / (Km_mdm2^4 + p53p^4) - kd_mdm2 * MDM2</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="p21">
                    <Expression>ks_p21 + k_pft * (ks_p21_p53p * p53p^4) / (Km_p21^4 + p53p^4) - kd_p21 * p21 + RT * k_stim</Expression>
                </DiffEqn>
                <DiffEqn name="GSH ODE" symbol-ref="G_cell">
                    <Expression>bGSH - dGSH * G_cell - N * kGSH * G_cell</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="K">
                    <Expression>bk + k_mitogen * MIT_local - k_inhibitor * p21 * K - dk * K</Expression>
                </DiffEqn>
                <!--    <Disabled>
        <DiffEqn symbol-ref="CD1_bas">
            <Expression>CD1_basal - k_inhibitor * p21 * CD1_bas - CD1_deg * CD1_bas</Expression>
        </DiffEqn>
    </Disabled>
-->
                <!--    <Disabled>
        <DiffEqn symbol-ref="CD1_mito">
            <Expression>k_mitogen * M_local - k_inhibitor * p21 * CD1_mito - CD1_deg * CD1_mito</Expression>
        </DiffEqn>
    </Disabled>
-->
                <DiffEqn name="receptor binding" symbol-ref="R">
                    <Expression>- T_local * R * kon_t + koff_t * RT</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="NG">
                    <Expression>N * kGSH * G_cell</Expression>
                </DiffEqn>
                <DiffEqn name="ODE for non-toxic metabolites (gluc and sulf)" symbol-ref="sulf">
                    <Expression>Pin * ks * S </Expression>
                </DiffEqn>
                <DiffEqn name="ODE for sulfation" symbol-ref="S">
                    <Expression>- ks * S * Pin + bs - ds * S</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="gluc">
                    <Expression>kg * Pin</Expression>
                </DiffEqn>
            </System>
            <!--    <Disabled>
        <System name="Cell colour back to normal" solver="Heun [fixed, O(2)]" time-step="1.0">
            <Rule symbol-ref="c_time">
                <Expression>if(celltype == 7, c_time +1, 0)</Expression>
            </Rule>
        </System>
    </Disabled>
-->
            <System solver="Heun [fixed, O(2)]" time-step="1.0">
                <Rule symbol-ref="nt_hepmacro">
                    <Expression>if(neigh_hepmacro > 0, nt_hepmacro + 1, 0)</Expression>
                </Rule>
            </System>
            <CellDivision name="proliferation" write-log="celltype-csv" division-plane="random">
                <Triggers>
                    <!--    <Disabled>
        <Rule symbol-ref="celltype">
            <Expression>if(c_time &lt; 30, 7, 1)</Expression>
        </Rule>
    </Disabled>
-->
                    <Rule symbol-ref="divisions">
                        <Expression>divisions + 1</Expression>
                    </Rule>
                    <Rule symbol-ref="celltype">
                        <Expression>7</Expression>
                    </Rule>
                </Triggers>
                <Condition>rand_uni(0,1)&lt;p_proliferation &amp;&amp; K > 4.6863425</Condition>
            </CellDivision>
            <ChangeCellType name="Necrosis" newCellType="necrotic">
                <Condition>C > 4 &amp;&amp; binary</Condition>
                <Triggers>
                    <Rule symbol-ref="celltype">
                        <Expression>4</Expression>
                    </Rule>
                    <!--    <Disabled>
        <Rule name="cell volume" symbol-ref="vc">
            <Expression>12</Expression>
        </Rule>
    </Disabled>
-->
                </Triggers>
            </ChangeCellType>
            <Mapper name="Local APAP concentration">
                <Input value="Pex"/>
                <Output symbol-ref="Plocal" mapping="average"/>
            </Mapper>
            <Mapper name="Local TGFB concentration">
                <Input value="T"/>
                <Output symbol-ref="T_local" mapping="average"/>
            </Mapper>
            <Mapper name="Local MCP-1 concentration">
                <Input value="M"/>
                <Output symbol-ref="M_local" mapping="average"/>
            </Mapper>
            <Mapper name="Local mitogen concentration">
                <Input value="MIT"/>
                <Output symbol-ref="MIT_local" mapping="average"/>
            </Mapper>
            <Mapper name="# of hepatocytes">
                <Input value="cell.id > 0"/>
                <Output symbol-ref="hepatocytes_total" mapping="sum"/>
            </Mapper>
            <Mapper name="# cells in proliferation">
                <Input value="celltype == 7"/>
                <Output symbol-ref="proliferating" mapping="sum"/>
            </Mapper>
            <NeighborhoodReporter name="# of necrotic neighbours">
                <Input scaling="cell" value="cell.type == celltype.necrotic.id"/>
                <Output symbol-ref="neighb_nec" mapping="sum"/>
            </NeighborhoodReporter>
            <NeighborhoodReporter name="# of macrophage neighbours">
                <Input scaling="cell" value="cell.type == celltype.macrophages.id"/>
                <Output symbol-ref="neigh_hepmacro" mapping="sum"/>
            </NeighborhoodReporter>
            <CellDeath>
                <Condition>senescence == 1 &amp;&amp; neigh_hepmacro > 0 &amp;&amp; nt_hepmacro > 60 &amp;&amp; rand_uni(0,1) &lt; 0.45</Condition>
            </CellDeath>
            <Event persistent="true" name="Senescence" trigger="when true">
                <Condition history="false">K &lt; 4.6863375 or senescence > 1</Condition>
                <!--    <Disabled>
        <Rule symbol-ref="vc">
            <Expression>cellvolume*1.5</Expression>
        </Rule>
    </Disabled>
-->
                <Rule symbol-ref="celltype">
                    <Expression>6</Expression>
                </Rule>
                <Rule name="TGF-beta production by senescent cells" symbol-ref="T_senescence">
                    <Expression>0.01</Expression>
                </Rule>
                <Rule symbol-ref="senescence">
                    <Expression>senescence + 1</Expression>
                </Rule>
                <Rule symbol-ref="p_proliferation">
                    <Expression>0.0</Expression>
                </Rule>
            </Event>
            <Constant name="SMAD-dependent production of p21" symbol="k_stim" value="0.000001"/>
            <Constant name="Cyclin/CDK degradation" symbol="dk" value="0.0050256 / 18"/>
            <Constant name="mitogen-dependent Cyclin/CDK production" symbol="k_mitogen" value="0.000010381944 * 5"/>
            <Constant name="Cyclin-D1 inhibition by p21" symbol="k_inhibitor" value="2"/>
            <!--    <Disabled>
        <Property name="Basal production rate of p53" symbol="p53_basal" value="p53_deg * p53"/>
    </Disabled>
-->
            <!--    <Disabled>
        <Property name="p21 degradation rate" symbol="p21_deg" value="(p21_basal + k_p21 * p53) / p21"/>
    </Disabled>
-->
            <Property name="basal Cyclin/CDK synthesis rate" symbol="bk" value="k_inhibitor * p21 * K + dk * K"/>
            <!--    <Disabled>
        <Property name="Cyclin-D1" symbol="CD1_mito" value="0"/>
    </Disabled>
-->
            <!--    <Disabled>
        <Property name="Cyclin-D1" symbol="CD1_bas" value="0.3"/>
    </Disabled>
-->
            <!--    <Disabled>
        <Function symbol="CD1">
            <Expression>CD1_bas + CD1_mito</Expression>
        </Function>
    </Disabled>
-->
            <!--    <Disabled>
        <Equation symbol-ref="CD1">
            <Expression>CD1_bas + CD1_mito</Expression>
        </Equation>
    </Disabled>
-->
            <!--    <Disabled>
        <Property name="basal Cyclin-D1 synthesis rate" symbol="CD1_basal" value="k_inhibitor * p21 * CD1_bas + CD1_deg * CD1_bas"/>
    </Disabled>
-->
            <Property name="Free/unbound TGF-B receptor" symbol="R" value="1"/>
            <System name="Distance, GSH and P450 resetting" solver="Dormand-Prince [adaptive, O(5)]" time-step="100.0">
                <Rule name="Distance recalculation" symbol-ref="distance">
                    <Expression>sqrt(((cell.center.x-dimension)^2)+((cell.center.y-dimension)^2))</Expression>
                </Rule>
                <Rule symbol-ref="distance_normal">
                    <Expression>(distance/radius)</Expression>
                </Rule>
                <Rule symbol-ref="P450_cell">
                    <Expression>(d_p450+(1/(1+exp(b*(distance_normal-a)))))/c_p450</Expression>
                </Rule>
                <Rule name="GSH dependent on distance to CV" symbol-ref="G_dist">
                    <Expression>(d_gsh+(1/(1+exp(-b*(distance_normal-a)))))/c_gsh</Expression>
                </Rule>
                <!--    <Disabled>
        <Rule symbol-ref="GSH_deg">
            <Expression>GSH_basal / GSH_dist</Expression>
        </Rule>
    </Disabled>
-->
                <Rule name="Total amount of NAPQI (5 to 10%)" symbol-ref="N_total">
                    <Expression>N + C + NG</Expression>
                </Rule>
                <Rule name="basal GSH sythesis" symbol-ref="bGSH">
                    <Expression>dGSH*G_dist</Expression>
                </Rule>
            </System>
            <Property name="GSH distance at t=0" symbol="G_dist" value="(d_gsh+(1/(1+exp(-b*(distance_normal-a)))))/c_gsh"/>
            <Constant name="denominator GSH" symbol="c_gsh" value="1.4556 * 10^-1 * 0.5"/>
            <Constant name="denominator P450" symbol="c_p450" value="3.33333"/>
            <Constant name="offset GSH scaling" symbol="d_gsh" value="1"/>
            <Constant name="offset P450 scaling" symbol="d_p450" value="3.33333"/>
            <Mapper name="Total volume hepatocytes">
                <Input value="cell.volume"/>
                <Output symbol-ref="volume_tot_hep" mapping="sum"/>
            </Mapper>
            <Mapper name="Total oxidation">
                <Input value="N_total"/>
                <Output symbol-ref="oxidation_total" mapping="sum"/>
            </Mapper>
            <Mapper name="Total glucuronidation and sulfation">
                <Input value="sulf + gluc"/>
                <Output symbol-ref="glucu_sulf_total" mapping="sum"/>
            </Mapper>
            <Property name="Total amount of NAPQI (5 to 10%)" symbol="N_total" value="N + C + NG"/>
            <Mapper name="Max intracellular APAP">
                <Input value="Pin"/>
                <Output symbol-ref="Pin_total" mapping="sum"/>
            </Mapper>
            <Mapper name="Max NAPQI">
                <Input value="N"/>
                <Output symbol-ref="N_max" mapping="maximum"/>
            </Mapper>
            <Mapper name="Max NAPQI_GSH">
                <Input value="NG"/>
                <Output symbol-ref="NG_max" mapping="maximum"/>
            </Mapper>
            <Mapper name="Min GSH">
                <Input value="G_cell"/>
                <Output symbol-ref="G_min" mapping="minimum"/>
            </Mapper>
            <Mapper name="Max NAPQI-protein">
                <Input value="C"/>
                <Output symbol-ref="C_max" mapping="maximum"/>
            </Mapper>
            <Mapper name="Max GSH">
                <Input value="G_cell"/>
                <Output symbol-ref="G_max" mapping="maximum"/>
            </Mapper>
            <!--    <Disabled>
        <Property symbol="GSH_basal" value="(0.5+(1/(1+exp(-b*(distance_normal-a)))))/0.5"/>
    </Disabled>
-->
            <Mapper name="# of senescent cells">
                <Input value="celltype == 6"/>
                <Output symbol-ref="senescent_total" mapping="sum"/>
            </Mapper>
            <Property name="basal GSH synthesis rate" symbol="bGSH" value="dGSH*G_dist"/>
            <Property name="rate of NAPQI-protein complex formation" symbol="kpsh" value="kGSH * 0.01 * (d_gsh+(1/(1+exp(-b*(distance_normal-a)))))/c_gsh"/>
            <Constant name="Self-set elimination rate of NAPQI-protein adducts" symbol="dc" value="0.006944444"/>
            <Constant symbol="k_dp" value="0.614547/18"/>
            <Constant symbol="kd_p53" value="0.0711/18"/>
            <Constant symbol="kd_p53p" value="0.0003218/18"/>
            <Constant symbol="kd_p53_mdm2" value="3.69*10^-5 / 18"/>
            <Constant symbol="kd_p53p_mdm2" value="0.10386 / 18"/>
            <!--    <Disabled>
        <Constant name="Basal MDM2 synthesis" symbol="ks_mdm2" value="0.00039283"/>
    </Disabled>
-->
            <Constant symbol="ks_mdm2_p53p" value="0.05012 / 18"/>
            <!--    <Disabled>
        <Constant symbol="ks_p21" value="0.01241"/>
    </Disabled>
-->
            <Constant symbol="ks_p21_p53p" value="0.25631 / 18"/>
            <Constant symbol="Km_mdm2" value="0.2962"/>
            <Constant symbol="Km_p21" value="0.74052"/>
            <!--    <Disabled>
        <Constant symbol="k_p" value="k_pft_phos * 0.0502 / 18"/>
    </Disabled>
-->
            <!--    <Disabled>
        <Constant symbol="ks_p53" value="0.02394"/>
    </Disabled>
-->
            <Constant symbol="kd_mdm2" value="0.123616 / 18"/>
            <Constant symbol="kd_p21" value="0.0050256 / 18"/>
            <Property symbol="ks_p53" value="kd_p53 * p53 + kd_p53_mdm2 * MDM2 * p53"/>
            <Property name="basal MDM2 sythesis" symbol="ks_mdm2" value="kd_mdm2 * MDM2"/>
            <Property name="Basal p21 synthesis" symbol="ks_p21" value="kd_p21 * p21"/>
            <Property name="rate of NAPQI binding to GSH" symbol="kGSH" value="1000*kP450*P450_cell/G_dist"/>
            <Property name="Glucuronidation" symbol="gluc" value="0.0"/>
            <Mapper name="Total sulfation">
                <Input value="sulf"/>
                <Output symbol-ref="sulf_total" mapping="sum"/>
            </Mapper>
            <Mapper name="Total glucuronidation">
                <Input value="gluc"/>
                <Output symbol-ref="gluc_total" mapping="sum"/>
            </Mapper>
            <Constant name="Time of treatment" symbol="treatment_time" value="3"/>
            <Property name="Inhibition of MDM2 binding to p53" symbol="r" value="0.0"/>
            <Event name="p53 inhibition">
                <Condition>real_time > treatment_time</Condition>
                <Rule symbol-ref="p53p">
                    <Expression>p53p_curr * 0.67</Expression>
                </Rule>
                <Rule name="Pifithrin-alpha inhibition strength" symbol-ref="k_pft">
                    <Expression>0.5</Expression>
                </Rule>
                <!--    <Disabled>
        <Rule symbol-ref="p_necrosis">
            <Expression>0.02</Expression>
        </Rule>
    </Disabled>
-->
                <Rule symbol-ref="k_pft_phos">
                    <Expression>0.67</Expression>
                </Rule>
            </Event>
            <Function name="Current p53p level" symbol="p53p_curr">
                <Expression>p53p</Expression>
            </Function>
            <Property name="Inhibition by Pifithrin-alpha" symbol="k_pft" value="1"/>
            <System name="Probability of necrosis" solver="Euler [fixed, O(1)]" time-step="1.0">
                <Rule symbol-ref="p_necrosis">
                    <Expression>if(after_treatment,1,0.8)</Expression>
                </Rule>
                <Rule symbol-ref="binary">
                    <Expression>(random &lt; p_necrosis)</Expression>
                </Rule>
                <Rule symbol-ref="random">
                    <Expression>rand_uni(0,1)</Expression>
                </Rule>
                <Rule symbol-ref="after_treatment">
                    <Expression>real_time>treatment_time</Expression>
                </Rule>
            </System>
            <Property name="True or False" symbol="binary" value="0.0"/>
            <Property name="Random value" symbol="random" value="0.0"/>
            <Property name="Treatment given" symbol="after_treatment" value="0.0"/>
            <Property name="decrease in p53 phosphorylation rate" symbol="k_pft_phos" value="1"/>
            <Property name="phosphorylation rate of p53" symbol="k_p" value="k_pft_phos * 0.0502 / 18"/>
        </CellType>
        <CellType name="necrotic" class="biological">
            <VolumeConstraint name="volume necrotic cell" target="cellvolume" strength="1"/>
            <Property name="DAMP release rate" symbol="rD" value="0.5"/>
            <Property name="cell type" symbol="celltype" value="4"/>
            <Property name="macrophages in neighbourhood" symbol="macro_neigh" value="0.0"/>
            <Property name="Number of times in contact with macrophage" symbol="macro_neigh_time" value="0.0"/>
            <CellDeath>
                <Condition>macro_neigh > 0 &amp;&amp; macro_neigh_time > limit_neigh &amp;&amp; rand_uni(0,1) > 0.1</Condition>
            </CellDeath>
            <NeighborhoodReporter>
                <Input scaling="cell" value="cell.type == celltype.macrophages.id"/>
                <Output symbol-ref="macro_neigh" mapping="sum"/>
            </NeighborhoodReporter>
            <System solver="Heun [fixed, O(2)]" time-step="1.0">
                <Rule symbol-ref="macro_neigh_time">
                    <Expression>if(macro_neigh > 0, macro_neigh_time+1, macro_neigh_time+0)</Expression>
                </Rule>
                <Rule symbol-ref="lifetime_necrotic">
                    <Expression>lifetime_necrotic + 1</Expression>
                </Rule>
            </System>
            <Mapper name="# of necrotic cells">
                <Input value="cell.id > 0"/>
                <Output symbol-ref="necrotic_total" mapping="sum"/>
            </Mapper>
            <FreezeMotion>
                <Condition>if(lifetime_necrotic > 1,1,0)</Condition>
            </FreezeMotion>
            <!--    <Disabled>
        <Property name="cell volume" symbol="vc" value="12"/>
    </Disabled>
-->
            <Property name="Lifetime necrotic cell" symbol="lifetime_necrotic" value="0.0"/>
            <Constant name="Limit of time in contact with macrophage before disappearance" symbol="limit_neigh" value="150"/>
        </CellType>
        <CellType name="medium" class="medium"/>
        <CellType name="macrophages" class="biological">
            <Chemotaxis name="macrophage attraction to MCP-1" saturation="1" field="M" strength="chemotaxis"/>
            <VolumeConstraint name="volume deviation penalty of macrophage" target="mac_volume" strength="1"/>
            <Property name="cell type" symbol="celltype" value="5"/>
            <Property symbol="lifetime_macrophage" value="0.0"/>
            <Property name="TGFB produced by macrophages" symbol="T_macro" value="0"/>
            <Property name="strength of chemotaxis" symbol="chemotaxis" value="600"/>
            <Property symbol="CV_neigh" value="0.0"/>
            <Property name="macrophage target volume" symbol="mac_volume" value="cellvolume*0.5"/>
            <Property name="Mitogen release rate" symbol="rmit" value="4.0"/>
            <!--    <Disabled>
        <Event name="macrophage volume" trigger="when true">
            <Condition>celltype.necrotic.size > 1</Condition>
            <Rule symbol-ref="mac_volume">
                <Expression>cellvolume*0.6</Expression>
            </Rule>
        </Event>
    </Disabled>
-->
            <!--    <Disabled>
        <Event name="release chemokines" trigger="when true">
            <Condition>nec_neigh > 0</Condition>
            <Rule symbol-ref="TGFB_macro">
                <Expression>0.1</Expression>
            </Rule>
            <Rule symbol-ref="mitorelease">
                <Expression>10</Expression>
            </Rule>
            <Rule symbol-ref="chemotaxis">
                <Expression>10</Expression>
            </Rule>
        </Event>
    </Disabled>
-->
            <AddCell name="Macrophage entry" overwrite="true">
                <Distribution>periportal_area</Distribution>
                <Triggers/>
                <Count>if(M_pp>0.0001 &amp;&amp; M_pp > alltime_M_pp_max*0.9 , p_macrophage,0)</Count>
            </AddCell>
            <NeighborhoodReporter name="number of necrotic neighbors">
                <Input scaling="cell" value="cell.type == celltype.necrotic.id"/>
                <Output symbol-ref="nec_neigh" mapping="sum"/>
            </NeighborhoodReporter>
            <NeighborhoodReporter name="average number of CV neighbors">
                <Input scaling="cell" value="cell.type == celltype.CV.id"/>
                <Output symbol-ref="CV_neigh" mapping="average"/>
            </NeighborhoodReporter>
            <CellDeath name="Macrophage disappearance">
                <Condition>((lifetime_macrophage > 200 and M_mean &lt; 1 * 10^-5) &amp;&amp; rand_uni(0,1) &lt; 0.005) </Condition>
            </CellDeath>
            <System name="macrophage lifetime" solver="Heun [fixed, O(2)]" time-step="1.0">
                <Rule symbol-ref="lifetime_macrophage">
                    <Expression>lifetime_macrophage + 1</Expression>
                </Rule>
                <Rule symbol-ref="nec_neigh_time">
                    <Expression>if(nec_neigh > 0, nec_neigh_time+1, nec_neigh_time+0)</Expression>
                </Rule>
            </System>
            <Mapper name="# of macrophages">
                <Input value="celltype == 5"/>
                <Output symbol-ref="macrophages_total" mapping="sum"/>
            </Mapper>
            <!--    <Disabled>
        <Variable symbol="macrophages_total" value="0.0"/>
    </Disabled>
-->
            <System name="release chemokines" solver="Dormand-Prince [adaptive, O(5)]">
                <Rule symbol-ref="T_macro">
                    <Expression>if(nec_neigh > 0, T_macro_on, 0)</Expression>
                </Rule>
                <Rule symbol-ref="chemotaxis">
                    <Expression>if(pv_neigh > 0, 600, if(nec_neigh > 0, 2,100))</Expression>
                </Rule>
            </System>
            <Property symbol="pv_neigh" value="0.0"/>
            <NeighborhoodReporter name="number of pv neighbor">
                <Input scaling="length" value="cell.type == celltype.PV.id"/>
                <Output symbol-ref="pv_neigh" mapping="average"/>
            </NeighborhoodReporter>
            <Constant name="probability of macrophage appearance" symbol="p_macrophage" value="0.5"/>
            <Property name="Number of necrotic neighbors" symbol="nec_neigh" value="0.0"/>
            <Property name="Number of times in contact with necrotic cell" symbol="nec_neigh_time" value="0.0"/>
            <Constant name="TGF-beta expression if macrophages produce" symbol="T_macro_on" value="0.2"/>
        </CellType>
        <CellType name="kupffer" class="biological">
            <VolumeConstraint name="Target volume" target="cellvolume/10" strength="1"/>
            <Property name="cell type" symbol="celltype" value="0"/>
            <Property symbol="NR_time" value="0.0"/>
            <Property name="MCP-1 release rate" symbol="rM" value="0.0"/>
            <Property name="number of necrotic cells" symbol="NR_necrotic" value="0.0"/>
            <Property name="Local APAP concentration in Kupffer cells" symbol="P_kupf_local" value="0.0"/>
            <System name="Time in contact with necrotic cells" solver="Heun [fixed, O(2)]" time-step="1.0">
                <Rule symbol-ref="NR_time">
                    <Expression>if(NR_necrotic > 0, NR_time +5, 0)</Expression>
                </Rule>
            </System>
            <Mapper name="Local APAP concentration">
                <Input value="Pex"/>
                <Output symbol-ref="P_kupf_local" mapping="average"/>
            </Mapper>
            <Mapper name="# of kupffer cells">
                <Input value="cell.id > 0"/>
                <Output symbol-ref="kupffer_total" mapping="sum"/>
            </Mapper>
            <NeighborhoodReporter name="Necrotic neighbours">
                <Input scaling="cell" value="cell.type == celltype.necrotic.id"/>
                <Output symbol-ref="NR_necrotic" mapping="sum"/>
            </NeighborhoodReporter>
            <Mapper name="Local DAMP concentration">
                <Input value="D"/>
                <Output symbol-ref="D_local" mapping="average"/>
            </Mapper>
            <Property name="Local DAMP concentration" symbol="D_local" value="0.0"/>
            <Mapper name="Total volume kupffer cells">
                <Input value="cell.volume"/>
                <Output symbol-ref="volume_tot_kupf" mapping="sum"/>
            </Mapper>
            <Constant name="MCP1 release if conditions are met" symbol="rM_true" value="75"/>
            <System name="MCP1 release" solver="Dormand-Prince [adaptive, O(5)]">
                <Rule symbol-ref="rM">
                    <Expression>if(D_local > 0.5, rM_true, 0)</Expression>
                </Rule>
            </System>
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction default="0.0">
            <Contact type2="medium" type1="kupffer" value="0.8"/>
            <Contact type2="medium" type1="hepatocytes" value="0.8"/>
            <Contact type2="medium" type1="macrophages" value="0.8"/>
            <Contact type2="medium" type1="necrotic" value="0.8"/>
            <Contact type2="hepatocytes" type1="kupffer" value="2.2"/>
            <Contact type2="kupffer" type1="kupffer" value="2.2"/>
            <Contact type2="hepatocytes" type1="hepatocytes" value="2.2"/>
            <Contact type2="kupffer" type1="CV" value="2.2"/>
            <Contact type2="hepatocytes" type1="CV" value="2.2"/>
            <Contact type2="macrophages" type1="CV" value="2.2"/>
            <Contact type2="necrotic" type1="CV" value="2.2"/>
            <Contact type2="kupffer" type1="PV" value="2.2"/>
            <Contact type2="hepatocytes" type1="PV" value="2.2"/>
            <Contact type2="necrotic" type1="PV" value="2.2"/>
            <Contact type2="macrophages" type1="PV" value="2.2"/>
            <Contact type2="hepatocytes" type1="necrotic" value="2.2"/>
            <Contact type2="kupffer" type1="necrotic" value="2.2"/>
            <Contact type2="necrotic" type1="necrotic" value="2.2"/>
            <Contact type2="hepatocytes" type1="macrophages" value="2.2"/>
            <Contact type2="kupffer" type1="macrophages" value="2.2"/>
            <Contact type2="necrotic" type1="macrophages" value="2.2"/>
            <Contact type2="macrophages" type1="macrophages" value="2.2"/>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="0.4"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>3</Order>
                <!--    <Disabled>
        <Distance>2</Distance>
    </Disabled>
-->
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <Analysis>
        <ModelGraph format="svg" include-tags="#untagged" reduced="false"/>
        <!--    <Disabled>
        <Gnuplotter name="APAP distribution" decorate="true" time-step="24" file-numbering="time">
            <Terminal name="png"/>
            <Plot title="Cell types">
                <Cells max="7" opacity="0.6" min="0" flooding="true" value="celltype">
                    <ColorMap>
                        <Color color="medium-blue" value="0"/>
                        <Color color="brown4" value="1"/>
                        <Color color="red" value="2"/>
                        <Color color="red" value="3"/>
                        <Color color="black" value="4"/>
                        <Color color="green" value="5"/>
                        <Color color="gray" value="6"/>
                        <Color color="orange-red" value="7"/>
                    </ColorMap>
                </Cells>
            </Plot>
            <Plot>
                <Field symbol-ref="Pex" min="0"/>
            </Plot>
            <Plot>
                <Cells value="Pin"/>
            </Plot>
            <Plot>
                <Cells value="N"/>
            </Plot>
            <Plot>
                <Cells value="C"/>
            </Plot>
            <Plot>
                <Cells value="N_total"/>
            </Plot>
            <Disabled>
                <Plot>
                    <Cells value="gluc"/>
                </Plot>
            </Disabled>
            <Disabled>
                <Plot>
                    <Cells value="G_cell"/>
                </Plot>
            </Disabled>
            <Disabled>
                <Plot>
                    <Cells value="P450_cell"/>
                </Plot>
            </Disabled>
        </Gnuplotter>
    </Disabled>
-->
        <!--    <Disabled>
        <Gnuplotter name="APAP detoxification" decorate="true" time-step="24" file-numbering="time">
            <Terminal name="png"/>
            <Plot title="Cell types">
                <Cells max="7" opacity="0.6" min="0" flooding="true" value="celltype">
                    <ColorMap>
                        <Color color="medium-blue" value="0"/>
                        <Color color="brown4" value="1"/>
                        <Color color="red" value="2"/>
                        <Color color="red" value="3"/>
                        <Color color="black" value="4"/>
                        <Color color="green" value="5"/>
                        <Color color="gray" value="6"/>
                        <Color color="orange-red" value="7"/>
                    </ColorMap>
                </Cells>
            </Plot>
            <Disabled>
                <Plot>
                    <Field symbol-ref="Pex" min="0"/>
                </Plot>
            </Disabled>
            <Disabled>
                <Plot>
                    <Cells value="Pin"/>
                </Plot>
            </Disabled>
            <Plot>
                <Cells value="NG"/>
            </Plot>
            <Plot>
                <Cells value="G_cell"/>
            </Plot>
            <Plot>
                <Cells value="P450_cell"/>
            </Plot>
            <Plot>
                <Cells value="gluc"/>
            </Plot>
            <Plot>
                <Cells value="sulf"/>
            </Plot>
            <Disabled>
                <Plot>
                    <Cells value="N_total"/>
                </Plot>
            </Disabled>
        </Gnuplotter>
    </Disabled>
-->
        <!--    <Disabled>
        <Gnuplotter name="Toxicity" time-step="6">
            <Plot>
                <Cells min="0" value="P_ic"/>
            </Plot>
            <Terminal name="png"/>
            <Plot>
                <Cells min="0" value="NAPQI"/>
            </Plot>
            <Plot>
                <Cells max="0.07" min="0" value="GSH_cell"/>
            </Plot>
            <Plot>
                <Cells value="NP_complex"/>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <!--    <Disabled>
        <Gnuplotter name="Intracellular proteins" time-step="24">
            <Terminal name="png"/>
            <Disabled>
                <Plot title="Cell types">
                    <Cells max="7" opacity="0.6" min="0" flooding="true" value="celltype">
                        <ColorMap>
                            <Color color="medium-blue" value="0"/>
                            <Color color="brown4" value="1"/>
                            <Color color="red" value="2"/>
                            <Color color="red" value="3"/>
                            <Color color="black" value="4"/>
                            <Color color="green" value="5"/>
                            <Color color="gray" value="6"/>
                            <Color color="orange-red" value="7"/>
                        </ColorMap>
                    </Cells>
                </Plot>
            </Disabled>
            <Plot>
                <Cells value="p53"/>
            </Plot>
            <Plot>
                <Cells value="p53p"/>
            </Plot>
            <Plot>
                <Cells max="4.6865" min="4.6863" value="p21"/>
            </Plot>
            <Disabled>
                <Plot>
                    <Cells max="0.2635" min="0.26255" value="MDM2"/>
                </Plot>
            </Disabled>
            <Plot>
                <Cells max="4.6865" min="4.686275" value="K"/>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <!--    <Disabled>
        <Gnuplotter name="Cytokines and chemokines" time-step="24">
            <Disabled>
                <Plot title="Cell types">
                    <Cells max="7" opacity="0.6" min="0" flooding="true" value="celltype">
                        <ColorMap>
                            <Color color="medium-blue" value="0"/>
                            <Color color="brown4" value="1"/>
                            <Color color="red" value="2"/>
                            <Color color="red" value="3"/>
                            <Color color="black" value="4"/>
                            <Color color="green" value="5"/>
                            <Color color="gray" value="6"/>
                            <Color color="orange-red" value="7"/>
                        </ColorMap>
                    </Cells>
                </Plot>
            </Disabled>
            <Plot>
                <Field symbol-ref="M" min="0"/>
            </Plot>
            <Terminal name="png"/>
            <Plot>
                <Field symbol-ref="MIT" min="0"/>
            </Plot>
            <Plot>
                <Field symbol-ref="T" min="0"/>
            </Plot>
            <Plot>
                <Field symbol-ref="D" min="0"/>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <Gnuplotter name="Presentation output" time-step="24">
            <Terminal name="png"/>
            <Plot title="Cell types">
                <Cells max="7" opacity="0.6" min="0" flooding="true" value="celltype">
                    <ColorMap>
                        <Color color="medium-blue" value="0"/>
                        <Color color="brown4" value="1"/>
                        <Color color="red" value="2"/>
                        <Color color="red" value="3"/>
                        <Color color="black" value="4"/>
                        <Color color="green" value="5"/>
                        <Color color="gray" value="6"/>
                        <Color color="orange-red" value="7"/>
                    </ColorMap>
                </Cells>
            </Plot>
            <!--    <Disabled>
        <Plot>
            <Field symbol-ref="APAP" min="0"/>
        </Plot>
    </Disabled>
-->
            <!--    <Disabled>
        <Plot>
            <Cells value="NT"/>
        </Plot>
    </Disabled>
-->
            <!--    <Disabled>
        <Plot>
            <Cells value="NAPQI_total"/>
        </Plot>
    </Disabled>
-->
        </Gnuplotter>
        <Logger name="Blood plasma concentration" time-step="3">
            <Input>
                <Disabled>
                    <Symbol symbol-ref="cell.id"/>
                </Disabled>
                <Disabled>
                    <Symbol symbol-ref="cell.id"/>
                </Disabled>
                <Symbol symbol-ref="P_pv_local"/>
            </Input>
            <Output>
                <TextOutput file-name="log_blood_apap"/>
            </Output>
            <Plots>
                <Plot time-step="288">
                    <Style style="points" point-size="0.5"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="real_time"/>
                    </X-axis>
                    <Y-axis>
                        <Disabled>
                            <Symbol symbol-ref="cell.id"/>
                        </Disabled>
                        <Disabled>
                            <Symbol symbol-ref="cell.id"/>
                        </Disabled>
                        <Disabled>
                            <Symbol symbol-ref="cell.id"/>
                        </Disabled>
                        <Symbol symbol-ref="P_pv_local"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
        <Logger name="Single cell concentrations" time-step="12">
            <Input>
                <Symbol symbol-ref="real_time"/>
                <Symbol symbol-ref="celltype"/>
                <Symbol symbol-ref="N"/>
                <Symbol symbol-ref="p53"/>
                <Symbol symbol-ref="p21"/>
                <Symbol symbol-ref="distance"/>
                <Symbol symbol-ref="Pin"/>
                <Symbol symbol-ref="P450_cell"/>
                <Symbol symbol-ref="G_cell"/>
                <Symbol symbol-ref="C"/>
                <Symbol symbol-ref="K"/>
                <Symbol symbol-ref="MDM2"/>
                <Symbol symbol-ref="NG"/>
                <Symbol symbol-ref="sulf"/>
                <Symbol symbol-ref="gluc"/>
                <Symbol symbol-ref="p53p"/>
            </Input>
            <Output>
                <TextOutput separator="tab" file-name="log_SingleCellConc" file-format="csv"/>
            </Output>
            <!--    <Disabled>
        <Plots>
            <Plot time-step="12">
                <Style style="points"/>
                <Terminal terminal="png"/>
                <X-axis>
                    <Symbol symbol-ref="real_time"/>
                </X-axis>
                <Y-axis>
                    <Symbol symbol-ref="p53"/>
                    <Symbol symbol-ref="p53p"/>
                </Y-axis>
            </Plot>
        </Plots>
    </Disabled>
-->
        </Logger>
        <Logger name="Volume" time-step="12.0">
            <Input>
                <Symbol symbol-ref="celltype"/>
                <Symbol symbol-ref="cell.id"/>
                <Symbol symbol-ref="cell.volume"/>
                <Symbol symbol-ref="volume_tot_hep"/>
                <Symbol symbol-ref="volume_tot_kupf"/>
            </Input>
            <Output>
                <TextOutput file-name="log_volume"/>
            </Output>
        </Logger>
        <!--    <Disabled>
        <Logger name="Mean NAPQI-protein" time-step="3">
            <Input>
                <Disabled>
                    <Symbol symbol-ref="cell.id"/>
                </Disabled>
                <Disabled>
                    <Symbol symbol-ref="cell.id"/>
                </Disabled>
                <Symbol symbol-ref="NP_mean"/>
            </Input>
            <Output>
                <TextOutput file-name="log_npmean"/>
            </Output>
            <Plots>
                <Plot time-step="2">
                    <Style style="points" point-size="0.5"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="real_time"/>
                    </X-axis>
                    <Y-axis>
                        <Disabled>
                            <Symbol symbol-ref="cell.id"/>
                        </Disabled>
                        <Disabled>
                            <Symbol symbol-ref="cell.id"/>
                        </Disabled>
                        <Disabled>
                            <Symbol symbol-ref="cell.id"/>
                        </Disabled>
                        <Symbol symbol-ref="NP_mean"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
    </Disabled>
-->
        <Logger name="APAP conversion" time-step="3">
            <Input>
                <Symbol symbol-ref="oxidation_total"/>
                <Symbol symbol-ref="glucu_sulf_total"/>
                <Symbol symbol-ref="Pin_total"/>
                <Symbol symbol-ref="Perc_gluc_sulf"/>
                <Symbol symbol-ref="Perc_oxidation"/>
                <Symbol symbol-ref="real_time"/>
                <Symbol symbol-ref="gluc_total"/>
                <Symbol symbol-ref="sulf_total"/>
            </Input>
            <Output>
                <TextOutput file-name="log_oxi_gluc"/>
            </Output>
            <Plots>
                <Plot time-step="288">
                    <Style style="points"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="real_time"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="oxidation_total"/>
                        <Symbol symbol-ref="glucu_sulf_total"/>
                        <Symbol symbol-ref="Pin_total"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
        <Logger name="Metabolite concentrations" time-step="3">
            <Input>
                <Symbol symbol-ref="N_max"/>
                <Symbol symbol-ref="NG_max"/>
                <Symbol symbol-ref="C_max"/>
                <Symbol symbol-ref="G_max"/>
                <Symbol symbol-ref="G_min"/>
                <Symbol symbol-ref="real_time"/>
            </Input>
            <Output>
                <TextOutput file-name="log_MetaboliteConc"/>
            </Output>
            <Plots>
                <Plot time-step="288">
                    <Style style="points"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="real_time"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="G_min"/>
                        <Symbol symbol-ref="G_max"/>
                        <Symbol symbol-ref="N_max"/>
                        <Symbol symbol-ref="NG_max"/>
                        <Symbol symbol-ref="C_max"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
        <Logger name="Cell counts" time-step="3">
            <Input>
                <Symbol symbol-ref="necrotic_total"/>
                <Symbol symbol-ref="hepatocytes_total"/>
                <Symbol symbol-ref="kupffer_total"/>
                <Symbol symbol-ref="macrophages_total"/>
                <Symbol symbol-ref="senescent_total"/>
            </Input>
            <Output>
                <TextOutput file-name="log_cellcounts"/>
            </Output>
            <Plots>
                <Plot time-step="288">
                    <Style style="points"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="real_time"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="hepatocytes_total"/>
                        <Symbol symbol-ref="necrotic_total"/>
                        <Symbol symbol-ref="senescent_total"/>
                        <Symbol symbol-ref="macrophages_total"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
        <!--    <Disabled>
        <Logger name="Field values" time-step="1000">
            <Input>
                <Symbol symbol-ref="portal_area"/>
                <Disabled>
                    <Symbol symbol-ref="cell.id"/>
                </Disabled>
                <Symbol symbol-ref="periportal_area"/>
            </Input>
            <Output>
                <TextOutput file-name="Field values"/>
            </Output>
        </Logger>
    </Disabled>
-->
        <Logger name="APAP elimination" time-step="3">
            <Input>
                <Symbol symbol-ref="real_time"/>
                <Symbol symbol-ref="efflux_perc"/>
                <Symbol symbol-ref="uptake_perc"/>
            </Input>
            <Output>
                <TextOutput file-name="log_Elimination"/>
            </Output>
        </Logger>
        <Logger name="Mean MCP-1 in PP" time-step="3">
            <Input>
                <Disabled>
                    <Symbol symbol-ref="cell.id"/>
                </Disabled>
                <Disabled>
                    <Symbol symbol-ref="cell.id"/>
                </Disabled>
                <Symbol symbol-ref="M_pp"/>
            </Input>
            <Output>
                <TextOutput file-name="log_mcp1"/>
            </Output>
            <Plots>
                <Plot time-step="288">
                    <Style style="points" point-size="0.5"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="real_time"/>
                    </X-axis>
                    <Y-axis>
                        <Disabled>
                            <Symbol symbol-ref="cell.id"/>
                        </Disabled>
                        <Disabled>
                            <Symbol symbol-ref="cell.id"/>
                        </Disabled>
                        <Disabled>
                            <Symbol symbol-ref="cell.id"/>
                        </Disabled>
                        <Symbol symbol-ref="M_pp"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
        <Logger name="Extracellular concentrations" time-step="3">
            <Input>
                <Symbol symbol-ref="real_time"/>
                <Symbol symbol-ref="Pex_mean"/>
                <Symbol symbol-ref="MIT_mean"/>
                <Symbol symbol-ref="M_mean"/>
                <Symbol symbol-ref="D_mean"/>
                <Symbol symbol-ref="T_mean"/>
            </Input>
            <Output>
                <TextOutput separator="tab" file-name="log_ExtracellularConc" file-format="csv"/>
            </Output>
        </Logger>
        <!--    <Disabled>
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="MCP1_loc_kup"/>
                <Symbol symbol-ref="cell.volume"/>
            </Input>
            <Output>
                <TextOutput file-name="mcp1_loc_kup"/>
            </Output>
        </Logger>
    </Disabled>
-->
        <!--    <Disabled>
        <Logger name="parameter_values" time-step="1.0">
            <Input>
                <Symbol symbol-ref="kpsh"/>
                <Symbol symbol-ref="bGSH"/>
                <Symbol symbol-ref="kGSH"/>
                <Symbol symbol-ref="Pin"/>
                <Symbol symbol-ref="G_dist"/>
            </Input>
            <Output>
                <TextOutput file-name="kpsh"/>
            </Output>
        </Logger>
    </Disabled>
-->
        <!--    <Disabled>
        <Gnuplotter time-step="1.0">
            <Plot>
                <Field symbol-ref="portal_area"/>
            </Plot>
            <Terminal name="png"/>
            <Plot>
                <Field symbol-ref="periportal_area"/>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <!--    <Disabled>
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="real_time"/>
                <Symbol symbol-ref="treatment_time"/>
                <Symbol symbol-ref="after_treatment"/>
                <Symbol symbol-ref="random"/>
                <Symbol symbol-ref="p_necrosis"/>
                <Symbol symbol-ref="binary"/>
            </Input>
            <Output>
                <TextOutput file-name="log_check_necrosis"/>
            </Output>
        </Logger>
    </Disabled>
-->
    </Analysis>
    <!--    <Disabled>
        <CellPopulations>
            <Population size="178" type="kupffer">
                <Cell id="24">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>156.173913,56.04347826,0</Center>
                    <Nodes>157, 53, 0;155, 54, 0;156, 54, 0;157, 54, 0;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0</Nodes>
                </Cell>
                <Cell id="26">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>141.3913043,119.9565217,0</Center>
                    <Nodes>142, 116, 0;140, 117, 0;141, 117, 0;142, 117, 0;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0</Nodes>
                </Cell>
                <Cell id="52">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>40.65217391,65.2173913,0</Center>
                    <Nodes>38, 64, 0;39, 64, 0;40, 64, 0;41, 64, 0;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0</Nodes>
                </Cell>
                <Cell id="55">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>150.7391304,72.30434783,0</Center>
                    <Nodes>150, 68, 0;149, 69, 0;150, 69, 0;151, 69, 0;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0</Nodes>
                </Cell>
                <Cell id="64">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>125,42.04347826,0</Center>
                    <Nodes>128, 39, 0;124, 40, 0;125, 40, 0;126, 40, 0;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0</Nodes>
                </Cell>
                <Cell id="67">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>62.17391304,49.65217391,0</Center>
                    <Nodes>59, 48, 0;60, 48, 0;59, 49, 0;60, 49, 0;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0</Nodes>
                </Cell>
                <Cell id="81">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>130.125,132.9583333,0</Center>
                    <Nodes>128, 131, 0;129, 131, 0;127, 132, 0;128, 132, 0;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0</Nodes>
                </Cell>
                <Cell id="83">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>113.2173913,143.9565217,0</Center>
                    <Nodes>110, 142, 0;111, 142, 0;109, 143, 0;110, 143, 0;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0</Nodes>
                </Cell>
                <Cell id="85">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>121.7826087,47.86956522,0</Center>
                    <Nodes>120, 45, 0;121, 45, 0;120, 46, 0;121, 46, 0;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0</Nodes>
                </Cell>
                <Cell id="94">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>71.33333333,65.25,0</Center>
                    <Nodes>69, 62, 0;69, 63, 0;70, 63, 0;71, 63, 0;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0</Nodes>
                </Cell>
                <Cell id="109">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>93.59090909,175.3181818,0</Center>
                    <Nodes>94, 172, 0;94, 173, 0;95, 173, 0;96, 173, 0;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0</Nodes>
                </Cell>
                <Cell id="112">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>98.13043478,123.0869565,0</Center>
                    <Nodes>97, 121, 0;98, 121, 0;99, 121, 0;100, 121, 0;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0</Nodes>
                </Cell>
                <Cell id="123">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>130.0833333,183.7916667,0</Center>
                    <Nodes>128, 181, 0;129, 181, 0;128, 182, 0;129, 182, 0;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0</Nodes>
                </Cell>
                <Cell id="148">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>146.7826087,56.60869565,0</Center>
                    <Nodes>147, 53, 0;146, 54, 0;147, 54, 0;145, 55, 0;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0</Nodes>
                </Cell>
                <Cell id="164">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>18.86363636,86.31818182,0</Center>
                    <Nodes>19, 83, 0;20, 83, 0;18, 84, 0;19, 84, 0;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0</Nodes>
                </Cell>
                <Cell id="179">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>54.52173913,94.95652174,0</Center>
                    <Nodes>57, 92, 0;54, 93, 0;55, 93, 0;56, 93, 0;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0</Nodes>
                </Cell>
                <Cell id="186">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>139.7826087,166.9130435,0</Center>
                    <Nodes>140, 164, 0;141, 164, 0;142, 164, 0;139, 165, 0;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0</Nodes>
                </Cell>
                <Cell id="193">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>128.173913,101,0</Center>
                    <Nodes>130, 99, 0;125, 100, 0;126, 100, 0;127, 100, 0;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0</Nodes>
                </Cell>
                <Cell id="199">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>65.52173913,102,0</Center>
                    <Nodes>66, 100, 0;67, 100, 0;68, 100, 0;69, 100, 0;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0</Nodes>
                </Cell>
                <Cell id="201">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>61.60869565,160.4347826,0</Center>
                    <Nodes>60, 158, 0;59, 159, 0;60, 159, 0;61, 159, 0;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0</Nodes>
                </Cell>
                <Cell id="209">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>92.13043478,79.47826087,0</Center>
                    <Nodes>89, 78, 0;90, 78, 0;91, 78, 0;92, 78, 0;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0</Nodes>
                </Cell>
                <Cell id="211">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>112.6956522,170.0869565,0</Center>
                    <Nodes>110, 168, 0;109, 169, 0;110, 169, 0;111, 169, 0;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0</Nodes>
                </Cell>
                <Cell id="227">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>80.625,110.875,0</Center>
                    <Nodes>80, 109, 0;81, 109, 0;82, 109, 0;78, 110, 0;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0</Nodes>
                </Cell>
                <Cell id="243">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>115.9130435,128.173913,0</Center>
                    <Nodes>115, 125, 0;114, 126, 0;115, 126, 0;116, 126, 0;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0</Nodes>
                </Cell>
                <Cell id="250">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>160.8181818,54.31818182,0</Center>
                    <Nodes>159, 52, 0;160, 52, 0;161, 52, 0;158, 53, 0;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0</Nodes>
                </Cell>
                <Cell id="253">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>62.41666667,141.25,0</Center>
                    <Nodes>64, 137, 0;63, 138, 0;64, 138, 0;65, 138, 0;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0</Nodes>
                </Cell>
                <Cell id="289">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>166.1666667,107.6666667,0</Center>
                    <Nodes>167, 105, 0;168, 105, 0;167, 106, 0;168, 106, 0;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0</Nodes>
                </Cell>
                <Cell id="307">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>108.1304348,173.6086957,0</Center>
                    <Nodes>108, 171, 0;109, 171, 0;110, 171, 0;107, 172, 0;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0</Nodes>
                </Cell>
                <Cell id="310">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>153.5,135.1363636,0</Center>
                    <Nodes>151, 133, 0;151, 134, 0;152, 134, 0;153, 134, 0;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0</Nodes>
                </Cell>
                <Cell id="314">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>151,79.63636364,0</Center>
                    <Nodes>148, 77, 0;149, 77, 0;150, 77, 0;151, 77, 0;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0</Nodes>
                </Cell>
                <Cell id="324">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>72.91304348,121.6086957,0</Center>
                    <Nodes>70, 119, 0;69, 120, 0;70, 120, 0;71, 120, 0;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0</Nodes>
                </Cell>
                <Cell id="326">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>76.13043478,47.56521739,0</Center>
                    <Nodes>77, 44, 0;76, 45, 0;77, 45, 0;78, 45, 0;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0</Nodes>
                </Cell>
                <Cell id="328">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>115.7727273,84.22727273,0</Center>
                    <Nodes>116, 82, 0;117, 82, 0;118, 82, 0;119, 82, 0;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0</Nodes>
                </Cell>
                <Cell id="332">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>123.5416667,33.45833333,0</Center>
                    <Nodes>121, 32, 0;122, 32, 0;123, 32, 0;124, 32, 0;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0</Nodes>
                </Cell>
                <Cell id="334">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>119.9166667,85.125,0</Center>
                    <Nodes>121, 81, 0;120, 82, 0;121, 82, 0;118, 83, 0;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0</Nodes>
                </Cell>
                <Cell id="342">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>71.36363636,80.77272727,0</Center>
                    <Nodes>73, 77, 0;72, 78, 0;73, 78, 0;72, 79, 0;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0</Nodes>
                </Cell>
                <Cell id="350">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>144.3809524,130.1904762,0</Center>
                    <Nodes>146, 127, 0;146, 128, 0;147, 128, 0;145, 129, 0;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0</Nodes>
                </Cell>
                <Cell id="385">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>131.2608696,36.26086957,0</Center>
                    <Nodes>132, 34, 0;134, 34, 0;135, 34, 0;130, 35, 0;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0</Nodes>
                </Cell>
                <Cell id="390">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>52.41666667,84.75,0</Center>
                    <Nodes>52, 81, 0;51, 82, 0;52, 82, 0;53, 82, 0;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0</Nodes>
                </Cell>
                <Cell id="396">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>58.69565217,71.30434783,0</Center>
                    <Nodes>60, 67, 0;59, 68, 0;60, 68, 0;58, 69, 0;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0</Nodes>
                </Cell>
                <Cell id="401">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>122.7391304,137.6521739,0</Center>
                    <Nodes>121, 135, 0;120, 136, 0;122, 136, 0;123, 136, 0;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0</Nodes>
                </Cell>
                <Cell id="410">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>83.08695652,103.1304348,0</Center>
                    <Nodes>83, 101, 0;85, 101, 0;82, 102, 0;83, 102, 0;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0</Nodes>
                </Cell>
                <Cell id="421">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>164,62.7826087,0</Center>
                    <Nodes>166, 61, 0;167, 61, 0;160, 62, 0;161, 62, 0;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0</Nodes>
                </Cell>
                <Cell id="424">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>87.13636364,25.40909091,0</Center>
                    <Nodes>88, 22, 0;87, 23, 0;88, 23, 0;86, 24, 0;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0</Nodes>
                </Cell>
                <Cell id="446">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>41.08695652,149,0</Center>
                    <Nodes>44, 147, 0;38, 148, 0;39, 148, 0;40, 148, 0;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0</Nodes>
                </Cell>
                <Cell id="455">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>49.69565217,160.2608696,0</Center>
                    <Nodes>48, 156, 0;49, 156, 0;48, 157, 0;49, 157, 0;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0</Nodes>
                </Cell>
                <Cell id="457">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>171.3636364,123.1818182,0</Center>
                    <Nodes>169, 120, 0;169, 121, 0;169, 122, 0;170, 122, 0;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0</Nodes>
                </Cell>
                <Cell id="465">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>153.1304348,149.6521739,0</Center>
                    <Nodes>153, 148, 0;154, 148, 0;155, 148, 0;150, 149, 0;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0</Nodes>
                </Cell>
                <Cell id="469">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>138.3913043,25.2173913,0</Center>
                    <Nodes>138, 22, 0;139, 22, 0;140, 22, 0;137, 23, 0;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0</Nodes>
                </Cell>
                <Cell id="475">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>149.3478261,90.65217391,0</Center>
                    <Nodes>147, 89, 0;148, 89, 0;152, 89, 0;147, 90, 0;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0</Nodes>
                </Cell>
                <Cell id="477">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>113.375,118.1666667,0</Center>
                    <Nodes>113, 116, 0;114, 116, 0;111, 117, 0;112, 117, 0;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0</Nodes>
                </Cell>
                <Cell id="490">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>69.18181818,32.45454545,0</Center>
                    <Nodes>70, 28, 0;69, 29, 0;70, 29, 0;71, 29, 0;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0</Nodes>
                </Cell>
                <Cell id="497">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>115.173913,51.26086957,0</Center>
                    <Nodes>113, 48, 0;114, 48, 0;112, 49, 0;113, 49, 0;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0</Nodes>
                </Cell>
                <Cell id="499">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>147.5714286,23.85714286,0</Center>
                    <Nodes>147, 22, 0;148, 22, 0;149, 22, 0;150, 22, 0;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0</Nodes>
                </Cell>
                <Cell id="513">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>23.65217391,97.08695652,0</Center>
                    <Nodes>20, 95, 0;21, 95, 0;22, 95, 0;24, 95, 0;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0</Nodes>
                </Cell>
                <Cell id="522">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>62.86956522,40.39130435,0</Center>
                    <Nodes>60, 38, 0;61, 38, 0;62, 38, 0;63, 38, 0;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0</Nodes>
                </Cell>
                <Cell id="535">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>68.85714286,148.3333333,0</Center>
                    <Nodes>67, 147, 0;68, 147, 0;70, 147, 0;71, 147, 0;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0</Nodes>
                </Cell>
                <Cell id="548">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>27.5,108.3636364,0</Center>
                    <Nodes>26, 104, 0;26, 105, 0;26, 106, 0;27, 106, 0;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0</Nodes>
                </Cell>
                <Cell id="575">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>52.86956522,57.08695652,0</Center>
                    <Nodes>52, 54, 0;51, 55, 0;52, 55, 0;53, 55, 0;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0</Nodes>
                </Cell>
                <Cell id="584">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>64.65217391,12.60869565,0</Center>
                    <Nodes>61, 11, 0;62, 11, 0;63, 11, 0;65, 11, 0;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0</Nodes>
                </Cell>
                <Cell id="592">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>95.73913043,134.9130435,0</Center>
                    <Nodes>95, 132, 0;96, 132, 0;94, 133, 0;95, 133, 0;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0</Nodes>
                </Cell>
                <Cell id="600">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>69.41666667,115.8333333,0</Center>
                    <Nodes>67, 114, 0;68, 114, 0;71, 114, 0;66, 115, 0;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0</Nodes>
                </Cell>
                <Cell id="605">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>103.0869565,138.3478261,0</Center>
                    <Nodes>101, 135, 0;101, 136, 0;102, 136, 0;103, 136, 0;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0</Nodes>
                </Cell>
                <Cell id="612">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>108,38.76,0</Center>
                    <Nodes>109, 37, 0;110, 37, 0;111, 37, 0;105, 38, 0;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0</Nodes>
                </Cell>
                <Cell id="614">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>122.7391304,16.30434783,0</Center>
                    <Nodes>119, 14, 0;120, 14, 0;121, 14, 0;122, 14, 0;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0</Nodes>
                </Cell>
                <Cell id="635">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>125.6818182,146.9090909,0</Center>
                    <Nodes>123, 145, 0;124, 145, 0;125, 145, 0;126, 145, 0;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0</Nodes>
                </Cell>
                <Cell id="641">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>56.26086957,103.3913043,0</Center>
                    <Nodes>57, 100, 0;58, 100, 0;55, 101, 0;56, 101, 0;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0</Nodes>
                </Cell>
                <Cell id="667">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>158.1818182,104.6818182,0</Center>
                    <Nodes>159, 101, 0;157, 102, 0;158, 102, 0;159, 102, 0;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0</Nodes>
                </Cell>
                <Cell id="669">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>82.82608696,128.5217391,0</Center>
                    <Nodes>82, 125, 0;83, 125, 0;84, 125, 0;82, 126, 0;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0</Nodes>
                </Cell>
                <Cell id="671">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>125.0869565,182.9565217,0</Center>
                    <Nodes>123, 180, 0;123, 181, 0;124, 181, 0;125, 181, 0;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0</Nodes>
                </Cell>
                <Cell id="683">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>74,106.3181818,0</Center>
                    <Nodes>74, 103, 0;75, 103, 0;76, 103, 0;74, 104, 0;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0</Nodes>
                </Cell>
                <Cell id="699">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>98.59090909,148.1363636,0</Center>
                    <Nodes>96, 147, 0;98, 147, 0;99, 147, 0;100, 147, 0;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0</Nodes>
                </Cell>
                <Cell id="716">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>157.173913,170.4782609,0</Center>
                    <Nodes>154, 169, 0;155, 169, 0;159, 169, 0;160, 169, 0;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0</Nodes>
                </Cell>
                <Cell id="719">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>26.09090909,78.95454545,0</Center>
                    <Nodes>23, 77, 0;25, 77, 0;26, 77, 0;28, 77, 0;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0</Nodes>
                </Cell>
                <Cell id="725">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>77.22727273,36.31818182,0</Center>
                    <Nodes>75, 34, 0;74, 35, 0;75, 35, 0;76, 35, 0;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0</Nodes>
                </Cell>
                <Cell id="729">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>85.95652174,119.6956522,0</Center>
                    <Nodes>88, 117, 0;87, 118, 0;88, 118, 0;83, 119, 0;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0</Nodes>
                </Cell>
                <Cell id="731">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>92.09090909,141.2272727,0</Center>
                    <Nodes>93, 138, 0;94, 138, 0;91, 139, 0;92, 139, 0;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0</Nodes>
                </Cell>
                <Cell id="741">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>138.6521739,60.60869565,0</Center>
                    <Nodes>137, 59, 0;138, 59, 0;139, 59, 0;140, 59, 0;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0</Nodes>
                </Cell>
                <Cell id="747">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>148.5652174,27.82608696,0</Center>
                    <Nodes>149, 25, 0;150, 25, 0;151, 25, 0;148, 26, 0;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0</Nodes>
                </Cell>
                <Cell id="761">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>115.6521739,158.2608696,0</Center>
                    <Nodes>117, 155, 0;118, 155, 0;116, 156, 0;117, 156, 0;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0</Nodes>
                </Cell>
                <Cell id="765">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>186.173913,89.91304348,0</Center>
                    <Nodes>189, 88, 0;190, 88, 0;183, 89, 0;184, 89, 0;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0</Nodes>
                </Cell>
                <Cell id="770">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>150.1304348,107.6521739,0</Center>
                    <Nodes>151, 105, 0;152, 105, 0;153, 105, 0;150, 106, 0;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0</Nodes>
                </Cell>
                <Cell id="827">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>124.1904762,105,0</Center>
                    <Nodes>122, 102, 0;122, 103, 0;123, 103, 0;124, 103, 0;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0</Nodes>
                </Cell>
                <Cell id="833">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>74.30434783,131.2173913,0</Center>
                    <Nodes>70, 130, 0;71, 130, 0;72, 130, 0;73, 130, 0;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0</Nodes>
                </Cell>
                <Cell id="851">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>123.7916667,94.70833333,0</Center>
                    <Nodes>126, 92, 0;127, 92, 0;124, 93, 0;125, 93, 0;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0</Nodes>
                </Cell>
                <Cell id="854">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>89.36363636,130.3636364,0</Center>
                    <Nodes>90, 127, 0;89, 128, 0;90, 128, 0;91, 128, 0;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0</Nodes>
                </Cell>
                <Cell id="861">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>157.7727273,118.1818182,0</Center>
                    <Nodes>155, 117, 0;156, 117, 0;157, 117, 0;158, 117, 0;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0</Nodes>
                </Cell>
                <Cell id="886">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>104.7391304,116.7391304,0</Center>
                    <Nodes>106, 113, 0;104, 114, 0;105, 114, 0;106, 114, 0;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0</Nodes>
                </Cell>
                <Cell id="889">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>176.7391304,95.7826087,0</Center>
                    <Nodes>174, 93, 0;175, 93, 0;176, 93, 0;175, 94, 0;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0</Nodes>
                </Cell>
                <Cell id="892">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>79.31818182,22.54545455,0</Center>
                    <Nodes>76, 20, 0;77, 20, 0;78, 20, 0;79, 20, 0;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0</Nodes>
                </Cell>
                <Cell id="894">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>74.26086957,164.3043478,0</Center>
                    <Nodes>75, 161, 0;73, 162, 0;74, 162, 0;75, 162, 0;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0</Nodes>
                </Cell>
                <Cell id="898">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>143.2727273,156.4090909,0</Center>
                    <Nodes>141, 155, 0;142, 155, 0;146, 155, 0;147, 155, 0;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0</Nodes>
                </Cell>
                <Cell id="900">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>136.2727273,153.5,0</Center>
                    <Nodes>134, 151, 0;135, 151, 0;134, 152, 0;135, 152, 0;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0</Nodes>
                </Cell>
                <Cell id="905">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>101.2173913,25.91304348,0</Center>
                    <Nodes>100, 24, 0;101, 24, 0;102, 24, 0;103, 24, 0;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0</Nodes>
                </Cell>
                <Cell id="907">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>61.625,151.5,0</Center>
                    <Nodes>64, 149, 0;60, 150, 0;62, 150, 0;63, 150, 0;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0</Nodes>
                </Cell>
                <Cell id="909">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>133.4583333,94.91666667,0</Center>
                    <Nodes>131, 93, 0;132, 93, 0;133, 93, 0;130, 94, 0;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0</Nodes>
                </Cell>
                <Cell id="927">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>40.13043478,128.826087,0</Center>
                    <Nodes>38, 126, 0;39, 126, 0;37, 127, 0;38, 127, 0;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0</Nodes>
                </Cell>
                <Cell id="934">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>158.9090909,159.0909091,0</Center>
                    <Nodes>158, 156, 0;159, 156, 0;156, 157, 0;157, 157, 0;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0</Nodes>
                </Cell>
                <Cell id="937">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>124.6666667,63.625,0</Center>
                    <Nodes>124, 60, 0;123, 61, 0;124, 61, 0;122, 62, 0;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0</Nodes>
                </Cell>
                <Cell id="968">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>142.5,140.3181818,0</Center>
                    <Nodes>142, 138, 0;143, 138, 0;144, 138, 0;145, 138, 0;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0</Nodes>
                </Cell>
                <Cell id="975">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>57.63636364,33.59090909,0</Center>
                    <Nodes>56, 31, 0;57, 31, 0;58, 31, 0;59, 31, 0;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0</Nodes>
                </Cell>
                <Cell id="1001">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>161.0869565,95.34782609,0</Center>
                    <Nodes>159, 94, 0;160, 94, 0;161, 94, 0;162, 94, 0;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0</Nodes>
                </Cell>
                <Cell id="1003">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>63.91304348,87.26086957,0</Center>
                    <Nodes>61, 84, 0;61, 85, 0;62, 85, 0;64, 85, 0;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0</Nodes>
                </Cell>
                <Cell id="1015">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>132.5217391,84.95652174,0</Center>
                    <Nodes>132, 81, 0;131, 82, 0;132, 82, 0;131, 83, 0;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0</Nodes>
                </Cell>
                <Cell id="1034">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>109.2857143,179.5714286,0</Center>
                    <Nodes>109, 177, 0;109, 178, 0;110, 178, 0;111, 178, 0;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0</Nodes>
                </Cell>
                <Cell id="1037">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>165.625,80.875,0</Center>
                    <Nodes>164, 77, 0;164, 78, 0;165, 78, 0;164, 79, 0;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0</Nodes>
                </Cell>
                <Cell id="1046">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>75.13636364,94.13636364,0</Center>
                    <Nodes>75, 91, 0;78, 91, 0;75, 92, 0;76, 92, 0;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0</Nodes>
                </Cell>
                <Cell id="1056">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>90.45454545,40.72727273,0</Center>
                    <Nodes>89, 39, 0;92, 39, 0;87, 40, 0;88, 40, 0;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0</Nodes>
                </Cell>
                <Cell id="1063">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>86.17391304,154.9565217,0</Center>
                    <Nodes>84, 152, 0;85, 152, 0;86, 152, 0;84, 153, 0;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0</Nodes>
                </Cell>
                <Cell id="1069">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>72.13636364,53.77272727,0</Center>
                    <Nodes>72, 51, 0;73, 51, 0;70, 52, 0;71, 52, 0;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0</Nodes>
                </Cell>
                <Cell id="1073">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>100.8181818,46.45454545,0</Center>
                    <Nodes>98, 44, 0;99, 44, 0;100, 44, 0;101, 44, 0;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0</Nodes>
                </Cell>
                <Cell id="1084">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>142.3043478,83.17391304,0</Center>
                    <Nodes>143, 80, 0;144, 80, 0;141, 81, 0;142, 81, 0;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0</Nodes>
                </Cell>
                <Cell id="1116">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>61.66666667,125.3333333,0</Center>
                    <Nodes>61, 123, 0;58, 124, 0;59, 124, 0;61, 124, 0;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0</Nodes>
                </Cell>
                <Cell id="1118">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>132.2727273,115.6818182,0</Center>
                    <Nodes>128, 114, 0;129, 114, 0;130, 114, 0;129, 115, 0;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0</Nodes>
                </Cell>
                <Cell id="1132">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>158.1304348,99.17391304,0</Center>
                    <Nodes>159, 97, 0;160, 97, 0;161, 97, 0;162, 97, 0;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0</Nodes>
                </Cell>
                <Cell id="1138">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>145.9565217,45.91304348,0</Center>
                    <Nodes>144, 43, 0;145, 43, 0;146, 43, 0;147, 43, 0;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0</Nodes>
                </Cell>
                <Cell id="1141">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>98.27272727,77.90909091,0</Center>
                    <Nodes>99, 74, 0;100, 74, 0;98, 75, 0;99, 75, 0;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0</Nodes>
                </Cell>
                <Cell id="1146">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>89.47826087,58.39130435,0</Center>
                    <Nodes>91, 55, 0;91, 56, 0;92, 56, 0;90, 57, 0;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0</Nodes>
                </Cell>
                <Cell id="1171">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>49.69565217,139.8695652,0</Center>
                    <Nodes>48, 137, 0;49, 137, 0;50, 137, 0;48, 138, 0;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0</Nodes>
                </Cell>
                <Cell id="1184">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>36.13043478,150.1304348,0</Center>
                    <Nodes>36, 147, 0;34, 148, 0;35, 148, 0;36, 148, 0;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0</Nodes>
                </Cell>
                <Cell id="1192">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>147.6363636,100.6363636,0</Center>
                    <Nodes>149, 98, 0;150, 98, 0;148, 99, 0;149, 99, 0;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0</Nodes>
                </Cell>
                <Cell id="1198">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>35.36363636,115.2272727,0</Center>
                    <Nodes>36, 110, 0;35, 111, 0;36, 111, 0;36, 112, 0;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0</Nodes>
                </Cell>
                <Cell id="1201">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>113.3636364,76.45454545,0</Center>
                    <Nodes>115, 74, 0;111, 75, 0;115, 75, 0;116, 75, 0;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0</Nodes>
                </Cell>
                <Cell id="1229">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>159.6363636,45.04545455,0</Center>
                    <Nodes>159, 42, 0;160, 42, 0;161, 42, 0;158, 43, 0;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0</Nodes>
                </Cell>
                <Cell id="1233">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>29.39130435,52.60869565,0</Center>
                    <Nodes>30, 49, 0;31, 49, 0;30, 50, 0;31, 50, 0;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0</Nodes>
                </Cell>
                <Cell id="1278">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>164.3636364,52.90909091,0</Center>
                    <Nodes>164, 50, 0;161, 51, 0;162, 51, 0;163, 51, 0;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0</Nodes>
                </Cell>
                <Cell id="1310">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>154.1363636,62.09090909,0</Center>
                    <Nodes>153, 58, 0;153, 59, 0;154, 59, 0;153, 60, 0;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0</Nodes>
                </Cell>
                <Cell id="1314">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>82.52173913,56.17391304,0</Center>
                    <Nodes>80, 55, 0;81, 55, 0;82, 55, 0;83, 55, 0;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0</Nodes>
                </Cell>
                <Cell id="1326">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>174.173913,119.5217391,0</Center>
                    <Nodes>174, 116, 0;175, 116, 0;173, 117, 0;174, 117, 0;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0</Nodes>
                </Cell>
                <Cell id="1350">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>113.952381,62.66666667,0</Center>
                    <Nodes>115, 60, 0;114, 61, 0;115, 61, 0;116, 61, 0;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0</Nodes>
                </Cell>
                <Cell id="1386">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>141.4090909,88.77272727,0</Center>
                    <Nodes>139, 87, 0;140, 87, 0;141, 87, 0;138, 88, 0;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0</Nodes>
                </Cell>
                <Cell id="1402">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>139.7391304,41.95652174,0</Center>
                    <Nodes>138, 40, 0;138, 41, 0;139, 41, 0;140, 41, 0;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0</Nodes>
                </Cell>
                <Cell id="1413">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>124.826087,71.56521739,0</Center>
                    <Nodes>127, 69, 0;126, 70, 0;127, 70, 0;121, 71, 0;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0</Nodes>
                </Cell>
                <Cell id="1420">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>36.95454545,123.9545455,0</Center>
                    <Nodes>39, 120, 0;39, 121, 0;37, 122, 0;38, 122, 0;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0</Nodes>
                </Cell>
                <Cell id="1437">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>99.08695652,54.95652174,0</Center>
                    <Nodes>98, 52, 0;97, 53, 0;98, 53, 0;99, 53, 0;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0</Nodes>
                </Cell>
                <Cell id="1455">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>91.73913043,70.34782609,0</Center>
                    <Nodes>90, 68, 0;91, 68, 0;90, 69, 0;91, 69, 0;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0</Nodes>
                </Cell>
                <Cell id="1461">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>41.90909091,95.95454545,0</Center>
                    <Nodes>42, 93, 0;42, 94, 0;43, 94, 0;44, 94, 0;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0</Nodes>
                </Cell>
                <Cell id="1471">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>183.7727273,106.6818182,0</Center>
                    <Nodes>181, 104, 0;182, 104, 0;183, 104, 0;182, 105, 0;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0</Nodes>
                </Cell>
                <Cell id="1473">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>32,139.3913043,0</Center>
                    <Nodes>29, 137, 0;29, 138, 0;30, 138, 0;31, 138, 0;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0</Nodes>
                </Cell>
                <Cell id="1505">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>130.25,25.29166667,0</Center>
                    <Nodes>130, 21, 0;129, 22, 0;130, 22, 0;131, 22, 0;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0</Nodes>
                </Cell>
                <Cell id="1509">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>62.2173913,111.6956522,0</Center>
                    <Nodes>59, 110, 0;60, 110, 0;65, 110, 0;59, 111, 0;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0</Nodes>
                </Cell>
                <Cell id="1517">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>120.5,26.22727273,0</Center>
                    <Nodes>123, 23, 0;122, 24, 0;123, 24, 0;120, 25, 0;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0</Nodes>
                </Cell>
                <Cell id="1568">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>48.95652174,109.4782609,0</Center>
                    <Nodes>47, 106, 0;47, 107, 0;48, 107, 0;49, 107, 0;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0</Nodes>
                </Cell>
                <Cell id="1581">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>132.6956522,62.04347826,0</Center>
                    <Nodes>132, 58, 0;132, 59, 0;133, 59, 0;134, 59, 0;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0</Nodes>
                </Cell>
                <Cell id="1626">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>141.3333333,69,0</Center>
                    <Nodes>144, 67, 0;138, 68, 0;139, 68, 0;140, 68, 0;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0</Nodes>
                </Cell>
                <Cell id="1640">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>82.69565217,179.0434783,0</Center>
                    <Nodes>81, 176, 0;80, 177, 0;81, 177, 0;79, 178, 0;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0</Nodes>
                </Cell>
                <Cell id="1662">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>106.3043478,17.60869565,0</Center>
                    <Nodes>107, 14, 0;108, 14, 0;107, 15, 0;108, 15, 0;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0</Nodes>
                </Cell>
                <Cell id="1697">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>55.04,27.44,0</Center>
                    <Nodes>54, 23, 0;55, 23, 0;54, 24, 0;55, 24, 0;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0</Nodes>
                </Cell>
                <Cell id="1703">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>109.9090909,48.68181818,0</Center>
                    <Nodes>112, 45, 0;111, 46, 0;112, 46, 0;110, 47, 0;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0</Nodes>
                </Cell>
                <Cell id="1708">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>153.4545455,40.31818182,0</Center>
                    <Nodes>153, 39, 0;154, 39, 0;155, 39, 0;156, 39, 0;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0</Nodes>
                </Cell>
                <Cell id="1749">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>92.09090909,18.13636364,0</Center>
                    <Nodes>93, 14, 0;92, 15, 0;93, 15, 0;90, 16, 0;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0</Nodes>
                </Cell>
                <Cell id="1792">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>80.73913043,67.86956522,0</Center>
                    <Nodes>81, 66, 0;82, 66, 0;83, 66, 0;79, 67, 0;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0</Nodes>
                </Cell>
                <Cell id="1796">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>156.9130435,127.6956522,0</Center>
                    <Nodes>157, 124, 0;157, 125, 0;158, 125, 0;156, 126, 0;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0</Nodes>
                </Cell>
                <Cell id="1837">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>53.86956522,44.17391304,0</Center>
                    <Nodes>53, 42, 0;54, 42, 0;53, 43, 0;54, 43, 0;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0</Nodes>
                </Cell>
                <Cell id="1858">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>151.9583333,156.2083333,0</Center>
                    <Nodes>152, 152, 0;151, 153, 0;152, 153, 0;151, 154, 0;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0</Nodes>
                </Cell>
                <Cell id="1947">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>31.04545455,133.6363636,0</Center>
                    <Nodes>30, 129, 0;31, 129, 0;31, 130, 0;32, 130, 0;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0</Nodes>
                </Cell>
                <Cell id="1986">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>49.76190476,35.61904762,0</Center>
                    <Nodes>49, 32, 0;50, 32, 0;51, 32, 0;49, 33, 0;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0</Nodes>
                </Cell>
                <Cell id="2028">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>41.68181818,57.36363636,0</Center>
                    <Nodes>39, 56, 0;40, 56, 0;43, 56, 0;44, 56, 0;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0</Nodes>
                </Cell>
                <Cell id="2032">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>42.08695652,159.6521739,0</Center>
                    <Nodes>41, 156, 0;42, 156, 0;41, 157, 0;42, 157, 0;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0</Nodes>
                </Cell>
                <Cell id="2063">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>128.826087,11.52173913,0</Center>
                    <Nodes>127, 8, 0;128, 8, 0;127, 9, 0;128, 9, 0;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0</Nodes>
                </Cell>
                <Cell id="2074">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>13.22727273,88.86363636,0</Center>
                    <Nodes>12, 87, 0;16, 87, 0;10, 88, 0;11, 88, 0;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0</Nodes>
                </Cell>
                <Cell id="2101">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>117.375,175.6666667,0</Center>
                    <Nodes>117, 172, 0;116, 173, 0;117, 173, 0;118, 173, 0;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0</Nodes>
                </Cell>
                <Cell id="2112">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>176.173913,82.7826087,0</Center>
                    <Nodes>175, 81, 0;176, 81, 0;177, 81, 0;178, 81, 0;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0</Nodes>
                </Cell>
                <Cell id="2115">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>42.29166667,74.04166667,0</Center>
                    <Nodes>41, 72, 0;42, 72, 0;40, 73, 0;41, 73, 0;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0</Nodes>
                </Cell>
                <Cell id="2142">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>172.826087,64.65217391,0</Center>
                    <Nodes>173, 62, 0;174, 62, 0;173, 63, 0;174, 63, 0;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0</Nodes>
                </Cell>
                <Cell id="2149">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>137.0434783,11.34782609,0</Center>
                    <Nodes>135, 8, 0;136, 8, 0;137, 8, 0;138, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="2174">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>160.25,33,0</Center>
                    <Nodes>159, 30, 0;160, 30, 0;158, 31, 0;159, 31, 0;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0</Nodes>
                </Cell>
                <Cell id="2262">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>173.0454545,74.45454545,0</Center>
                    <Nodes>174, 72, 0;175, 72, 0;173, 73, 0;174, 73, 0;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0</Nodes>
                </Cell>
                <Cell id="2433">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>159,143.3333333,0</Center>
                    <Nodes>155, 141, 0;155, 142, 0;156, 142, 0;158, 142, 0;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0</Nodes>
                </Cell>
                <Cell id="2479">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>173.6818182,58.77272727,0</Center>
                    <Nodes>173, 55, 0;173, 56, 0;174, 56, 0;172, 57, 0;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0</Nodes>
                </Cell>
                <Cell id="2537">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>173.2608696,111.2173913,0</Center>
                    <Nodes>173, 108, 0;171, 109, 0;172, 109, 0;173, 109, 0;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0</Nodes>
                </Cell>
                <Cell id="2611">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>35.7826087,39.60869565,0</Center>
                    <Nodes>36, 36, 0;36, 37, 0;37, 37, 0;35, 38, 0;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0</Nodes>
                </Cell>
                <Cell id="2613">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>94.56521739,188.2173913,0</Center>
                    <Nodes>95, 184, 0;96, 184, 0;95, 185, 0;96, 185, 0;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0</Nodes>
                </Cell>
                <Cell id="2786">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>91.61904762,8.761904762,0</Center>
                    <Nodes>88, 8, 0;89, 8, 0;90, 8, 0;91, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="2897">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>19.26086957,123.0434783,0</Center>
                    <Nodes>20, 121, 0;17, 122, 0;18, 122, 0;19, 122, 0;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0</Nodes>
                </Cell>
                <Cell id="3830">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>22.79166667,130.25,0</Center>
                    <Nodes>24, 127, 0;25, 127, 0;23, 128, 0;24, 128, 0;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0</Nodes>
                </Cell>
                <Cell id="3873">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>26.52380952,61.04761905,0</Center>
                    <Nodes>25, 58, 0;26, 58, 0;25, 59, 0;26, 59, 0;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0</Nodes>
                </Cell>
                <Cell id="4200">
                    <PropertyData symbol-ref="c" value="0"/>
                    <Center>164.9130435,42.13043478,0</Center>
                    <Nodes>164, 38, 0;164, 39, 0;165, 39, 0;164, 40, 0;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0</Nodes>
                </Cell>
            </Population>
            <Population size="668" type="hepatocytes">
                <Cell id="8">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4555023581"/>
                    <PropertyData symbol-ref="d" value="69.39736131"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8288102608"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08262231722"/>
                    <PropertyData symbol-ref="d_normal" value="0.6577218724"/>
                    <Center>53.8,151.5666667,0</Center>
                    <Nodes>53, 149, 0;54, 149, 0;55, 149, 0;52, 150, 0;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0</Nodes>
                </Cell>
                <Cell id="10">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4880208804"/>
                    <PropertyData symbol-ref="d" value="81.39379703"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9514398505"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09526089494"/>
                    <PropertyData symbol-ref="d_normal" value="0.7975173244"/>
                    <Center>149.09375,165.0625,0</Center>
                    <Nodes>146, 162, 0;147, 162, 0;149, 162, 0;146, 163, 0;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0</Nodes>
                </Cell>
                <Cell id="14">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2603736714"/>
                    <PropertyData symbol-ref="d" value="30.64992297"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04231668941"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.00415327161"/>
                    <PropertyData symbol-ref="d_normal" value="0.1880664407"/>
                    <Center>112.375,72.0625,0</Center>
                    <Nodes>112, 69, 0;113, 69, 0;110, 70, 0;111, 70, 0;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0</Nodes>
                </Cell>
                <Cell id="15">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2764679575"/>
                    <PropertyData symbol-ref="d" value="39.08147039"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1088704141"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01101287509"/>
                    <PropertyData symbol-ref="d_normal" value="0.2897668458"/>
                    <Center>68.71875,77,0</Center>
                    <Nodes>67, 74, 0;68, 74, 0;69, 74, 0;70, 74, 0;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0</Nodes>
                </Cell>
                <Cell id="16">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4287436024"/>
                    <PropertyData symbol-ref="d" value="64.17317422"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7181146811"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07175234208"/>
                    <PropertyData symbol-ref="d_normal" value="0.5935128961"/>
                    <Center>160.09375,122.125,0</Center>
                    <Nodes>161, 119, 0;162, 119, 0;158, 120, 0;159, 120, 0;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0</Nodes>
                </Cell>
                <Cell id="20">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3152196049"/>
                    <PropertyData symbol-ref="d" value="48.07721857"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2613177373"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02597212064"/>
                    <PropertyData symbol-ref="d_normal" value="0.3960869178"/>
                    <Center>89.3125,146.96875,0</Center>
                    <Nodes>87, 145, 0;88, 145, 0;89, 145, 0;91, 145, 0;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0</Nodes>
                </Cell>
                <Cell id="25">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3811049812"/>
                    <PropertyData symbol-ref="d" value="57.46583564"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5271541388"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0519916337"/>
                    <PropertyData symbol-ref="d_normal" value="0.5108723529"/>
                    <Center>108.8387097,43.19354839,0</Center>
                    <Nodes>106, 41, 0;107, 41, 0;108, 41, 0;109, 41, 0;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0</Nodes>
                </Cell>
                <Cell id="29">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4283917071"/>
                    <PropertyData symbol-ref="d" value="64.14916759"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7155307863"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07160904647"/>
                    <PropertyData symbol-ref="d_normal" value="0.592239959"/>
                    <Center>56.5625,52.65625,0</Center>
                    <Nodes>57, 50, 0;58, 50, 0;54, 51, 0;55, 51, 0;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0</Nodes>
                </Cell>
                <Cell id="30">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4949065735"/>
                    <PropertyData symbol-ref="d" value="88.55538129"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9794089776"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09796407869"/>
                    <PropertyData symbol-ref="d_normal" value="0.8862094131"/>
                    <Center>143.0625,22.6875,0</Center>
                    <Nodes>142, 20, 0;143, 20, 0;144, 20, 0;142, 21, 0;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0</Nodes>
                </Cell>
                <Cell id="33">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3384948486"/>
                    <PropertyData symbol-ref="d" value="51.45540486"/>
                    <PropertyData symbol-ref="GSH_local" value="0.35337584"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03526889456"/>
                    <PropertyData symbol-ref="d_normal" value="0.4395766964"/>
                    <Center>55.38709677,125.5806452,0</Center>
                    <Nodes>57, 122, 0;54, 123, 0;55, 123, 0;56, 123, 0;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0</Nodes>
                </Cell>
                <Cell id="34">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4915624528"/>
                    <PropertyData symbol-ref="d" value="84.78304319"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9673305401"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09671171299"/>
                    <PropertyData symbol-ref="d_normal" value="0.8388099563"/>
                    <Center>61.84375,175.9375,0</Center>
                    <Nodes>63, 172, 0;61, 173, 0;62, 173, 0;60, 174, 0;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0</Nodes>
                </Cell>
                <Cell id="39">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4509464312"/>
                    <PropertyData symbol-ref="d" value="68.75268461"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8140020241"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08065908443"/>
                    <PropertyData symbol-ref="d_normal" value="0.6476227061"/>
                    <Center>55.61290323,47.38709677,0</Center>
                    <Nodes>54, 45, 0;55, 45, 0;56, 45, 0;57, 45, 0;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0</Nodes>
                </Cell>
                <Cell id="43">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4940640655"/>
                    <PropertyData symbol-ref="d" value="87.21675696"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9764132891"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09759797893"/>
                    <PropertyData symbol-ref="d_normal" value="0.8723202493"/>
                    <Center>13.875,85,0</Center>
                    <Nodes>13, 82, 0;14, 82, 0;13, 83, 0;14, 83, 0;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0</Nodes>
                </Cell>
                <Cell id="44">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3320679513"/>
                    <PropertyData symbol-ref="d" value="50.72544049"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3344955424"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03315430623"/>
                    <PropertyData symbol-ref="d_normal" value="0.4312078217"/>
                    <Center>104,150.5483871,0</Center>
                    <Nodes>103, 147, 0;103, 148, 0;104, 148, 0;103, 149, 0;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0</Nodes>
                </Cell>
                <Cell id="46">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.325440969"/>
                    <PropertyData symbol-ref="d" value="49.52296855"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3033639109"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03006133139"/>
                    <PropertyData symbol-ref="d_normal" value="0.4168669947"/>
                    <Center>67.83870968,137.9032258,0</Center>
                    <Nodes>66, 135, 0;67, 135, 0;68, 135, 0;66, 136, 0;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0</Nodes>
                </Cell>
                <Cell id="47">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3359328285"/>
                    <PropertyData symbol-ref="d" value="51.18541716"/>
                    <PropertyData symbol-ref="GSH_local" value="0.345176199"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03510341027"/>
                    <PropertyData symbol-ref="d_normal" value="0.4359688815"/>
                    <Center>137.1764706,64.85294118,0</Center>
                    <Nodes>135, 62, 0;134, 63, 0;135, 63, 0;136, 63, 0;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0</Nodes>
                </Cell>
                <Cell id="48">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4907435592"/>
                    <PropertyData symbol-ref="d" value="83.40889608"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9627284678"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09633703634"/>
                    <PropertyData symbol-ref="d_normal" value="0.8251541583"/>
                    <Center>17.0625,92.5625,0</Center>
                    <Nodes>15, 90, 0;16, 90, 0;17, 90, 0;18, 90, 0;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0</Nodes>
                </Cell>
                <Cell id="53">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4479730039"/>
                    <PropertyData symbol-ref="d" value="67.75159685"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7942040198"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07906740311"/>
                    <PropertyData symbol-ref="d_normal" value="0.6350455089"/>
                    <Center>72.12903226,38.35483871,0</Center>
                    <Nodes>72, 35, 0;70, 36, 0;71, 36, 0;72, 36, 0;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0</Nodes>
                </Cell>
                <Cell id="54">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.358005258"/>
                    <PropertyData symbol-ref="d" value="54.11616018"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4325197823"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04319214039"/>
                    <PropertyData symbol-ref="d_normal" value="0.4728422175"/>
                    <Center>67.51612903,143.2903226,0</Center>
                    <Nodes>65, 141, 0;66, 141, 0;67, 141, 0;68, 141, 0;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0</Nodes>
                </Cell>
                <Cell id="56">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4856896014"/>
                    <PropertyData symbol-ref="d" value="79.73525392"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9434036576"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09434275524"/>
                    <PropertyData symbol-ref="d_normal" value="0.7813549886"/>
                    <Center>24.83870968,73.90322581,0</Center>
                    <Nodes>24, 71, 0;25, 71, 0;26, 71, 0;23, 72, 0;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0</Nodes>
                </Cell>
                <Cell id="58">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4720413166"/>
                    <PropertyData symbol-ref="d" value="73.81263974"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8884855822"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08922043059"/>
                    <PropertyData symbol-ref="d_normal" value="0.707536453"/>
                    <Center>73.21875,31.5625,0</Center>
                    <Nodes>75, 27, 0;74, 28, 0;75, 28, 0;74, 29, 0;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0</Nodes>
                </Cell>
                <Cell id="60">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4277903296"/>
                    <PropertyData symbol-ref="d" value="64.42556418"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7220969807"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07138822236"/>
                    <PropertyData symbol-ref="d_normal" value="0.5954887251"/>
                    <Center>43.34375,69.09375,0</Center>
                    <Nodes>43, 66, 0;41, 67, 0;42, 67, 0;43, 67, 0;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0</Nodes>
                </Cell>
                <Cell id="68">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3806827332"/>
                    <PropertyData symbol-ref="d" value="57.23283042"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5170020412"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05200786652"/>
                    <PropertyData symbol-ref="d_normal" value="0.5068034395"/>
                    <Center>48,76.35483871,0</Center>
                    <Nodes>46, 73, 0;47, 73, 0;46, 74, 0;47, 74, 0;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0</Nodes>
                </Cell>
                <Cell id="69">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3931626687"/>
                    <PropertyData symbol-ref="d" value="59.25109601"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5773132591"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05770926619"/>
                    <PropertyData symbol-ref="d_normal" value="0.531175369"/>
                    <Center>148.0606061,134.3636364,0</Center>
                    <Nodes>147, 131, 0;148, 131, 0;149, 131, 0;146, 132, 0;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0</Nodes>
                </Cell>
                <Cell id="70">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4476278559"/>
                    <PropertyData symbol-ref="d" value="67.36865114"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7879844929"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07862006371"/>
                    <PropertyData symbol-ref="d_normal" value="0.6312818992"/>
                    <Center>131,159.84375,0</Center>
                    <Nodes>130, 157, 0;131, 157, 0;129, 158, 0;130, 158, 0;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0</Nodes>
                </Cell>
                <Cell id="71">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4928621913"/>
                    <PropertyData symbol-ref="d" value="85.42357581"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9707071569"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0970735215"/>
                    <PropertyData symbol-ref="d_normal" value="0.8500681611"/>
                    <Center>156.25,35.75,0</Center>
                    <Nodes>155, 33, 0;157, 33, 0;158, 33, 0;154, 34, 0;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0</Nodes>
                </Cell>
                <Cell id="72">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4812194088"/>
                    <PropertyData symbol-ref="d" value="77.22120683"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9258309244"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09243257958"/>
                    <PropertyData symbol-ref="d_normal" value="0.7524344338"/>
                    <Center>167.90625,137.34375,0</Center>
                    <Nodes>167, 134, 0;168, 135, 0;169, 135, 0;170, 135, 0;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0</Nodes>
                </Cell>
                <Cell id="74">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2677421173"/>
                    <PropertyData symbol-ref="d" value="34.92806503"/>
                    <PropertyData symbol-ref="GSH_local" value="0.07115771352"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.007074115445"/>
                    <PropertyData symbol-ref="d_normal" value="0.2430959773"/>
                    <Center>68.1875,85.65625,0</Center>
                    <Nodes>67, 83, 0;68, 83, 0;69, 83, 0;66, 84, 0;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0</Nodes>
                </Cell>
                <Cell id="76">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2596632121"/>
                    <PropertyData symbol-ref="d" value="29.6094945"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03763287199"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003878250262"/>
                    <PropertyData symbol-ref="d_normal" value="0.1758481916"/>
                    <Center>72.32258065,89.16129032,0</Center>
                    <Nodes>72, 85, 0;71, 86, 0;72, 86, 0;73, 86, 0;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0</Nodes>
                </Cell>
                <Cell id="78">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2638052062"/>
                    <PropertyData symbol-ref="d" value="33.29386498"/>
                    <PropertyData symbol-ref="GSH_local" value="0.05621916049"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.005550647334"/>
                    <PropertyData symbol-ref="d_normal" value="0.2179363655"/>
                    <Center>86.1875,69.71875,0</Center>
                    <Nodes>84, 67, 0;85, 67, 0;86, 67, 0;87, 67, 0;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0</Nodes>
                </Cell>
                <Cell id="79">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4878292866"/>
                    <PropertyData symbol-ref="d" value="81.51790567"/>
                    <PropertyData symbol-ref="GSH_local" value="0.952496649"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0953266038"/>
                    <PropertyData symbol-ref="d_normal" value="0.7998286334"/>
                    <Center>74.41935484,22.87096774,0</Center>
                    <Nodes>74, 20, 0;75, 20, 0;72, 21, 0;73, 21, 0;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0</Nodes>
                </Cell>
                <Cell id="82">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3858218968"/>
                    <PropertyData symbol-ref="d" value="57.41642193"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5392398397"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05361408383"/>
                    <PropertyData symbol-ref="d_normal" value="0.5157282796"/>
                    <Center>131.4,148.1,0</Center>
                    <Nodes>130, 146, 0;131, 146, 0;132, 146, 0;133, 146, 0;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0</Nodes>
                </Cell>
                <Cell id="84">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2663750514"/>
                    <PropertyData symbol-ref="d" value="34.08625895"/>
                    <PropertyData symbol-ref="GSH_local" value="0.06450189444"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.006541940747"/>
                    <PropertyData symbol-ref="d_normal" value="0.2325615474"/>
                    <Center>133.65625,106.71875,0</Center>
                    <Nodes>133, 104, 0;134, 104, 0;135, 104, 0;136, 104, 0;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0</Nodes>
                </Cell>
                <Cell id="86">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.251927442"/>
                    <PropertyData symbol-ref="d" value="16.23744836"/>
                    <PropertyData symbol-ref="GSH_local" value="0.007779279324"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0007840534718"/>
                    <PropertyData symbol-ref="d_normal" value="0.01515181188"/>
                    <Center>116.1212121,101.969697,0</Center>
                    <Nodes>114, 99, 0;115, 99, 0;116, 99, 0;117, 99, 0;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0</Nodes>
                </Cell>
                <Cell id="87">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2802893922"/>
                    <PropertyData symbol-ref="d" value="39.97910382"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1229499038"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0122058688"/>
                    <PropertyData symbol-ref="d_normal" value="0.3035212873"/>
                    <Center>64.33333333,81.96969697,0</Center>
                    <Nodes>65, 79, 0;66, 79, 0;63, 80, 0;64, 80, 0;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0</Nodes>
                </Cell>
                <Cell id="88">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4151152519"/>
                    <PropertyData symbol-ref="d" value="62.16763188"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6583732572"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06559545355"/>
                    <PropertyData symbol-ref="d_normal" value="0.5656053285"/>
                    <Center>38.03125,94.84375,0</Center>
                    <Nodes>38, 92, 0;39, 92, 0;40, 92, 0;37, 93, 0;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0</Nodes>
                </Cell>
                <Cell id="92">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4928944396"/>
                    <PropertyData symbol-ref="d" value="86.37226954"/>
                    <PropertyData symbol-ref="GSH_local" value="0.972437596"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09720785263"/>
                    <PropertyData symbol-ref="d_normal" value="0.8563353235"/>
                    <Center>132.5806452,180.0967742,0</Center>
                    <Nodes>130, 178, 0;131, 178, 0;132, 178, 0;133, 178, 0;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0</Nodes>
                </Cell>
                <Cell id="93">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4071593533"/>
                    <PropertyData symbol-ref="d" value="60.94600101"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6360973735"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06335256042"/>
                    <PropertyData symbol-ref="d_normal" value="0.5558465332"/>
                    <Center>120,42.375,0</Center>
                    <Nodes>119, 40, 0;121, 40, 0;122, 40, 0;123, 40, 0;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0</Nodes>
                </Cell>
                <Cell id="95">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3480156998"/>
                    <PropertyData symbol-ref="d" value="52.64215316"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3908360565"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03941218573"/>
                    <PropertyData symbol-ref="d_normal" value="0.4556200747"/>
                    <Center>130.75,142.96875,0</Center>
                    <Nodes>131, 139, 0;130, 140, 0;129, 141, 0;132, 141, 0;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0</Nodes>
                </Cell>
                <Cell id="96">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2747415473"/>
                    <PropertyData symbol-ref="d" value="38.1727548"/>
                    <PropertyData symbol-ref="GSH_local" value="0.09963835917"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.009963835917"/>
                    <PropertyData symbol-ref="d_normal" value="0.2798750717"/>
                    <Center>118.0625,133.875,0</Center>
                    <Nodes>119, 130, 0;118, 131, 0;119, 131, 0;120, 131, 0;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0</Nodes>
                </Cell>
                <Cell id="97">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4766751384"/>
                    <PropertyData symbol-ref="d" value="75.77568279"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9076315257"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09051642179"/>
                    <PropertyData symbol-ref="d_normal" value="0.7285052755"/>
                    <Center>146.28125,39.75,0</Center>
                    <Nodes>144, 36, 0;144, 37, 0;146, 37, 0;147, 37, 0;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0</Nodes>
                </Cell>
                <Cell id="98">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4958466944"/>
                    <PropertyData symbol-ref="d" value="90.89963236"/>
                    <PropertyData symbol-ref="GSH_local" value="0.984285765"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09836719761"/>
                    <PropertyData symbol-ref="d_normal" value="0.9137349277"/>
                    <Center>61.87096774,182.516129,0</Center>
                    <Nodes>60, 180, 0;61, 180, 0;62, 180, 0;63, 180, 0;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0</Nodes>
                </Cell>
                <Cell id="101">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4520379056"/>
                    <PropertyData symbol-ref="d" value="68.73534645"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8129307951"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08136455185"/>
                    <PropertyData symbol-ref="d_normal" value="0.6469167355"/>
                    <Center>156.71875,138.84375,0</Center>
                    <Nodes>158, 136, 0;159, 136, 0;153, 137, 0;155, 137, 0;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0</Nodes>
                </Cell>
                <Cell id="102">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4948861081"/>
                    <PropertyData symbol-ref="d" value="88.63762692"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9800653044"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09799121608"/>
                    <PropertyData symbol-ref="d_normal" value="0.8895157497"/>
                    <Center>57.4375,22.21875,0</Center>
                    <Nodes>58, 19, 0;59, 19, 0;56, 20, 0;57, 20, 0;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0</Nodes>
                </Cell>
                <Cell id="104">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.445671143"/>
                    <PropertyData symbol-ref="d" value="66.97729822"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7761409241"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07802030471"/>
                    <PropertyData symbol-ref="d_normal" value="0.6243317378"/>
                    <Center>52.09375,146.46875,0</Center>
                    <Nodes>52, 143, 0;50, 144, 0;51, 144, 0;52, 144, 0;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0</Nodes>
                </Cell>
                <Cell id="105">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4383306013"/>
                    <PropertyData symbol-ref="d" value="65.36586486"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7519938078"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07487874987"/>
                    <PropertyData symbol-ref="d_normal" value="0.6109274375"/>
                    <Center>118.516129,37.25806452,0</Center>
                    <Nodes>118, 34, 0;117, 35, 0;118, 35, 0;119, 35, 0;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0</Nodes>
                </Cell>
                <Cell id="107">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2701861923"/>
                    <PropertyData symbol-ref="d" value="36.43722352"/>
                    <PropertyData symbol-ref="GSH_local" value="0.08480895117"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.008388063492"/>
                    <PropertyData symbol-ref="d_normal" value="0.2621268253"/>
                    <Center>134.2903226,112.2903226,0</Center>
                    <Nodes>135, 109, 0;133, 110, 0;134, 110, 0;135, 110, 0;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0</Nodes>
                </Cell>
                <Cell id="108">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3970210948"/>
                    <PropertyData symbol-ref="d" value="59.51799914"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5941477037"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05907399083"/>
                    <PropertyData symbol-ref="d_normal" value="0.5381138657"/>
                    <Center>63,146.6129032,0</Center>
                    <Nodes>62, 144, 0;63, 144, 0;64, 144, 0;65, 144, 0;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0</Nodes>
                </Cell>
                <Cell id="110">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2662460444"/>
                    <PropertyData symbol-ref="d" value="34.10062373"/>
                    <PropertyData symbol-ref="GSH_local" value="0.06385009229"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.006455330979"/>
                    <PropertyData symbol-ref="d_normal" value="0.2314762406"/>
                    <Center>120.6969697,127.0909091,0</Center>
                    <Nodes>120, 124, 0;121, 124, 0;119, 125, 0;120, 125, 0;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0</Nodes>
                </Cell>
                <Cell id="113">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3135651268"/>
                    <PropertyData symbol-ref="d" value="47.57605227"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2572245314"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02527451966"/>
                    <PropertyData symbol-ref="d_normal" value="0.3939555563"/>
                    <Center>63.33333333,69.51515152,0</Center>
                    <Nodes>64, 66, 0;63, 67, 0;64, 67, 0;65, 67, 0;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0</Nodes>
                </Cell>
                <Cell id="115">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4511411876"/>
                    <PropertyData symbol-ref="d" value="67.87595677"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7988460722"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08000349508"/>
                    <PropertyData symbol-ref="d_normal" value="0.6379097851"/>
                    <Center>151.0909091,55.24242424,0</Center>
                    <Nodes>148, 53, 0;149, 53, 0;150, 53, 0;151, 53, 0;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0</Nodes>
                </Cell>
                <Cell id="122">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4054207447"/>
                    <PropertyData symbol-ref="d" value="60.32007221"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6167121639"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06208965286"/>
                    <PropertyData symbol-ref="d_normal" value="0.5475616169"/>
                    <Center>83.51612903,158,0</Center>
                    <Nodes>83, 155, 0;84, 155, 0;80, 156, 0;81, 156, 0;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0</Nodes>
                </Cell>
                <Cell id="126">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3512561162"/>
                    <PropertyData symbol-ref="d" value="53.19939644"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4044071482"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04055600533"/>
                    <PropertyData symbol-ref="d_normal" value="0.4612864864"/>
                    <Center>47.125,102.90625,0</Center>
                    <Nodes>47, 100, 0;48, 100, 0;49, 100, 0;46, 101, 0;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0</Nodes>
                </Cell>
                <Cell id="129">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3001158214"/>
                    <PropertyData symbol-ref="d" value="44.62805164"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1988036623"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0199169402"/>
                    <PropertyData symbol-ref="d_normal" value="0.3606211683"/>
                    <Center>118.6875,140.65625,0</Center>
                    <Nodes>119, 137, 0;117, 138, 0;118, 138, 0;119, 138, 0;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0</Nodes>
                </Cell>
                <Cell id="131">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2791557965"/>
                    <PropertyData symbol-ref="d" value="39.90686347"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1192897711"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0118996059"/>
                    <PropertyData symbol-ref="d_normal" value="0.3000826925"/>
                    <Center>107.875,138.875,0</Center>
                    <Nodes>105, 136, 0;106, 136, 0;108, 136, 0;105, 137, 0;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0</Nodes>
                </Cell>
                <Cell id="135">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2646651679"/>
                    <PropertyData symbol-ref="d" value="33.72652766"/>
                    <PropertyData symbol-ref="GSH_local" value="0.06097131501"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.00605831358"/>
                    <PropertyData symbol-ref="d_normal" value="0.2265557481"/>
                    <Center>66.9375,92.5625,0</Center>
                    <Nodes>65, 90, 0;66, 90, 0;68, 90, 0;69, 90, 0;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0</Nodes>
                </Cell>
                <Cell id="136">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2965962822"/>
                    <PropertyData symbol-ref="d" value="44.52905696"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1884214677"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01862018064"/>
                    <PropertyData symbol-ref="d_normal" value="0.3539700146"/>
                    <Center>72.06060606,134.7575758,0</Center>
                    <Nodes>70, 132, 0;71, 132, 0;70, 133, 0;71, 133, 0;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0</Nodes>
                </Cell>
                <Cell id="137">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4284471147"/>
                    <PropertyData symbol-ref="d" value="64.27033413"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7188281886"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07186971143"/>
                    <PropertyData symbol-ref="d_normal" value="0.5938656459"/>
                    <Center>36.58064516,89.29032258,0</Center>
                    <Nodes>38, 85, 0;39, 85, 0;36, 86, 0;37, 86, 0;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0</Nodes>
                </Cell>
                <Cell id="140">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2819054557"/>
                    <PropertyData symbol-ref="d" value="40.5912456"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1286018927"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01257594698"/>
                    <PropertyData symbol-ref="d_normal" value="0.3086622588"/>
                    <Center>68.33333333,125.1515152,0</Center>
                    <Nodes>70, 122, 0;67, 123, 0;68, 123, 0;69, 123, 0;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0</Nodes>
                </Cell>
                <Cell id="141">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.27079149"/>
                    <PropertyData symbol-ref="d" value="36.48897522"/>
                    <PropertyData symbol-ref="GSH_local" value="0.0827733306"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.008302451459"/>
                    <PropertyData symbol-ref="d_normal" value="0.2594751288"/>
                    <Center>112.1935484,134.3870968,0</Center>
                    <Nodes>111, 132, 0;114, 132, 0;115, 132, 0;110, 133, 0;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0</Nodes>
                </Cell>
                <Cell id="142">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4860671653"/>
                    <PropertyData symbol-ref="d" value="80.37860937"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9466946998"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0947256906"/>
                    <PropertyData symbol-ref="d_normal" value="0.7876940888"/>
                    <Center>145.5483871,33.64516129,0</Center>
                    <Nodes>146, 31, 0;147, 31, 0;143, 32, 0;144, 32, 0;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0</Nodes>
                </Cell>
                <Cell id="144">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4755080473"/>
                    <PropertyData symbol-ref="d" value="75.14599041"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8998999397"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08980511309"/>
                    <PropertyData symbol-ref="d_normal" value="0.719611329"/>
                    <Center>156.46875,50.40625,0</Center>
                    <Nodes>154, 48, 0;155, 48, 0;156, 48, 0;157, 48, 0;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0</Nodes>
                </Cell>
                <Cell id="145">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2765993827"/>
                    <PropertyData symbol-ref="d" value="38.85582827"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1086655952"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01082428147"/>
                    <PropertyData symbol-ref="d_normal" value="0.2895555562"/>
                    <Center>138.78125,97.46875,0</Center>
                    <Nodes>139, 94, 0;141, 94, 0;137, 95, 0;138, 95, 0;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0</Nodes>
                </Cell>
                <Cell id="146">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3543535486"/>
                    <PropertyData symbol-ref="d" value="53.35076334"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4006516165"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04156580649"/>
                    <PropertyData symbol-ref="d_normal" value="0.4597249225"/>
                    <Center>59.96875,64.625,0</Center>
                    <Nodes>59, 61, 0;59, 62, 0;60, 62, 0;61, 62, 0;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0</Nodes>
                </Cell>
                <Cell id="149">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4601425449"/>
                    <PropertyData symbol-ref="d" value="70.27696324"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8403562619"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08393616075"/>
                    <PropertyData symbol-ref="d_normal" value="0.6660881228"/>
                    <Center>66.74193548,38.25806452,0</Center>
                    <Nodes>67, 34, 0;66, 35, 0;65, 36, 0;66, 36, 0;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0</Nodes>
                </Cell>
                <Cell id="151">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4618459383"/>
                    <PropertyData symbol-ref="d" value="70.75793767"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8488293768"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08457351762"/>
                    <PropertyData symbol-ref="d_normal" value="0.6725449043"/>
                    <Center>29.12903226,102.9354839,0</Center>
                    <Nodes>27, 100, 0;28, 100, 0;30, 100, 0;27, 101, 0;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0</Nodes>
                </Cell>
                <Cell id="152">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4809414878"/>
                    <PropertyData symbol-ref="d" value="76.85753812"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9218399367"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09236522439"/>
                    <PropertyData symbol-ref="d_normal" value="0.7467612787"/>
                    <Center>164.5806452,58.70967742,0</Center>
                    <Nodes>163, 56, 0;164, 56, 0;165, 56, 0;163, 57, 0;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0</Nodes>
                </Cell>
                <Cell id="153">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2902017064"/>
                    <PropertyData symbol-ref="d" value="42.93929672"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1584587002"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01597760155"/>
                    <PropertyData symbol-ref="d_normal" value="0.3330258902"/>
                    <Center>134.5757576,74.87878788,0</Center>
                    <Nodes>135, 72, 0;131, 73, 0;132, 73, 0;133, 73, 0;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0</Nodes>
                </Cell>
                <Cell id="155">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4256241744"/>
                    <PropertyData symbol-ref="d" value="63.58666769"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7030200921"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07001096483"/>
                    <PropertyData symbol-ref="d_normal" value="0.5861720985"/>
                    <Center>87.38709677,162.4193548,0</Center>
                    <Nodes>87, 160, 0;88, 160, 0;89, 160, 0;85, 161, 0;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0</Nodes>
                </Cell>
                <Cell id="157">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2663151073"/>
                    <PropertyData symbol-ref="d" value="34.36331866"/>
                    <PropertyData symbol-ref="GSH_local" value="0.06372160006"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.006432189848"/>
                    <PropertyData symbol-ref="d_normal" value="0.2312610727"/>
                    <Center>108.65625,66.875,0</Center>
                    <Nodes>106, 65, 0;107, 65, 0;109, 65, 0;110, 65, 0;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0</Nodes>
                </Cell>
                <Cell id="158">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2558542998"/>
                    <PropertyData symbol-ref="d" value="24.96810465"/>
                    <PropertyData symbol-ref="GSH_local" value="0.02230350762"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.002230549915"/>
                    <PropertyData symbol-ref="d_normal" value="0.1219544671"/>
                    <Center>95.70967742,75.19354839,0</Center>
                    <Nodes>95, 72, 0;96, 72, 0;97, 72, 0;94, 73, 0;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0</Nodes>
                </Cell>
                <Cell id="159">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.445406195"/>
                    <PropertyData symbol-ref="d" value="67.22310103"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7862047849"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07864835315"/>
                    <PropertyData symbol-ref="d_normal" value="0.6302198681"/>
                    <Center>45.12903226,138.6451613,0</Center>
                    <Nodes>44, 135, 0;43, 136, 0;44, 136, 0;45, 136, 0;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0</Nodes>
                </Cell>
                <Cell id="161">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3030865491"/>
                    <PropertyData symbol-ref="d" value="45.574994"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2114402408"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02114402408"/>
                    <PropertyData symbol-ref="d_normal" value="0.3683734217"/>
                    <Center>134.375,70,0</Center>
                    <Nodes>134, 67, 0;135, 67, 0;133, 68, 0;134, 68, 0;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0</Nodes>
                </Cell>
                <Cell id="162">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3452026138"/>
                    <PropertyData symbol-ref="d" value="52.7142277"/>
                    <PropertyData symbol-ref="GSH_local" value="0.388221564"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03857088281"/>
                    <PropertyData symbol-ref="d_normal" value="0.4545206034"/>
                    <Center>88.80645161,151.516129,0</Center>
                    <Nodes>86, 148, 0;86, 149, 0;87, 149, 0;86, 150, 0;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0</Nodes>
                </Cell>
                <Cell id="165">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2619305714"/>
                    <PropertyData symbol-ref="d" value="31.63503423"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04761692816"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.004801883532"/>
                    <PropertyData symbol-ref="d_normal" value="0.2004220991"/>
                    <Center>111.28125,129.5625,0</Center>
                    <Nodes>110, 127, 0;111, 127, 0;112, 127, 0;109, 128, 0;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0</Nodes>
                </Cell>
                <Cell id="166">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4645466117"/>
                    <PropertyData symbol-ref="d" value="71.24000067"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8496608967"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0853772393"/>
                    <PropertyData symbol-ref="d_normal" value="0.6731943894"/>
                    <Center>171.0645161,104.7096774,0</Center>
                    <Nodes>170, 102, 0;171, 102, 0;172, 102, 0;173, 102, 0;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0</Nodes>
                </Cell>
                <Cell id="170">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4887134246"/>
                    <PropertyData symbol-ref="d" value="81.64110822"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9539052609"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09547419905"/>
                    <PropertyData symbol-ref="d_normal" value="0.8029865536"/>
                    <Center>72.4516129,176.7419355,0</Center>
                    <Nodes>71, 174, 0;72, 174, 0;73, 174, 0;74, 174, 0;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0</Nodes>
                </Cell>
                <Cell id="172">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4610550313"/>
                    <PropertyData symbol-ref="d" value="70.29504265"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8431625735"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08424726126"/>
                    <PropertyData symbol-ref="d_normal" value="0.6681950021"/>
                    <Center>90.03030303,30.3030303,0</Center>
                    <Nodes>88, 28, 0;89, 28, 0;90, 28, 0;91, 28, 0;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0</Nodes>
                </Cell>
                <Cell id="174">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2793209022"/>
                    <PropertyData symbol-ref="d" value="39.66368626"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1160655323"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01173205164"/>
                    <PropertyData symbol-ref="d_normal" value="0.2969772037"/>
                    <Center>61.23333333,90.83333333,0</Center>
                    <Nodes>61, 88, 0;62, 88, 0;60, 89, 0;61, 89, 0;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0</Nodes>
                </Cell>
                <Cell id="180">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2542358119"/>
                    <PropertyData symbol-ref="d" value="22.74641541"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01660110753"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.00167607351"/>
                    <PropertyData symbol-ref="d_normal" value="0.09184545833"/>
                    <Center>78.16129032,106.3225806,0</Center>
                    <Nodes>77, 103, 0;78, 103, 0;76, 104, 0;77, 104, 0;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0</Nodes>
                </Cell>
                <Cell id="182">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2540664251"/>
                    <PropertyData symbol-ref="d" value="22.59780454"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01596130801"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001577304814"/>
                    <PropertyData symbol-ref="d_normal" value="0.0878502327"/>
                    <Center>103.625,122.4375,0</Center>
                    <Nodes>101, 119, 0;100, 120, 0;101, 120, 0;104, 120, 0;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0</Nodes>
                </Cell>
                <Cell id="188">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4627079715"/>
                    <PropertyData symbol-ref="d" value="71.14203717"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8545476222"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08522486349"/>
                    <PropertyData symbol-ref="d_normal" value="0.67707235"/>
                    <Center>123.7333333,167.1333333,0</Center>
                    <Nodes>126, 164, 0;122, 165, 0;123, 165, 0;125, 165, 0;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0</Nodes>
                </Cell>
                <Cell id="190">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4151565883"/>
                    <PropertyData symbol-ref="d" value="61.82584382"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6590671658"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06519876846"/>
                    <PropertyData symbol-ref="d_normal" value="0.5659139959"/>
                    <Center>160.6969697,111.3030303,0</Center>
                    <Nodes>159, 108, 0;158, 109, 0;159, 109, 0;160, 109, 0;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0</Nodes>
                </Cell>
                <Cell id="192">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3272422377"/>
                    <PropertyData symbol-ref="d" value="50.00314443"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3068943851"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03102243346"/>
                    <PropertyData symbol-ref="d_normal" value="0.4185321276"/>
                    <Center>50.40625,92.125,0</Center>
                    <Nodes>48, 90, 0;49, 90, 0;50, 90, 0;51, 90, 0;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0</Nodes>
                </Cell>
                <Cell id="194">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4650221855"/>
                    <PropertyData symbol-ref="d" value="71.58092012"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8617567189"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08634031669"/>
                    <PropertyData symbol-ref="d_normal" value="0.6829957963"/>
                    <Center>35.06451613,129.9354839,0</Center>
                    <Nodes>33, 127, 0;34, 127, 0;33, 128, 0;34, 128, 0;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0</Nodes>
                </Cell>
                <Cell id="195">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3915186318"/>
                    <PropertyData symbol-ref="d" value="58.86756853"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5708326678"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05658821392"/>
                    <PropertyData symbol-ref="d_normal" value="0.5285249221"/>
                    <Center>132.8,51,0</Center>
                    <Nodes>135, 48, 0;131, 49, 0;132, 49, 0;133, 49, 0;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0</Nodes>
                </Cell>
                <Cell id="198">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3811282009"/>
                    <PropertyData symbol-ref="d" value="57.1721183"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5214511022"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05213185879"/>
                    <PropertyData symbol-ref="d_normal" value="0.5085857111"/>
                    <Center>112.3,156.1,0</Center>
                    <Nodes>113, 153, 0;110, 154, 0;111, 154, 0;112, 154, 0;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0</Nodes>
                </Cell>
                <Cell id="200">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4472397363"/>
                    <PropertyData symbol-ref="d" value="67.24580998"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7867110999"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07867110999"/>
                    <PropertyData symbol-ref="d_normal" value="0.6305213506"/>
                    <Center>113.875,34.0625,0</Center>
                    <Nodes>115, 30, 0;114, 31, 0;115, 31, 0;113, 32, 0;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0</Nodes>
                </Cell>
                <Cell id="203">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4263987579"/>
                    <PropertyData symbol-ref="d" value="64.32283232"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7154677744"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07086646748"/>
                    <PropertyData symbol-ref="d_normal" value="0.592209004"/>
                    <Center>102.1875,35.5625,0</Center>
                    <Nodes>102, 32, 0;101, 33, 0;102, 33, 0;103, 33, 0;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0</Nodes>
                </Cell>
                <Cell id="206">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4119915316"/>
                    <PropertyData symbol-ref="d" value="61.72845102"/>
                    <PropertyData symbol-ref="GSH_local" value="0.654240151"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06529216382"/>
                    <PropertyData symbol-ref="d_normal" value="0.5637730031"/>
                    <Center>68.27272727,152.6969697,0</Center>
                    <Nodes>67, 150, 0;68, 150, 0;69, 150, 0;70, 150, 0;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0</Nodes>
                </Cell>
                <Cell id="207">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3920621245"/>
                    <PropertyData symbol-ref="d" value="58.89813779"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5740750964"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05732346975"/>
                    <PropertyData symbol-ref="d_normal" value="0.5298497169"/>
                    <Center>62.60606061,54.63636364,0</Center>
                    <Nodes>60, 52, 0;61, 52, 0;62, 52, 0;63, 52, 0;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0</Nodes>
                </Cell>
                <Cell id="208">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4520275188"/>
                    <PropertyData symbol-ref="d" value="67.95341797"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8024724568"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08082741708"/>
                    <PropertyData symbol-ref="d_normal" value="0.6401819499"/>
                    <Center>159.5483871,132.5806452,0</Center>
                    <Nodes>159, 130, 0;160, 130, 0;162, 130, 0;158, 131, 0;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0</Nodes>
                </Cell>
                <Cell id="213">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4955979149"/>
                    <PropertyData symbol-ref="d" value="89.81402769"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9824551067"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09820167302"/>
                    <PropertyData symbol-ref="d_normal" value="0.9025291721"/>
                    <Center>52.09375,175.90625,0</Center>
                    <Nodes>51, 173, 0;53, 173, 0;50, 174, 0;51, 174, 0;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0</Nodes>
                </Cell>
                <Cell id="215">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.412999985"/>
                    <PropertyData symbol-ref="d" value="62.00013427"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6544961488"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06578837247"/>
                    <PropertyData symbol-ref="d_normal" value="0.5638861911"/>
                    <Center>77.54545455,157.8484848,0</Center>
                    <Nodes>77, 154, 0;76, 155, 0;77, 155, 0;78, 155, 0;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0</Nodes>
                </Cell>
                <Cell id="217">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3138770162"/>
                    <PropertyData symbol-ref="d" value="47.54984241"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2538606033"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02564128047"/>
                    <PropertyData symbol-ref="d_normal" value="0.3921872869"/>
                    <Center>74.16129032,139.8709677,0</Center>
                    <Nodes>74, 137, 0;75, 137, 0;74, 138, 0;75, 138, 0;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0</Nodes>
                </Cell>
                <Cell id="221">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3030520984"/>
                    <PropertyData symbol-ref="d" value="45.17439902"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2028798952"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02043896446"/>
                    <PropertyData symbol-ref="d_normal" value="0.3631608791"/>
                    <Center>57.375,84.5,0</Center>
                    <Nodes>57, 82, 0;58, 82, 0;59, 82, 0;60, 82, 0;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0</Nodes>
                </Cell>
                <Cell id="226">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3008018643"/>
                    <PropertyData symbol-ref="d" value="45.36127805"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2115619441"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02074342963"/>
                    <PropertyData symbol-ref="d_normal" value="0.3684463992"/>
                    <Center>67.06060606,130.9393939,0</Center>
                    <Nodes>65, 128, 0;66, 128, 0;67, 128, 0;68, 128, 0;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0</Nodes>
                </Cell>
                <Cell id="228">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4728418652"/>
                    <PropertyData symbol-ref="d" value="73.86678626"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8867949218"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08896648724"/>
                    <PropertyData symbol-ref="d_normal" value="0.7058412726"/>
                    <Center>57.3125,39.84375,0</Center>
                    <Nodes>56, 37, 0;59, 37, 0;55, 38, 0;56, 38, 0;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0</Nodes>
                </Cell>
                <Cell id="229">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4610559515"/>
                    <PropertyData symbol-ref="d" value="70.53958374"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8424306096"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0842269632"/>
                    <PropertyData symbol-ref="d_normal" value="0.6676425361"/>
                    <Center>149.9705882,50.08823529,0</Center>
                    <Nodes>152, 47, 0;149, 48, 0;150, 48, 0;151, 48, 0;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0</Nodes>
                </Cell>
                <Cell id="231">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2852884933"/>
                    <PropertyData symbol-ref="d" value="41.80556277"/>
                    <PropertyData symbol-ref="GSH_local" value="0.142152593"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01438127804"/>
                    <PropertyData symbol-ref="d_normal" value="0.3202474843"/>
                    <Center>113.5625,139.59375,0</Center>
                    <Nodes>112, 137, 0;113, 137, 0;114, 137, 0;115, 137, 0;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0</Nodes>
                </Cell>
                <Cell id="233">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4706055818"/>
                    <PropertyData symbol-ref="d" value="73.10676188"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8801294277"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.088143076"/>
                    <PropertyData symbol-ref="d_normal" value="0.6993656377"/>
                    <Center>37.87096774,61.38709677,0</Center>
                    <Nodes>37, 58, 0;36, 59, 0;38, 59, 0;35, 60, 0;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0</Nodes>
                </Cell>
                <Cell id="237">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4885577182"/>
                    <PropertyData symbol-ref="d" value="82.14933358"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9551450038"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09555125389"/>
                    <PropertyData symbol-ref="d_normal" value="0.8058428185"/>
                    <Center>126.6129032,177.7096774,0</Center>
                    <Nodes>125, 175, 0;126, 175, 0;128, 175, 0;124, 176, 0;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0</Nodes>
                </Cell>
                <Cell id="241">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4950712075"/>
                    <PropertyData symbol-ref="d" value="88.88441334"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9801934362"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09803328571"/>
                    <PropertyData symbol-ref="d_normal" value="0.8901736547"/>
                    <Center>99.0625,188.8125,0</Center>
                    <Nodes>96, 187, 0;97, 187, 0;98, 187, 0;99, 187, 0;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0</Nodes>
                </Cell>
                <Cell id="242">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.481673472"/>
                    <PropertyData symbol-ref="d" value="77.46990957"/>
                    <PropertyData symbol-ref="GSH_local" value="0.925249161"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0925249161"/>
                    <PropertyData symbol-ref="d_normal" value="0.7515902628"/>
                    <Center>23.59375,87.03125,0</Center>
                    <Nodes>21, 84, 0;21, 85, 0;22, 85, 0;23, 85, 0;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0</Nodes>
                </Cell>
                <Cell id="244">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3000709876"/>
                    <PropertyData symbol-ref="d" value="44.84540447"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2002390232"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02018960434"/>
                    <PropertyData symbol-ref="d_normal" value="0.3615198865"/>
                    <Center>60.25806452,120.8387097,0</Center>
                    <Nodes>60, 117, 0;59, 118, 0;60, 118, 0;58, 119, 0;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0</Nodes>
                </Cell>
                <Cell id="245">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4319313339"/>
                    <PropertyData symbol-ref="d" value="64.65144678"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7293360148"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07319457725"/>
                    <PropertyData symbol-ref="d_normal" value="0.5991256407"/>
                    <Center>49.65625,59.375,0</Center>
                    <Nodes>48, 56, 0;49, 56, 0;47, 57, 0;48, 57, 0;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0</Nodes>
                </Cell>
                <Cell id="248">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2880364305"/>
                    <PropertyData symbol-ref="d" value="42.34456795"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1597896363"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01581885773"/>
                    <PropertyData symbol-ref="d_normal" value="0.3340205884"/>
                    <Center>139.8064516,113.5806452,0</Center>
                    <Nodes>138, 111, 0;139, 111, 0;140, 111, 0;141, 111, 0;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0</Nodes>
                </Cell>
                <Cell id="251">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4672050925"/>
                    <PropertyData symbol-ref="d" value="71.98679861"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8667657608"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08698975352"/>
                    <PropertyData symbol-ref="d_normal" value="0.6872659992"/>
                    <Center>77.57575758,168.5454545,0</Center>
                    <Nodes>76, 165, 0;77, 165, 0;76, 166, 0;77, 166, 0;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0</Nodes>
                </Cell>
                <Cell id="254">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4619876874"/>
                    <PropertyData symbol-ref="d" value="70.40074082"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8435513004"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0849740344"/>
                    <PropertyData symbol-ref="d_normal" value="0.668489256"/>
                    <Center>147.71875,151.71875,0</Center>
                    <Nodes>145, 149, 0;146, 149, 0;147, 149, 0;148, 149, 0;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0</Nodes>
                </Cell>
                <Cell id="256">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4304447272"/>
                    <PropertyData symbol-ref="d" value="64.89105574"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7334622204"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07303496391"/>
                    <PropertyData symbol-ref="d_normal" value="0.6012260095"/>
                    <Center>92.75757576,164.5757576,0</Center>
                    <Nodes>91, 161, 0;92, 161, 0;93, 161, 0;91, 162, 0;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0</Nodes>
                </Cell>
                <Cell id="257">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4290291434"/>
                    <PropertyData symbol-ref="d" value="64.11187122"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7136707497"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07174880311"/>
                    <PropertyData symbol-ref="d_normal" value="0.5913279348"/>
                    <Center>66.41935484,45.51612903,0</Center>
                    <Nodes>66, 42, 0;67, 42, 0;68, 42, 0;66, 43, 0;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0</Nodes>
                </Cell>
                <Cell id="260">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.486397469"/>
                    <PropertyData symbol-ref="d" value="80.39331644"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9456972831"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09456972831"/>
                    <PropertyData symbol-ref="d_normal" value="0.7857348261"/>
                    <Center>180.59375,101,0</Center>
                    <Nodes>177, 99, 0;178, 99, 0;179, 99, 0;180, 99, 0;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0</Nodes>
                </Cell>
                <Cell id="263">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2520018211"/>
                    <PropertyData symbol-ref="d" value="16.64697414"/>
                    <PropertyData symbol-ref="GSH_local" value="0.008047498462"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0008240025815"/>
                    <PropertyData symbol-ref="d_normal" value="0.01856860684"/>
                    <Center>83.3030303,98.63636364,0</Center>
                    <Nodes>82, 96, 0;83, 96, 0;86, 96, 0;80, 97, 0;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0</Nodes>
                </Cell>
                <Cell id="266">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4676556317"/>
                    <PropertyData symbol-ref="d" value="72.63630102"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8763036204"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08699007596"/>
                    <PropertyData symbol-ref="d_normal" value="0.6957882619"/>
                    <Center>167.483871,126.8709677,0</Center>
                    <Nodes>168, 123, 0;166, 124, 0;167, 124, 0;168, 124, 0;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0</Nodes>
                </Cell>
                <Cell id="268">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4876747242"/>
                    <PropertyData symbol-ref="d" value="81.44211379"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9526336732"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09526138551"/>
                    <PropertyData symbol-ref="d_normal" value="0.8001318864"/>
                    <Center>114.78125,180.21875,0</Center>
                    <Nodes>115, 176, 0;114, 177, 0;115, 177, 0;113, 178, 0;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0</Nodes>
                </Cell>
                <Cell id="269">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2602095815"/>
                    <PropertyData symbol-ref="d" value="30.04353937"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04019287271"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.004138504309"/>
                    <PropertyData symbol-ref="d_normal" value="0.1826957329"/>
                    <Center>70.1875,96.28125,0</Center>
                    <Nodes>71, 93, 0;72, 93, 0;73, 93, 0;70, 94, 0;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0</Nodes>
                </Cell>
                <Cell id="272">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3472649876"/>
                    <PropertyData symbol-ref="d" value="52.62801324"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3812281808"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03812281808"/>
                    <PropertyData symbol-ref="d_normal" value="0.4515661519"/>
                    <Center>94.16666667,152.5333333,0</Center>
                    <Nodes>93, 149, 0;94, 149, 0;93, 150, 0;94, 150, 0;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0</Nodes>
                </Cell>
                <Cell id="275">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.494875008"/>
                    <PropertyData symbol-ref="d" value="89.18150767"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9799225293"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09792801476"/>
                    <PropertyData symbol-ref="d_normal" value="0.8887875191"/>
                    <Center>66,17.57575758,0</Center>
                    <Nodes>65, 14, 0;64, 15, 0;65, 15, 0;66, 15, 0;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0</Nodes>
                </Cell>
                <Cell id="278">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3621645311"/>
                    <PropertyData symbol-ref="d" value="54.89070284"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4525538646"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04476263102"/>
                    <PropertyData symbol-ref="d_normal" value="0.480964272"/>
                    <Center>154.84375,95.34375,0</Center>
                    <Nodes>153, 92, 0;152, 93, 0;153, 93, 0;154, 93, 0;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0</Nodes>
                </Cell>
                <Cell id="280">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2846213016"/>
                    <PropertyData symbol-ref="d" value="41.16091111"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1358660926"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01393018583"/>
                    <PropertyData symbol-ref="d_normal" value="0.3149942045"/>
                    <Center>78.53125,135.40625,0</Center>
                    <Nodes>79, 132, 0;80, 132, 0;78, 133, 0;79, 133, 0;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0</Nodes>
                </Cell>
                <Cell id="281">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3465490031"/>
                    <PropertyData symbol-ref="d" value="52.8161981"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3868073972"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03871733179"/>
                    <PropertyData symbol-ref="d_normal" value="0.4539247804"/>
                    <Center>150.8064516,85.80645161,0</Center>
                    <Nodes>150, 82, 0;150, 83, 0;151, 83, 0;152, 83, 0;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0</Nodes>
                </Cell>
                <Cell id="284">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3296958621"/>
                    <PropertyData symbol-ref="d" value="50.06035843"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3176976134"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03170878367"/>
                    <PropertyData symbol-ref="d_normal" value="0.4235627087"/>
                    <Center>54.33333333,79.42424242,0</Center>
                    <Nodes>53, 77, 0;54, 77, 0;55, 77, 0;57, 77, 0;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0</Nodes>
                </Cell>
                <Cell id="288">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.438600353"/>
                    <PropertyData symbol-ref="d" value="65.82709986"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7533125611"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07535520151"/>
                    <PropertyData symbol-ref="d_normal" value="0.6116358124"/>
                    <Center>107.7,34.66666667,0</Center>
                    <Nodes>106, 32, 0;105, 33, 0;106, 33, 0;107, 33, 0;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0</Nodes>
                </Cell>
                <Cell id="290">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4738892442"/>
                    <PropertyData symbol-ref="d" value="73.95609598"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8912083927"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08927184919"/>
                    <PropertyData symbol-ref="d_normal" value="0.7103144094"/>
                    <Center>113.5625,27.09375,0</Center>
                    <Nodes>111, 23, 0;112, 24, 0;113, 24, 0;114, 24, 0;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0</Nodes>
                </Cell>
                <Cell id="292">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4083098143"/>
                    <PropertyData symbol-ref="d" value="60.96145363"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6305825109"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06315388778"/>
                    <PropertyData symbol-ref="d_normal" value="0.5534716602"/>
                    <Center>42.75757576,78.96969697,0</Center>
                    <Nodes>41, 76, 0;42, 76, 0;43, 76, 0;41, 77, 0;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0</Nodes>
                </Cell>
                <Cell id="293">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4719868981"/>
                    <PropertyData symbol-ref="d" value="73.85445941"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8887472309"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08891620555"/>
                    <PropertyData symbol-ref="d_normal" value="0.7078008053"/>
                    <Center>173.9375,99.03125,0</Center>
                    <Nodes>174, 95, 0;173, 96, 0;174, 96, 0;172, 97, 0;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0</Nodes>
                </Cell>
                <Cell id="295">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3720426837"/>
                    <PropertyData symbol-ref="d" value="55.85710004"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4855597927"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04877478627"/>
                    <PropertyData symbol-ref="d_normal" value="0.4942223104"/>
                    <Center>143.1935484,64.22580645,0</Center>
                    <Nodes>141, 62, 0;142, 62, 0;143, 62, 0;144, 62, 0;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0</Nodes>
                </Cell>
                <Cell id="297">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2804206395"/>
                    <PropertyData symbol-ref="d" value="39.7675347"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1188903298"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0116511036"/>
                    <PropertyData symbol-ref="d_normal" value="0.2997019368"/>
                    <Center>139.1935484,108.1612903,0</Center>
                    <Nodes>137, 106, 0;138, 106, 0;139, 106, 0;140, 106, 0;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0</Nodes>
                </Cell>
                <Cell id="298">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2817780003"/>
                    <PropertyData symbol-ref="d" value="40.39293218"/>
                    <PropertyData symbol-ref="GSH_local" value="0.123935612"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01250757109"/>
                    <PropertyData symbol-ref="d_normal" value="0.3044322583"/>
                    <Center>84.74193548,62.48387097,0</Center>
                    <Nodes>84, 58, 0;85, 58, 0;84, 59, 0;85, 59, 0;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0</Nodes>
                </Cell>
                <Cell id="300">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4135897722"/>
                    <PropertyData symbol-ref="d" value="62.24008599"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6641355843"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06607904669"/>
                    <PropertyData symbol-ref="d_normal" value="0.5681778768"/>
                    <Center>138.15625,50.75,0</Center>
                    <Nodes>137, 47, 0;137, 48, 0;138, 48, 0;139, 48, 0;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0</Nodes>
                </Cell>
                <Cell id="302">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3600383354"/>
                    <PropertyData symbol-ref="d" value="54.6461991"/>
                    <PropertyData symbol-ref="GSH_local" value="0.450937199"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04479838634"/>
                    <PropertyData symbol-ref="d_normal" value="0.4803115255"/>
                    <Center>126.25,52.1875,0</Center>
                    <Nodes>125, 50, 0;126, 50, 0;127, 50, 0;128, 50, 0;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0</Nodes>
                </Cell>
                <Cell id="303">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3590647172"/>
                    <PropertyData symbol-ref="d" value="54.13075733"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4300068571"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04289578839"/>
                    <PropertyData symbol-ref="d_normal" value="0.4718176824"/>
                    <Center>151.2424242,117.8181818,0</Center>
                    <Nodes>148, 115, 0;151, 115, 0;148, 116, 0;149, 116, 0;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0</Nodes>
                </Cell>
                <Cell id="305">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3424721329"/>
                    <PropertyData symbol-ref="d" value="52.0670482"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3741901325"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03760880338"/>
                    <PropertyData symbol-ref="d_normal" value="0.4485717445"/>
                    <Center>150.516129,112.5806452,0</Center>
                    <Nodes>151, 110, 0;152, 110, 0;149, 111, 0;150, 111, 0;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0</Nodes>
                </Cell>
                <Cell id="311">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4616536862"/>
                    <PropertyData symbol-ref="d" value="70.7345509"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8484578243"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08488565858"/>
                    <PropertyData symbol-ref="d_normal" value="0.6722556403"/>
                    <Center>50.48387097,50.03225806,0</Center>
                    <Nodes>50, 47, 0;51, 47, 0;48, 48, 0;49, 48, 0;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0</Nodes>
                </Cell>
                <Cell id="313">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3896210723"/>
                    <PropertyData symbol-ref="d" value="58.3225976"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5503829842"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05549266065"/>
                    <PropertyData symbol-ref="d_normal" value="0.5202218227"/>
                    <Center>156.483871,114.2580645,0</Center>
                    <Nodes>154, 112, 0;155, 112, 0;156, 112, 0;157, 112, 0;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0</Nodes>
                </Cell>
                <Cell id="316">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3851072354"/>
                    <PropertyData symbol-ref="d" value="58.01484858"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5464532605"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05473454615"/>
                    <PropertyData symbol-ref="d_normal" value="0.518635045"/>
                    <Center>91.2,157.5,0</Center>
                    <Nodes>89, 155, 0;90, 155, 0;91, 155, 0;92, 155, 0;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0</Nodes>
                </Cell>
                <Cell id="318">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4644325449"/>
                    <PropertyData symbol-ref="d" value="71.2261816"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8580454731"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08544764467"/>
                    <PropertyData symbol-ref="d_normal" value="0.6799150324"/>
                    <Center>170.9354839,93.61290323,0</Center>
                    <Nodes>171, 90, 0;170, 91, 0;171, 91, 0;172, 91, 0;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0</Nodes>
                </Cell>
                <Cell id="319">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2521036985"/>
                    <PropertyData symbol-ref="d" value="16.7501166"/>
                    <PropertyData symbol-ref="GSH_local" value="0.008424770188"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0008431287902"/>
                    <PropertyData symbol-ref="d_normal" value="0.02318813787"/>
                    <Center>110.53125,113.1875,0</Center>
                    <Nodes>110, 110, 0;109, 111, 0;110, 111, 0;111, 111, 0;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0</Nodes>
                </Cell>
                <Cell id="320">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3658846533"/>
                    <PropertyData symbol-ref="d" value="55.42992501"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4690045629"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04734031701"/>
                    <PropertyData symbol-ref="d_normal" value="0.4875859069"/>
                    <Center>154.875,107.46875,0</Center>
                    <Nodes>156, 103, 0;154, 104, 0;156, 104, 0;157, 104, 0;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0</Nodes>
                </Cell>
                <Cell id="323">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4782772979"/>
                    <PropertyData symbol-ref="d" value="76.25113985"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9134966406"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09133859994"/>
                    <PropertyData symbol-ref="d_normal" value="0.7357096448"/>
                    <Center>59.3125,164.59375,0</Center>
                    <Nodes>57, 162, 0;58, 162, 0;59, 162, 0;60, 162, 0;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0</Nodes>
                </Cell>
                <Cell id="331">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4630798893"/>
                    <PropertyData symbol-ref="d" value="71.40001049"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8592090541"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0856419073"/>
                    <PropertyData symbol-ref="d_normal" value="0.6808736124"/>
                    <Center>57.03125,157.03125,0</Center>
                    <Nodes>56, 154, 0;57, 154, 0;58, 154, 0;59, 154, 0;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0</Nodes>
                </Cell>
                <Cell id="335">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.456454811"/>
                    <PropertyData symbol-ref="d" value="69.19522032"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8219396765"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08248058102"/>
                    <PropertyData symbol-ref="d_normal" value="0.6529544617"/>
                    <Center>136.9375,158.46875,0</Center>
                    <Nodes>135, 156, 0;136, 156, 0;137, 156, 0;138, 156, 0;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0</Nodes>
                </Cell>
                <Cell id="336">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2533982231"/>
                    <PropertyData symbol-ref="d" value="20.64198564"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01330293647"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001339581995"/>
                    <PropertyData symbol-ref="d_normal" value="0.06936217323"/>
                    <Center>83.65625,87.1875,0</Center>
                    <Nodes>84, 84, 0;85, 84, 0;83, 85, 0;84, 85, 0;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0</Nodes>
                </Cell>
                <Cell id="337">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3191907966"/>
                    <PropertyData symbol-ref="d" value="48.63297743"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2760357601"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02812022999"/>
                    <PropertyData symbol-ref="d_normal" value="0.4035788424"/>
                    <Center>60.80645161,129.0645161,0</Center>
                    <Nodes>58, 127, 0;59, 127, 0;60, 127, 0;61, 127, 0;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0</Nodes>
                </Cell>
                <Cell id="338">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4779769643"/>
                    <PropertyData symbol-ref="d" value="76.23991352"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9136277439"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09135004176"/>
                    <PropertyData symbol-ref="d_normal" value="0.7358756692"/>
                    <Center>128.0967742,170.7741935,0</Center>
                    <Nodes>126, 168, 0;128, 168, 0;126, 169, 0;127, 169, 0;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0</Nodes>
                </Cell>
                <Cell id="341">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2524084773"/>
                    <PropertyData symbol-ref="d" value="17.59541511"/>
                    <PropertyData symbol-ref="GSH_local" value="0.009270967267"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0009519001712"/>
                    <PropertyData symbol-ref="d_normal" value="0.03284466491"/>
                    <Center>91.9375,115.46875,0</Center>
                    <Nodes>92, 112, 0;91, 113, 0;92, 113, 0;93, 113, 0;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0</Nodes>
                </Cell>
                <Cell id="343">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3209722964"/>
                    <PropertyData symbol-ref="d" value="49.23060476"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2833993932"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02828613423"/>
                    <PropertyData symbol-ref="d_normal" value="0.4072338534"/>
                    <Center>65.8,64.43333333,0</Center>
                    <Nodes>63, 62, 0;65, 62, 0;66, 62, 0;67, 62, 0;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0</Nodes>
                </Cell>
                <Cell id="348">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4857904639"/>
                    <PropertyData symbol-ref="d" value="79.57212849"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9423000275"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09419418715"/>
                    <PropertyData symbol-ref="d_normal" value="0.7793067028"/>
                    <Center>70.0625,26.34375,0</Center>
                    <Nodes>68, 24, 0;70, 24, 0;71, 24, 0;67, 25, 0;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0</Nodes>
                </Cell>
                <Cell id="351">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4816792476"/>
                    <PropertyData symbol-ref="d" value="78.33945851"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9313088444"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09303662242"/>
                    <PropertyData symbol-ref="d_normal" value="0.7606970505"/>
                    <Center>97.21875,21.875,0</Center>
                    <Nodes>98, 18, 0;97, 19, 0;98, 19, 0;99, 19, 0;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0</Nodes>
                </Cell>
                <Cell id="353">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3469678592"/>
                    <PropertyData symbol-ref="d" value="52.58939562"/>
                    <PropertyData symbol-ref="GSH_local" value="0.383992485"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03890414396"/>
                    <PropertyData symbol-ref="d_normal" value="0.4527363819"/>
                    <Center>53.96774194,74.70967742,0</Center>
                    <Nodes>53, 72, 0;52, 73, 0;53, 73, 0;54, 73, 0;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0</Nodes>
                </Cell>
                <Cell id="354">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2519783058"/>
                    <PropertyData symbol-ref="d" value="16.33816255"/>
                    <PropertyData symbol-ref="GSH_local" value="0.007826942992"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0007885119656"/>
                    <PropertyData symbol-ref="d_normal" value="0.01576744665"/>
                    <Center>114.0645161,108.3548387,0</Center>
                    <Nodes>114, 105, 0;115, 105, 0;113, 106, 0;114, 106, 0;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0</Nodes>
                </Cell>
                <Cell id="355">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2576702235"/>
                    <PropertyData symbol-ref="d" value="27.8419963"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03054055864"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003133097825"/>
                    <PropertyData symbol-ref="d_normal" value="0.1542316952"/>
                    <Center>72.18181818,101.2121212,0</Center>
                    <Nodes>72, 98, 0;73, 98, 0;75, 98, 0;71, 99, 0;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0</Nodes>
                </Cell>
                <Cell id="358">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4818697332"/>
                    <PropertyData symbol-ref="d" value="77.86367793"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9288775616"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09286546796"/>
                    <PropertyData symbol-ref="d_normal" value="0.7569574057"/>
                    <Center>22.4137931,91.93103448,0</Center>
                    <Nodes>22, 89, 0;20, 90, 0;21, 90, 0;22, 90, 0;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0</Nodes>
                </Cell>
                <Cell id="359">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3903162617"/>
                    <PropertyData symbol-ref="d" value="58.18150401"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5507620106"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0554573081"/>
                    <PropertyData symbol-ref="d_normal" value="0.5203750003"/>
                    <Center>147.53125,66.625,0</Center>
                    <Nodes>147, 63, 0;148, 63, 0;146, 64, 0;147, 64, 0;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0</Nodes>
                </Cell>
                <Cell id="365">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2794537524"/>
                    <PropertyData symbol-ref="d" value="39.69390942"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1168969534"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01173997123"/>
                    <PropertyData symbol-ref="d_normal" value="0.2977850912"/>
                    <Center>123.9032258,131.6129032,0</Center>
                    <Nodes>124, 129, 0;125, 129, 0;126, 129, 0;123, 130, 0;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0</Nodes>
                </Cell>
                <Cell id="366">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4947238276"/>
                    <PropertyData symbol-ref="d" value="88.12513538"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9785885158"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09783083265"/>
                    <PropertyData symbol-ref="d_normal" value="0.8822183821"/>
                    <Center>57.375,177.21875,0</Center>
                    <Nodes>58, 173, 0;56, 174, 0;57, 174, 0;58, 174, 0;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0</Nodes>
                </Cell>
                <Cell id="370">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4383898337"/>
                    <PropertyData symbol-ref="d" value="66.04281106"/>
                    <PropertyData symbol-ref="GSH_local" value="0.761954729"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07611460639"/>
                    <PropertyData symbol-ref="d_normal" value="0.6163426273"/>
                    <Center>161.125,75,0</Center>
                    <Nodes>159, 73, 0;160, 73, 0;161, 73, 0;162, 73, 0;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0</Nodes>
                </Cell>
                <Cell id="371">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4745449394"/>
                    <PropertyData symbol-ref="d" value="74.60150646"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8984153364"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08983247155"/>
                    <PropertyData symbol-ref="d_normal" value="0.7179739899"/>
                    <Center>52.28125,157.28125,0</Center>
                    <Nodes>51, 154, 0;52, 154, 0;50, 155, 0;51, 155, 0;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0</Nodes>
                </Cell>
                <Cell id="373">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3787069344"/>
                    <PropertyData symbol-ref="d" value="56.59521827"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5014386176"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05067934866"/>
                    <PropertyData symbol-ref="d_normal" value="0.5005754486"/>
                    <Center>125.3125,150.90625,0</Center>
                    <Nodes>123, 147, 0;123, 148, 0;124, 148, 0;123, 149, 0;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0</Nodes>
                </Cell>
                <Cell id="375">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3363226013"/>
                    <PropertyData symbol-ref="d" value="51.59454497"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3506133504"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03517670081"/>
                    <PropertyData symbol-ref="d_normal" value="0.4383655749"/>
                    <Center>119.3125,147.6875,0</Center>
                    <Nodes>118, 145, 0;120, 145, 0;117, 146, 0;118, 146, 0;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0</Nodes>
                </Cell>
                <Cell id="377">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4713428267"/>
                    <PropertyData symbol-ref="d" value="73.13574307"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8812484808"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08814830515"/>
                    <PropertyData symbol-ref="d_normal" value="0.7004306394"/>
                    <Center>135.7419355,163.8064516,0</Center>
                    <Nodes>137, 161, 0;134, 162, 0;135, 162, 0;136, 162, 0;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0</Nodes>
                </Cell>
                <Cell id="384">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2520228749"/>
                    <PropertyData symbol-ref="d" value="16.5340853"/>
                    <PropertyData symbol-ref="GSH_local" value="0.007972779082"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0008176072047"/>
                    <PropertyData symbol-ref="d_normal" value="0.01762825775"/>
                    <Center>85.22580645,92.58064516,0</Center>
                    <Nodes>84, 90, 0;85, 90, 0;86, 90, 0;87, 90, 0;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0</Nodes>
                </Cell>
                <Cell id="387">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3543798021"/>
                    <PropertyData symbol-ref="d" value="53.82356884"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4195183973"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04212677862"/>
                    <PropertyData symbol-ref="d_normal" value="0.4675249272"/>
                    <Center>147,73.5625,0</Center>
                    <Nodes>145, 71, 0;146, 71, 0;147, 71, 0;148, 71, 0;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0</Nodes>
                </Cell>
                <Cell id="388">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2612811212"/>
                    <PropertyData symbol-ref="d" value="31.42142047"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04573832033"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.004494256462"/>
                    <PropertyData symbol-ref="d_normal" value="0.1961998535"/>
                    <Center>130.0967742,90.35483871,0</Center>
                    <Nodes>131, 87, 0;130, 88, 0;131, 88, 0;128, 89, 0;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0</Nodes>
                </Cell>
                <Cell id="389">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4427815461"/>
                    <PropertyData symbol-ref="d" value="66.84863595"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7761586415"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07686245562"/>
                    <PropertyData symbol-ref="d_normal" value="0.6243419354"/>
                    <Center>123.8823529,162.3823529,0</Center>
                    <Nodes>124, 160, 0;125, 160, 0;126, 160, 0;127, 160, 0;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0</Nodes>
                </Cell>
                <Cell id="392">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.41186531"/>
                    <PropertyData symbol-ref="d" value="61.1245999"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6412347491"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06445147329"/>
                    <PropertyData symbol-ref="d_normal" value="0.5580727336"/>
                    <Center>96.5625,39.03125,0</Center>
                    <Nodes>99, 36, 0;95, 37, 0;96, 37, 0;97, 37, 0;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0</Nodes>
                </Cell>
                <Cell id="397">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4653575821"/>
                    <PropertyData symbol-ref="d" value="72.09229382"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8650181812"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08627833982"/>
                    <PropertyData symbol-ref="d_normal" value="0.6857610432"/>
                    <Center>95.58064516,28.35483871,0</Center>
                    <Nodes>95, 25, 0;96, 25, 0;95, 26, 0;96, 26, 0;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0</Nodes>
                </Cell>
                <Cell id="399">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.390328267"/>
                    <PropertyData symbol-ref="d" value="58.59141662"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5601912985"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05622975469"/>
                    <PropertyData symbol-ref="d_normal" value="0.5241938467"/>
                    <Center>49.03125,70.71875,0</Center>
                    <Nodes>48, 68, 0;49, 68, 0;50, 68, 0;51, 68, 0;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0</Nodes>
                </Cell>
                <Cell id="402">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2629978555"/>
                    <PropertyData symbol-ref="d" value="32.5003756"/>
                    <PropertyData symbol-ref="GSH_local" value="0.0518994857"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.005182705097"/>
                    <PropertyData symbol-ref="d_normal" value="0.2094848356"/>
                    <Center>99.96875,132.3125,0</Center>
                    <Nodes>98, 130, 0;99, 130, 0;100, 130, 0;96, 131, 0;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0</Nodes>
                </Cell>
                <Cell id="403">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4137626573"/>
                    <PropertyData symbol-ref="d" value="61.5533464"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6533551195"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06566689763"/>
                    <PropertyData symbol-ref="d_normal" value="0.5633819952"/>
                    <Center>54.86666667,141.9333333,0</Center>
                    <Nodes>52, 139, 0;52, 140, 0;53, 140, 0;54, 140, 0;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0</Nodes>
                </Cell>
                <Cell id="405">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4943061565"/>
                    <PropertyData symbol-ref="d" value="87.21959535"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9760819369"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09767699309"/>
                    <PropertyData symbol-ref="d_normal" value="0.8708912584"/>
                    <Center>48.5,29.625,0</Center>
                    <Nodes>46, 27, 0;47, 27, 0;48, 27, 0;46, 28, 0;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0</Nodes>
                </Cell>
                <Cell id="407">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4839899097"/>
                    <PropertyData symbol-ref="d" value="78.74928695"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9350610223"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09356495848"/>
                    <PropertyData symbol-ref="d_normal" value="0.7667163767"/>
                    <Center>116.90625,23.1875,0</Center>
                    <Nodes>117, 19, 0;115, 20, 0;116, 20, 0;117, 20, 0;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0</Nodes>
                </Cell>
                <Cell id="408">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2538991108"/>
                    <PropertyData symbol-ref="d" value="22.07909256"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01556416932"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001556086272"/>
                    <PropertyData symbol-ref="d_normal" value="0.08529027177"/>
                    <Center>112.125,81.34375,0</Center>
                    <Nodes>110, 79, 0;111, 79, 0;112, 79, 0;113, 79, 0;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0</Nodes>
                </Cell>
                <Cell id="411">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.436754792"/>
                    <PropertyData symbol-ref="d" value="65.53353745"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7499199698"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07460862216"/>
                    <PropertyData symbol-ref="d_normal" value="0.6098185507"/>
                    <Center>130.5483871,42.09677419,0</Center>
                    <Nodes>130, 39, 0;131, 39, 0;130, 40, 0;131, 40, 0;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0</Nodes>
                </Cell>
                <Cell id="416">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3930981645"/>
                    <PropertyData symbol-ref="d" value="59.10274753"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5706093609"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05704234217"/>
                    <PropertyData symbol-ref="d_normal" value="0.5284337759"/>
                    <Center>71.16129032,48.35483871,0</Center>
                    <Nodes>70, 46, 0;71, 46, 0;72, 46, 0;73, 46, 0;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0</Nodes>
                </Cell>
                <Cell id="418">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.478507794"/>
                    <PropertyData symbol-ref="d" value="75.71156524"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9110508051"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0911869031"/>
                    <PropertyData symbol-ref="d_normal" value="0.7326533301"/>
                    <Center>125.3870968,28.64516129,0</Center>
                    <Nodes>125, 26, 0;126, 26, 0;127, 26, 0;123, 27, 0;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0</Nodes>
                </Cell>
                <Cell id="419">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3614884193"/>
                    <PropertyData symbol-ref="d" value="54.59162532"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4456158995"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04444037884"/>
                    <PropertyData symbol-ref="d_normal" value="0.47815996"/>
                    <Center>117.0606061,151.8181818,0</Center>
                    <Nodes>114, 149, 0;115, 149, 0;116, 149, 0;114, 150, 0;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0</Nodes>
                </Cell>
                <Cell id="420">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4718429465"/>
                    <PropertyData symbol-ref="d" value="73.50619128"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8872711366"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08881091028"/>
                    <PropertyData symbol-ref="d_normal" value="0.7063165118"/>
                    <Center>83.75,171.6875,0</Center>
                    <Nodes>81, 169, 0;81, 170, 0;82, 170, 0;83, 170, 0;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0</Nodes>
                </Cell>
                <Cell id="423">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4803272199"/>
                    <PropertyData symbol-ref="d" value="77.08894265"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9224751297"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09202787374"/>
                    <PropertyData symbol-ref="d_normal" value="0.7476461625"/>
                    <Center>171.15625,70.34375,0</Center>
                    <Nodes>171, 67, 0;169, 68, 0;170, 68, 0;171, 68, 0;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0</Nodes>
                </Cell>
                <Cell id="425">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2579860463"/>
                    <PropertyData symbol-ref="d" value="28.11728447"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03195360491"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003190123601"/>
                    <PropertyData symbol-ref="d_normal" value="0.1589004989"/>
                    <Center>74.66666667,112.3333333,0</Center>
                    <Nodes>76, 109, 0;73, 110, 0;74, 110, 0;75, 110, 0;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0</Nodes>
                </Cell>
                <Cell id="431">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4922152955"/>
                    <PropertyData symbol-ref="d" value="84.88124164"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9685080681"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0968352359"/>
                    <PropertyData symbol-ref="d_normal" value="0.842602543"/>
                    <Center>67,178.3225806,0</Center>
                    <Nodes>65, 176, 0;66, 176, 0;68, 176, 0;69, 176, 0;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0</Nodes>
                </Cell>
                <Cell id="435">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2693397165"/>
                    <PropertyData symbol-ref="d" value="36.17256881"/>
                    <PropertyData symbol-ref="GSH_local" value="0.0781247092"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.007735794814"/>
                    <PropertyData symbol-ref="d_normal" value="0.2531896431"/>
                    <Center>91,135.2258065,0</Center>
                    <Nodes>89, 133, 0;90, 133, 0;91, 133, 0;92, 133, 0;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0</Nodes>
                </Cell>
                <Cell id="438">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3615636008"/>
                    <PropertyData symbol-ref="d" value="55.06619773"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4608497376"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04445759209"/>
                    <PropertyData symbol-ref="d_normal" value="0.4843077729"/>
                    <Center>54.375,69.21875,0</Center>
                    <Nodes>54, 66, 0;52, 67, 0;53, 67, 0;54, 67, 0;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0</Nodes>
                </Cell>
                <Cell id="439">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.351778283"/>
                    <PropertyData symbol-ref="d" value="53.74863734"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4177872396"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04131945213"/>
                    <PropertyData symbol-ref="d_normal" value="0.4668136358"/>
                    <Center>64.4375,59.8125,0</Center>
                    <Nodes>61, 58, 0;62, 58, 0;63, 58, 0;64, 58, 0;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0</Nodes>
                </Cell>
                <Cell id="442">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2716769102"/>
                    <PropertyData symbol-ref="d" value="37.09327611"/>
                    <PropertyData symbol-ref="GSH_local" value="0.08801153116"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.008619561369"/>
                    <PropertyData symbol-ref="d_normal" value="0.2661840496"/>
                    <Center>135.9677419,91,0</Center>
                    <Nodes>135, 88, 0;136, 88, 0;137, 88, 0;135, 89, 0;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0</Nodes>
                </Cell>
                <Cell id="443">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4217688859"/>
                    <PropertyData symbol-ref="d" value="63.00419768"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6828691354"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06852518115"/>
                    <PropertyData symbol-ref="d_normal" value="0.5766988728"/>
                    <Center>154.28125,67.9375,0</Center>
                    <Nodes>151, 66, 0;152, 66, 0;153, 66, 0;154, 66, 0;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0</Nodes>
                </Cell>
                <Cell id="451">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2529130239"/>
                    <PropertyData symbol-ref="d" value="20.02313115"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01184770641"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001156132851"/>
                    <PropertyData symbol-ref="d_normal" value="0.05762974675"/>
                    <Center>116.53125,89.125,0</Center>
                    <Nodes>115, 86, 0;115, 87, 0;116, 87, 0;117, 87, 0;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0</Nodes>
                </Cell>
                <Cell id="452">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4779581354"/>
                    <PropertyData symbol-ref="d" value="75.80475652"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9107394706"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0912109933"/>
                    <PropertyData symbol-ref="d_normal" value="0.7322697484"/>
                    <Center>72.73333333,170.8666667,0</Center>
                    <Nodes>72, 168, 0;74, 168, 0;71, 169, 0;72, 169, 0;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0</Nodes>
                </Cell>
                <Cell id="453">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4477852408"/>
                    <PropertyData symbol-ref="d" value="67.38271886"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7857531581"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07868899745"/>
                    <PropertyData symbol-ref="d_normal" value="0.6299513878"/>
                    <Center>142.3548387,152.6129032,0</Center>
                    <Nodes>144, 150, 0;139, 151, 0;140, 151, 0;141, 151, 0;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0</Nodes>
                </Cell>
                <Cell id="458">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.41865421"/>
                    <PropertyData symbol-ref="d" value="62.85256116"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6812546593"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06832270897"/>
                    <PropertyData symbol-ref="d_normal" value="0.5759543706"/>
                    <Center>78.42424242,41.18181818,0</Center>
                    <Nodes>76, 38, 0;77, 38, 0;78, 38, 0;76, 39, 0;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0</Nodes>
                </Cell>
                <Cell id="460">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4509551482"/>
                    <PropertyData symbol-ref="d" value="68.02072433"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8020016258"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08048984538"/>
                    <PropertyData symbol-ref="d_normal" value="0.6398851815"/>
                    <Center>44.25,60.84375,0</Center>
                    <Nodes>46, 58, 0;41, 59, 0;42, 59, 0;43, 59, 0;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0</Nodes>
                </Cell>
                <Cell id="461">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4879816576"/>
                    <PropertyData symbol-ref="d" value="81.59118868"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9532136205"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09514582895"/>
                    <PropertyData symbol-ref="d_normal" value="0.801424691"/>
                    <Center>150.7931034,36.24137931,0</Center>
                    <Nodes>152, 33, 0;150, 34, 0;151, 34, 0;152, 34, 0;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0</Nodes>
                </Cell>
                <Cell id="470">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2756673628"/>
                    <PropertyData symbol-ref="d" value="38.60537022"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1052706133"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01043674863"/>
                    <PropertyData symbol-ref="d_normal" value="0.2860012993"/>
                    <Center>83.84848485,135.0909091,0</Center>
                    <Nodes>85, 132, 0;81, 133, 0;82, 133, 0;83, 133, 0;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0</Nodes>
                </Cell>
                <Cell id="472">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2520050056"/>
                    <PropertyData symbol-ref="d" value="16.53765826"/>
                    <PropertyData symbol-ref="GSH_local" value="0.008114013062"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0008194020906"/>
                    <PropertyData symbol-ref="d_normal" value="0.01939844064"/>
                    <Center>89.48484848,87.3030303,0</Center>
                    <Nodes>90, 84, 0;87, 85, 0;88, 85, 0;89, 85, 0;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0</Nodes>
                </Cell>
                <Cell id="473">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3822258515"/>
                    <PropertyData symbol-ref="d" value="57.60867787"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5308598776"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05273995256"/>
                    <PropertyData symbol-ref="d_normal" value="0.512359661"/>
                    <Center>43.15625,91.03125,0</Center>
                    <Nodes>41, 89, 0;42, 89, 0;43, 89, 0;44, 89, 0;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0</Nodes>
                </Cell>
                <Cell id="474">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4278844786"/>
                    <PropertyData symbol-ref="d" value="63.95296276"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7139707861"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07103725967"/>
                    <PropertyData symbol-ref="d_normal" value="0.5914748094"/>
                    <Center>161,80.5625,0</Center>
                    <Nodes>159, 78, 0;160, 78, 0;161, 78, 0;162, 78, 0;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0</Nodes>
                </Cell>
                <Cell id="479">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3004492443"/>
                    <PropertyData symbol-ref="d" value="45.13793776"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1976930781"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02025386258"/>
                    <PropertyData symbol-ref="d_normal" value="0.3599224487"/>
                    <Center>116.375,57.875,0</Center>
                    <Nodes>117, 55, 0;114, 56, 0;115, 56, 0;116, 56, 0;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0</Nodes>
                </Cell>
                <Cell id="480">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3525368693"/>
                    <PropertyData symbol-ref="d" value="53.2192271"/>
                    <PropertyData symbol-ref="GSH_local" value="0.406835336"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04116694125"/>
                    <PropertyData symbol-ref="d_normal" value="0.4622936484"/>
                    <Center>105.5625,46.96875,0</Center>
                    <Nodes>104, 44, 0;105, 44, 0;103, 45, 0;104, 45, 0;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0</Nodes>
                </Cell>
                <Cell id="485">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.452812464"/>
                    <PropertyData symbol-ref="d" value="68.60969348"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8116002684"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08124560643"/>
                    <PropertyData symbol-ref="d_normal" value="0.6460442001"/>
                    <Center>159.3125,65.53125,0</Center>
                    <Nodes>157, 63, 0;158, 63, 0;159, 63, 0;160, 63, 0;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0</Nodes>
                </Cell>
                <Cell id="486">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.422712254"/>
                    <PropertyData symbol-ref="d" value="63.07648197"/>
                    <PropertyData symbol-ref="GSH_local" value="0.689309984"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06849367233"/>
                    <PropertyData symbol-ref="d_normal" value="0.5796895392"/>
                    <Center>72.53125,43.21875,0</Center>
                    <Nodes>73, 41, 0;74, 41, 0;75, 41, 0;69, 42, 0;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0</Nodes>
                </Cell>
                <Cell id="491">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3543190441"/>
                    <PropertyData symbol-ref="d" value="53.60090149"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4155766543"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04183698348"/>
                    <PropertyData symbol-ref="d_normal" value="0.4659041457"/>
                    <Center>130.4848485,55.84848485,0</Center>
                    <Nodes>130, 53, 0;129, 54, 0;130, 54, 0;131, 54, 0;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0</Nodes>
                </Cell>
                <Cell id="494">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4812687252"/>
                    <PropertyData symbol-ref="d" value="77.32657638"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9257094519"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09229501215"/>
                    <PropertyData symbol-ref="d_normal" value="0.7522576687"/>
                    <Center>155.516129,153.8387097,0</Center>
                    <Nodes>155, 151, 0;156, 151, 0;157, 151, 0;153, 152, 0;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0</Nodes>
                </Cell>
                <Cell id="495">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2958665714"/>
                    <PropertyData symbol-ref="d" value="44.16469753"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1873851413"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01905872241"/>
                    <PropertyData symbol-ref="d_normal" value="0.3532908809"/>
                    <Center>129.59375,66.8125,0</Center>
                    <Nodes>129, 63, 0;128, 64, 0;129, 64, 0;130, 64, 0;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0</Nodes>
                </Cell>
                <Cell id="504">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4874614472"/>
                    <PropertyData symbol-ref="d" value="80.52752711"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9486536448"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09493280324"/>
                    <PropertyData symbol-ref="d_normal" value="0.7916449809"/>
                    <Center>19.38709677,98.74193548,0</Center>
                    <Nodes>18, 96, 0;19, 96, 0;20, 96, 0;17, 97, 0;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0</Nodes>
                </Cell>
                <Cell id="506">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2534021507"/>
                    <PropertyData symbol-ref="d" value="20.91805527"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01343119457"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001359453745"/>
                    <PropertyData symbol-ref="d_normal" value="0.07033468843"/>
                    <Center>79.78125,93.75,0</Center>
                    <Nodes>81, 90, 0;80, 91, 0;81, 91, 0;82, 91, 0;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0</Nodes>
                </Cell>
                <Cell id="507">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2555519895"/>
                    <PropertyData symbol-ref="d" value="24.9748677"/>
                    <PropertyData symbol-ref="GSH_local" value="0.02207285395"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.00228959464"/>
                    <PropertyData symbol-ref="d_normal" value="0.1208913351"/>
                    <Center>122.1290323,111.9354839,0</Center>
                    <Nodes>121, 109, 0;123, 109, 0;119, 110, 0;120, 110, 0;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0</Nodes>
                </Cell>
                <Cell id="514">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4663640324"/>
                    <PropertyData symbol-ref="d" value="71.95974413"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8653898311"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08649482432"/>
                    <PropertyData symbol-ref="d_normal" value="0.6860797114"/>
                    <Center>27.96875,96.21875,0</Center>
                    <Nodes>26, 93, 0;27, 93, 0;25, 94, 0;26, 94, 0;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0</Nodes>
                </Cell>
                <Cell id="515">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4656603311"/>
                    <PropertyData symbol-ref="d" value="71.3635079"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8611340799"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08633978631"/>
                    <PropertyData symbol-ref="d_normal" value="0.6824741354"/>
                    <Center>158.5666667,59.43333333,0</Center>
                    <Nodes>159, 56, 0;160, 56, 0;157, 57, 0;158, 57, 0;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0</Nodes>
                </Cell>
                <Cell id="516">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2652101508"/>
                    <PropertyData symbol-ref="d" value="33.84376443"/>
                    <PropertyData symbol-ref="GSH_local" value="0.06189794516"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.006189794516"/>
                    <PropertyData symbol-ref="d_normal" value="0.2281628239"/>
                    <Center>133.84375,100.03125,0</Center>
                    <Nodes>132, 97, 0;133, 97, 0;131, 98, 0;132, 98, 0;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0</Nodes>
                </Cell>
                <Cell id="518">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4716210581"/>
                    <PropertyData symbol-ref="d" value="73.90094476"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8906098298"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08882709399"/>
                    <PropertyData symbol-ref="d_normal" value="0.7096985396"/>
                    <Center>103.125,173.875,0</Center>
                    <Nodes>101, 171, 0;102, 171, 0;101, 172, 0;102, 172, 0;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0</Nodes>
                </Cell>
                <Cell id="521">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4415554607"/>
                    <PropertyData symbol-ref="d" value="66.50342155"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7742337722"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07725869237"/>
                    <PropertyData symbol-ref="d_normal" value="0.6232373785"/>
                    <Center>62.84375,155.3125,0</Center>
                    <Nodes>63, 153, 0;64, 153, 0;65, 153, 0;66, 153, 0;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0</Nodes>
                </Cell>
                <Cell id="525">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3274515468"/>
                    <PropertyData symbol-ref="d" value="49.94295574"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3078958544"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03119917763"/>
                    <PropertyData symbol-ref="d_normal" value="0.4190025147"/>
                    <Center>142.5625,126.5,0</Center>
                    <Nodes>140, 123, 0;141, 124, 0;142, 124, 0;143, 124, 0;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0</Nodes>
                </Cell>
                <Cell id="527">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4494041925"/>
                    <PropertyData symbol-ref="d" value="67.97036636"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7975574984"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07981364873"/>
                    <PropertyData symbol-ref="d_normal" value="0.6371098027"/>
                    <Center>168.1515152,99.57575758,0</Center>
                    <Nodes>168, 96, 0;166, 97, 0;167, 97, 0;168, 97, 0;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0</Nodes>
                </Cell>
                <Cell id="528">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3751548806"/>
                    <PropertyData symbol-ref="d" value="56.82808848"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5082664779"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05025755618"/>
                    <PropertyData symbol-ref="d_normal" value="0.5033068925"/>
                    <Center>155.71875,89.5,0</Center>
                    <Nodes>154, 87, 0;155, 87, 0;156, 87, 0;157, 87, 0;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0</Nodes>
                </Cell>
                <Cell id="531">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4154202336"/>
                    <PropertyData symbol-ref="d" value="62.01128594"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6602951395"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06548370981"/>
                    <PropertyData symbol-ref="d_normal" value="0.5664609733"/>
                    <Center>109.8387097,161.2258065,0</Center>
                    <Nodes>109, 158, 0;110, 158, 0;108, 159, 0;109, 159, 0;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0</Nodes>
                </Cell>
                <Cell id="532">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2520906561"/>
                    <PropertyData symbol-ref="d" value="17.18980098"/>
                    <PropertyData symbol-ref="GSH_local" value="0.008847625797"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0008596717401"/>
                    <PropertyData symbol-ref="d_normal" value="0.0281280871"/>
                    <Center>100.4193548,82.67741935,0</Center>
                    <Nodes>100, 80, 0;101, 80, 0;102, 80, 0;103, 80, 0;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0</Nodes>
                </Cell>
                <Cell id="533">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4104696209"/>
                    <PropertyData symbol-ref="d" value="61.22360656"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6377425989"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06377795429"/>
                    <PropertyData symbol-ref="d_normal" value="0.556557974"/>
                    <Center>153.1612903,130.5483871,0</Center>
                    <Nodes>153, 126, 0;153, 127, 0;154, 127, 0;153, 128, 0;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0</Nodes>
                </Cell>
                <Cell id="534">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.37655886"/>
                    <PropertyData symbol-ref="d" value="56.75837115"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5044546527"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05057715722"/>
                    <PropertyData symbol-ref="d_normal" value="0.5017819082"/>
                    <Center>106.2258065,156.483871,0</Center>
                    <Nodes>104, 154, 0;105, 154, 0;106, 154, 0;107, 154, 0;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0</Nodes>
                </Cell>
                <Cell id="538">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.444687693"/>
                    <PropertyData symbol-ref="d" value="67.22462637"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7794040384"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07840059721"/>
                    <PropertyData symbol-ref="d_normal" value="0.6262196774"/>
                    <Center>37,77.06451613,0</Center>
                    <Nodes>34, 75, 0;35, 75, 0;36, 75, 0;37, 75, 0;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0</Nodes>
                </Cell>
                <Cell id="541">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.421464025"/>
                    <PropertyData symbol-ref="d" value="62.5718907"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6802334758"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06780316391"/>
                    <PropertyData symbol-ref="d_normal" value="0.5754844968"/>
                    <Center>48.0625,65.1875,0</Center>
                    <Nodes>48, 62, 0;47, 63, 0;48, 63, 0;49, 63, 0;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0</Nodes>
                </Cell>
                <Cell id="542">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4425983403"/>
                    <PropertyData symbol-ref="d" value="66.40437497"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7677688249"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07636518592"/>
                    <PropertyData symbol-ref="d_normal" value="0.6195755359"/>
                    <Center>166.0606061,92.27272727,0</Center>
                    <Nodes>166, 89, 0;168, 89, 0;165, 90, 0;166, 90, 0;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0</Nodes>
                </Cell>
                <Cell id="544">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2557187794"/>
                    <PropertyData symbol-ref="d" value="25.35986571"/>
                    <PropertyData symbol-ref="GSH_local" value="0.02287763458"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.002294249812"/>
                    <PropertyData symbol-ref="d_normal" value="0.1245547887"/>
                    <Center>123.3870968,90.19354839,0</Center>
                    <Nodes>124, 87, 0;123, 88, 0;124, 88, 0;125, 88, 0;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0</Nodes>
                </Cell>
                <Cell id="546">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2598364075"/>
                    <PropertyData symbol-ref="d" value="29.72571553"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03858311182"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003962117858"/>
                    <PropertyData symbol-ref="d_normal" value="0.1784406541"/>
                    <Center>127.9090909,110.7575758,0</Center>
                    <Nodes>129, 108, 0;124, 109, 0;125, 109, 0;126, 109, 0;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0</Nodes>
                </Cell>
                <Cell id="547">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2527377785"/>
                    <PropertyData symbol-ref="d" value="19.05963093"/>
                    <PropertyData symbol-ref="GSH_local" value="0.0108692606"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0010941596"/>
                    <PropertyData symbol-ref="d_normal" value="0.04891121604"/>
                    <Center>118.375,94.9375,0</Center>
                    <Nodes>117, 92, 0;119, 92, 0;120, 92, 0;116, 93, 0;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0</Nodes>
                </Cell>
                <Cell id="553">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3663993387"/>
                    <PropertyData symbol-ref="d" value="55.26194724"/>
                    <PropertyData symbol-ref="GSH_local" value="0.475840036"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.047616592"/>
                    <PropertyData symbol-ref="d_normal" value="0.4903284826"/>
                    <Center>47.36363636,82.21212121,0</Center>
                    <Nodes>48, 79, 0;46, 80, 0;48, 80, 0;49, 80, 0;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0</Nodes>
                </Cell>
                <Cell id="558">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4894064662"/>
                    <PropertyData symbol-ref="d" value="82.02560688"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9565936405"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09571395358"/>
                    <PropertyData symbol-ref="d_normal" value="0.8092772721"/>
                    <Center>59.83870968,28.35483871,0</Center>
                    <Nodes>59, 25, 0;57, 26, 0;58, 26, 0;59, 26, 0;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0</Nodes>
                </Cell>
                <Cell id="559">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4123437875"/>
                    <PropertyData symbol-ref="d" value="61.44550812"/>
                    <PropertyData symbol-ref="GSH_local" value="0.640005044"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0651447602"/>
                    <PropertyData symbol-ref="d_normal" value="0.5575386037"/>
                    <Center>137.25,148.96875,0</Center>
                    <Nodes>139, 146, 0;136, 147, 0;137, 147, 0;138, 147, 0;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0</Nodes>
                </Cell>
                <Cell id="560">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3875834075"/>
                    <PropertyData symbol-ref="d" value="58.57895906"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5642898372"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05637641557"/>
                    <PropertyData symbol-ref="d_normal" value="0.5258590757"/>
                    <Center>101.1,158.4,0</Center>
                    <Nodes>99, 156, 0;100, 156, 0;101, 156, 0;102, 156, 0;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0</Nodes>
                </Cell>
                <Cell id="561">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2557517713"/>
                    <PropertyData symbol-ref="d" value="25.43187836"/>
                    <PropertyData symbol-ref="GSH_local" value="0.02360854458"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.002345761612"/>
                    <PropertyData symbol-ref="d_normal" value="0.1277745118"/>
                    <Center>81.125,82.78125,0</Center>
                    <Nodes>82, 80, 0;84, 80, 0;79, 81, 0;80, 81, 0;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0</Nodes>
                </Cell>
                <Cell id="562">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2578546326"/>
                    <PropertyData symbol-ref="d" value="27.85817878"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03055056956"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003107603574"/>
                    <PropertyData symbol-ref="d_normal" value="0.1542655016"/>
                    <Center>117.3548387,122.2258065,0</Center>
                    <Nodes>117, 118, 0;116, 120, 0;117, 120, 0;118, 120, 0;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0</Nodes>
                </Cell>
                <Cell id="566">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3748757565"/>
                    <PropertyData symbol-ref="d" value="56.52934111"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5011570019"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05053315882"/>
                    <PropertyData symbol-ref="d_normal" value="0.5004628016"/>
                    <Center>92.8125,43.84375,0</Center>
                    <Nodes>94, 42, 0;95, 42, 0;96, 42, 0;97, 42, 0;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0</Nodes>
                </Cell>
                <Cell id="568">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.471266394"/>
                    <PropertyData symbol-ref="d" value="73.17454007"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8811252645"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08818227445"/>
                    <PropertyData symbol-ref="d_normal" value="0.7003129504"/>
                    <Center>31.09375,125.03125,0</Center>
                    <Nodes>30, 122, 0;31, 122, 0;30, 123, 0;31, 123, 0;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0</Nodes>
                </Cell>
                <Cell id="569">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3195713338"/>
                    <PropertyData symbol-ref="d" value="48.28206917"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2778239794"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02808697623"/>
                    <PropertyData symbol-ref="d_normal" value="0.404471884"/>
                    <Center>122.8333333,57.43333333,0</Center>
                    <Nodes>123, 55, 0;124, 55, 0;125, 55, 0;120, 56, 0;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0</Nodes>
                </Cell>
                <Cell id="570">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3000101483"/>
                    <PropertyData symbol-ref="d" value="44.97243924"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2002363466"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01981968268"/>
                    <PropertyData symbol-ref="d_normal" value="0.3615182151"/>
                    <Center>106.0967742,144.7419355,0</Center>
                    <Nodes>104, 142, 0;105, 142, 0;106, 142, 0;107, 142, 0;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0</Nodes>
                </Cell>
                <Cell id="572">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4825178122"/>
                    <PropertyData symbol-ref="d" value="78.22558696"/>
                    <PropertyData symbol-ref="GSH_local" value="0.932436549"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09320580185"/>
                    <PropertyData symbol-ref="d_normal" value="0.7624733934"/>
                    <Center>85.5625,176.84375,0</Center>
                    <Nodes>86, 174, 0;82, 175, 0;83, 175, 0;84, 175, 0;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0</Nodes>
                </Cell>
                <Cell id="573">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3232444607"/>
                    <PropertyData symbol-ref="d" value="49.13511851"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2921761058"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02939219749"/>
                    <PropertyData symbol-ref="d_normal" value="0.4115161397"/>
                    <Center>132.15625,137.3125,0</Center>
                    <Nodes>130, 135, 0;131, 135, 0;132, 135, 0;133, 135, 0;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0</Nodes>
                </Cell>
                <Cell id="576">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4918857122"/>
                    <PropertyData symbol-ref="d" value="84.99414042"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9688134679"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09682787684"/>
                    <PropertyData symbol-ref="d_normal" value="0.8436085756"/>
                    <Center>69.90322581,20.67741935,0</Center>
                    <Nodes>70, 18, 0;71, 18, 0;73, 18, 0;70, 19, 0;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0</Nodes>
                </Cell>
                <Cell id="578">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4741895105"/>
                    <PropertyData symbol-ref="d" value="74.52256894"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8990791277"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08987037452"/>
                    <PropertyData symbol-ref="d_normal" value="0.718703428"/>
                    <Center>141,37.71875,0</Center>
                    <Nodes>140, 35, 0;141, 35, 0;142, 35, 0;139, 36, 0;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0</Nodes>
                </Cell>
                <Cell id="580">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.482295768"/>
                    <PropertyData symbol-ref="d" value="77.79411149"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9278232557"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0927641686"/>
                    <PropertyData symbol-ref="d_normal" value="0.7553723364"/>
                    <Center>77.9375,174.625,0</Center>
                    <Nodes>78, 172, 0;79, 172, 0;80, 172, 0;76, 173, 0;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0</Nodes>
                </Cell>
                <Cell id="582">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3530605535"/>
                    <PropertyData symbol-ref="d" value="53.75532946"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4155500324"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04105760967"/>
                    <PropertyData symbol-ref="d_normal" value="0.4658931843"/>
                    <Center>47.87096774,87.16129032,0</Center>
                    <Nodes>45, 85, 0;46, 85, 0;47, 85, 0;48, 85, 0;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0</Nodes>
                </Cell>
                <Cell id="586">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4750157799"/>
                    <PropertyData symbol-ref="d" value="74.73056421"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8999623985"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09005664252"/>
                    <PropertyData symbol-ref="d_normal" value="0.7196806853"/>
                    <Center>130.78125,32,0</Center>
                    <Nodes>128, 29, 0;129, 29, 0;130, 29, 0;129, 30, 0;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0</Nodes>
                </Cell>
                <Cell id="590">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4258905041"/>
                    <PropertyData symbol-ref="d" value="63.35882591"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6901899876"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06899468985"/>
                    <PropertyData symbol-ref="d_normal" value="0.5801007658"/>
                    <Center>162.7941176,105.3529412,0</Center>
                    <Nodes>163, 103, 0;164, 103, 0;165, 103, 0;166, 103, 0;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0</Nodes>
                </Cell>
                <Cell id="593">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4849427258"/>
                    <PropertyData symbol-ref="d" value="79.46253109"/>
                    <PropertyData symbol-ref="GSH_local" value="0.938307379"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09399596732"/>
                    <PropertyData symbol-ref="d_normal" value="0.7721913262"/>
                    <Center>63.59375,170.53125,0</Center>
                    <Nodes>63, 167, 0;62, 168, 0;63, 168, 0;64, 168, 0;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0</Nodes>
                </Cell>
                <Cell id="595">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2545119751"/>
                    <PropertyData symbol-ref="d" value="23.59132852"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01950969251"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001892323356"/>
                    <PropertyData symbol-ref="d_normal" value="0.1082858633"/>
                    <Center>103.0625,76.53125,0</Center>
                    <Nodes>104, 73, 0;103, 74, 0;104, 74, 0;105, 74, 0;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0</Nodes>
                </Cell>
                <Cell id="601">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2521218275"/>
                    <PropertyData symbol-ref="d" value="16.70776508"/>
                    <PropertyData symbol-ref="GSH_local" value="0.008251944196"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0008451702481"/>
                    <PropertyData symbol-ref="d_normal" value="0.02109797337"/>
                    <Center>109.8,86.46666667,0</Center>
                    <Nodes>108, 84, 0;110, 84, 0;111, 84, 0;107, 85, 0;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0</Nodes>
                </Cell>
                <Cell id="604">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2778142267"/>
                    <PropertyData symbol-ref="d" value="39.30062199"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1087536761"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01094579682"/>
                    <PropertyData symbol-ref="d_normal" value="0.2896464626"/>
                    <Center>98.53125,138.8125,0</Center>
                    <Nodes>99, 135, 0;100, 135, 0;99, 136, 0;100, 136, 0;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0</Nodes>
                </Cell>
                <Cell id="608">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4920980454"/>
                    <PropertyData symbol-ref="d" value="84.78039207"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9681718646"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09681718646"/>
                    <PropertyData symbol-ref="d_normal" value="0.8415058957"/>
                    <Center>18.96875,75.40625,0</Center>
                    <Nodes>18, 72, 0;17, 73, 0;18, 73, 0;19, 73, 0;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0</Nodes>
                </Cell>
                <Cell id="609">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3356691787"/>
                    <PropertyData symbol-ref="d" value="50.82459481"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3404810478"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03400828249"/>
                    <PropertyData symbol-ref="d_normal" value="0.4338848755"/>
                    <Center>146.8709677,80,0</Center>
                    <Nodes>145, 76, 0;145, 77, 0;146, 77, 0;147, 77, 0;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0</Nodes>
                </Cell>
                <Cell id="610">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2516871027"/>
                    <PropertyData symbol-ref="d" value="15.29335073"/>
                    <PropertyData symbol-ref="GSH_local" value="0.006871694523"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0006847111623"/>
                    <PropertyData symbol-ref="d_normal" value="0.002655086566"/>
                    <Center>113.6451613,93.38709677,0</Center>
                    <Nodes>111, 89, 0;110, 90, 0;111, 90, 0;112, 90, 0;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0</Nodes>
                </Cell>
                <Cell id="613">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2751135055"/>
                    <PropertyData symbol-ref="d" value="38.08054611"/>
                    <PropertyData symbol-ref="GSH_local" value="0.09793550022"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01001487575"/>
                    <PropertyData symbol-ref="d_normal" value="0.2779623076"/>
                    <Center>94.21875,62.34375,0</Center>
                    <Nodes>92, 59, 0;91, 60, 0;92, 60, 0;93, 60, 0;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0</Nodes>
                </Cell>
                <Cell id="616">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4946646441"/>
                    <PropertyData symbol-ref="d" value="88.0748192"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9789824566"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09790874345"/>
                    <PropertyData symbol-ref="d_normal" value="0.8841156233"/>
                    <Center>143.2903226,176.7419355,0</Center>
                    <Nodes>141, 174, 0;142, 174, 0;143, 174, 0;144, 174, 0;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0</Nodes>
                </Cell>
                <Cell id="617">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2521692599"/>
                    <PropertyData symbol-ref="d" value="16.98557875"/>
                    <PropertyData symbol-ref="GSH_local" value="0.008528251013"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0008573772076"/>
                    <PropertyData symbol-ref="d_normal" value="0.02441938466"/>
                    <Center>84.58064516,107.1612903,0</Center>
                    <Nodes>85, 104, 0;82, 105, 0;83, 105, 0;84, 105, 0;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0</Nodes>
                </Cell>
                <Cell id="625">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4685111523"/>
                    <PropertyData symbol-ref="d" value="72.29228021"/>
                    <PropertyData symbol-ref="GSH_local" value="0.866094583"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08749575787"/>
                    <PropertyData symbol-ref="d_normal" value="0.6866860414"/>
                    <Center>170.15625,117.4375,0</Center>
                    <Nodes>170, 114, 0;169, 115, 0;170, 115, 0;171, 115, 0;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0</Nodes>
                </Cell>
                <Cell id="629">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4849893429"/>
                    <PropertyData symbol-ref="d" value="79.481437"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9394889722"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09412442564"/>
                    <PropertyData symbol-ref="d_normal" value="0.7742510455"/>
                    <Center>134.84375,28.6875,0</Center>
                    <Nodes>133, 26, 0;134, 26, 0;135, 26, 0;136, 26, 0;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0</Nodes>
                </Cell>
                <Cell id="638">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3449016692"/>
                    <PropertyData symbol-ref="d" value="52.46722377"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3763050018"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03777241897"/>
                    <PropertyData symbol-ref="d_normal" value="0.4494738526"/>
                    <Center>110.2580645,151.7741935,0</Center>
                    <Nodes>108, 150, 0;109, 150, 0;110, 150, 0;111, 150, 0;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0</Nodes>
                </Cell>
                <Cell id="640">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4480636009"/>
                    <PropertyData symbol-ref="d" value="67.81576893"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7975088091"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07905963059"/>
                    <PropertyData symbol-ref="d_normal" value="0.6370796496"/>
                    <Center>162.0322581,127.2903226,0</Center>
                    <Nodes>163, 124, 0;162, 125, 0;163, 125, 0;164, 125, 0;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0</Nodes>
                </Cell>
                <Cell id="642">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4937468678"/>
                    <PropertyData symbol-ref="d" value="86.80056963"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9753491536"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09753848874"/>
                    <PropertyData symbol-ref="d_normal" value="0.8677984278"/>
                    <Center>155.5483871,166.8064516,0</Center>
                    <Nodes>154, 164, 0;155, 164, 0;156, 164, 0;153, 165, 0;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0</Nodes>
                </Cell>
                <Cell id="643">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.303623318"/>
                    <PropertyData symbol-ref="d" value="46.01859528"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2176694003"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02157915346"/>
                    <PropertyData symbol-ref="d_normal" value="0.3720699987"/>
                    <Center>144.78125,110.90625,0</Center>
                    <Nodes>143, 108, 0;144, 108, 0;145, 108, 0;146, 108, 0;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0</Nodes>
                </Cell>
                <Cell id="647">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4098731895"/>
                    <PropertyData symbol-ref="d" value="61.02840175"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6385487545"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06318566648"/>
                    <PropertyData symbol-ref="d_normal" value="0.5569070865"/>
                    <Center>114.03125,40.6875,0</Center>
                    <Nodes>113, 38, 0;114, 38, 0;115, 38, 0;112, 39, 0;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0</Nodes>
                </Cell>
                <Cell id="650">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4691293781"/>
                    <PropertyData symbol-ref="d" value="72.93193935"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8786016695"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08788035998"/>
                    <PropertyData symbol-ref="d_normal" value="0.6979254505"/>
                    <Center>33.78787879,68.84848485,0</Center>
                    <Nodes>34, 66, 0;35, 66, 0;36, 66, 0;37, 66, 0;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0</Nodes>
                </Cell>
                <Cell id="651">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3312747393"/>
                    <PropertyData symbol-ref="d" value="50.27055705"/>
                    <PropertyData symbol-ref="GSH_local" value="0.321129233"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03221855829"/>
                    <PropertyData symbol-ref="d_normal" value="0.4251412856"/>
                    <Center>138.53125,132.3125,0</Center>
                    <Nodes>138, 129, 0;139, 129, 0;140, 129, 0;137, 130, 0;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0</Nodes>
                </Cell>
                <Cell id="653">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4393648939"/>
                    <PropertyData symbol-ref="d" value="66.12404387"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7556069914"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07597754808"/>
                    <PropertyData symbol-ref="d_normal" value="0.6128743768"/>
                    <Center>164.40625,115.15625,0</Center>
                    <Nodes>165, 111, 0;165, 112, 0;166, 112, 0;164, 113, 0;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0</Nodes>
                </Cell>
                <Cell id="654">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.254883409"/>
                    <PropertyData symbol-ref="d" value="23.99709486"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01873231198"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001867506937"/>
                    <PropertyData symbol-ref="d_normal" value="0.1041404651"/>
                    <Center>107.90625,77.6875,0</Center>
                    <Nodes>108, 74, 0;109, 74, 0;110, 74, 0;107, 75, 0;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0</Nodes>
                </Cell>
                <Cell id="656">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3167120265"/>
                    <PropertyData symbol-ref="d" value="48.49238199"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2734731148"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02759325219"/>
                    <PropertyData symbol-ref="d_normal" value="0.4022927828"/>
                    <Center>111.1875,147.28125,0</Center>
                    <Nodes>110, 145, 0;111, 145, 0;114, 145, 0;109, 146, 0;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0</Nodes>
                </Cell>
                <Cell id="662">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2600732634"/>
                    <PropertyData symbol-ref="d" value="30.23233601"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04109013354"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.004002375047"/>
                    <PropertyData symbol-ref="d_normal" value="0.1849970949"/>
                    <Center>75.09677419,82.64516129,0</Center>
                    <Nodes>74, 79, 0;75, 79, 0;74, 80, 0;75, 80, 0;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0</Nodes>
                </Cell>
                <Cell id="663">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3941947035"/>
                    <PropertyData symbol-ref="d" value="59.10107922"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5723594991"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05686820704"/>
                    <PropertyData symbol-ref="d_normal" value="0.5291484398"/>
                    <Center>96.19354839,158.8387097,0</Center>
                    <Nodes>97, 155, 0;98, 155, 0;95, 156, 0;97, 156, 0;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0</Nodes>
                </Cell>
                <Cell id="666">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.368650927"/>
                    <PropertyData symbol-ref="d" value="55.44852624"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4678834099"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04707588409"/>
                    <PropertyData symbol-ref="d_normal" value="0.4871356521"/>
                    <Center>142.8387097,135.483871,0</Center>
                    <Nodes>142, 133, 0;143, 133, 0;144, 133, 0;145, 133, 0;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0</Nodes>
                </Cell>
                <Cell id="670">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2563516126"/>
                    <PropertyData symbol-ref="d" value="26.50107492"/>
                    <PropertyData symbol-ref="GSH_local" value="0.0262287863"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.002639231471"/>
                    <PropertyData symbol-ref="d_normal" value="0.1385681139"/>
                    <Center>111.78125,123.6875,0</Center>
                    <Nodes>114, 120, 0;112, 121, 0;113, 121, 0;114, 121, 0;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0</Nodes>
                </Cell>
                <Cell id="673">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2592452157"/>
                    <PropertyData symbol-ref="d" value="29.41178454"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03723945997"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003629920633"/>
                    <PropertyData symbol-ref="d_normal" value="0.1747564231"/>
                    <Center>128.9677419,104.8387097,0</Center>
                    <Nodes>129, 102, 0;126, 103, 0;128, 103, 0;129, 103, 0;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0</Nodes>
                </Cell>
                <Cell id="676">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4675067025"/>
                    <PropertyData symbol-ref="d" value="71.98318251"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8668982502"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0870220896"/>
                    <PropertyData symbol-ref="d_normal" value="0.687380774"/>
                    <Center>29.75,83.34375,0</Center>
                    <Nodes>29, 80, 0;30, 80, 0;29, 81, 0;30, 81, 0;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0</Nodes>
                </Cell>
                <Cell id="679">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4250782716"/>
                    <PropertyData symbol-ref="d" value="63.74590214"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7071882686"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07016729893"/>
                    <PropertyData symbol-ref="d_normal" value="0.5881767075"/>
                    <Center>57.84375,147.625,0</Center>
                    <Nodes>57, 144, 0;58, 144, 0;56, 145, 0;57, 145, 0;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0</Nodes>
                </Cell>
                <Cell id="681">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4876563068"/>
                    <PropertyData symbol-ref="d" value="81.02138051"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9499475383"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09493603706"/>
                    <PropertyData symbol-ref="d_normal" value="0.7943335071"/>
                    <Center>179.71875,85.9375,0</Center>
                    <Nodes>179, 83, 0;180, 83, 0;179, 84, 0;180, 84, 0;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0</Nodes>
                </Cell>
                <Cell id="684">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4678929914"/>
                    <PropertyData symbol-ref="d" value="72.31724001"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8719711731"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08700787162"/>
                    <PropertyData symbol-ref="d_normal" value="0.6918500916"/>
                    <Center>129.9393939,165.6969697,0</Center>
                    <Nodes>128, 163, 0;129, 163, 0;130, 163, 0;131, 163, 0;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0</Nodes>
                </Cell>
                <Cell id="685">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2957771349"/>
                    <PropertyData symbol-ref="d" value="44.01515934"/>
                    <PropertyData symbol-ref="GSH_local" value="0.185337167"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01862059966"/>
                    <PropertyData symbol-ref="d_normal" value="0.3519402365"/>
                    <Center>143.7096774,97.93548387,0</Center>
                    <Nodes>142, 95, 0;143, 95, 0;142, 96, 0;143, 96, 0;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0</Nodes>
                </Cell>
                <Cell id="686">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4870455751"/>
                    <PropertyData symbol-ref="d" value="80.83935253"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9501557744"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09496876075"/>
                    <PropertyData symbol-ref="d_normal" value="0.7947723291"/>
                    <Center>160.84375,153,0</Center>
                    <Nodes>161, 150, 0;162, 150, 0;158, 151, 0;159, 151, 0;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0</Nodes>
                </Cell>
                <Cell id="689">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3985657585"/>
                    <PropertyData symbol-ref="d" value="60.08098939"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6052607707"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06030410746"/>
                    <PropertyData symbol-ref="d_normal" value="0.5427434023"/>
                    <Center>41.64516129,86.06451613,0</Center>
                    <Nodes>41, 83, 0;42, 83, 0;40, 84, 0;41, 84, 0;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0</Nodes>
                </Cell>
                <Cell id="698">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4932868292"/>
                    <PropertyData symbol-ref="d" value="86.38755449"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9731938848"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09731894586"/>
                    <PropertyData symbol-ref="d_normal" value="0.8591953288"/>
                    <Center>76.96875,16.625,0</Center>
                    <Nodes>76, 14, 0;77, 14, 0;78, 14, 0;79, 14, 0;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0</Nodes>
                </Cell>
                <Cell id="701">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4626038711"/>
                    <PropertyData symbol-ref="d" value="70.94255418"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8518354528"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08506601897"/>
                    <PropertyData symbol-ref="d_normal" value="0.6749069916"/>
                    <Center>70.38709677,164.6774194,0</Center>
                    <Nodes>72, 161, 0;74, 161, 0;70, 162, 0;71, 162, 0;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0</Nodes>
                </Cell>
                <Cell id="703">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2887084675"/>
                    <PropertyData symbol-ref="d" value="42.7196546"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1596746202"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01593599499"/>
                    <PropertyData symbol-ref="d_normal" value="0.3339348947"/>
                    <Center>69.15625,70.25,0</Center>
                    <Nodes>69, 67, 0;70, 67, 0;71, 67, 0;68, 68, 0;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0</Nodes>
                </Cell>
                <Cell id="708">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2999561183"/>
                    <PropertyData symbol-ref="d" value="45.07671805"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2037257027"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02024508497"/>
                    <PropertyData symbol-ref="d_normal" value="0.3636830773"/>
                    <Center>60.35483871,78.5483871,0</Center>
                    <Nodes>59, 76, 0;60, 76, 0;61, 76, 0;58, 77, 0;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0</Nodes>
                </Cell>
                <Cell id="709">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4957869303"/>
                    <PropertyData symbol-ref="d" value="89.92664949"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9824483382"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09829221094"/>
                    <PropertyData symbol-ref="d_normal" value="0.9024899127"/>
                    <Center>148.78125,175.625,0</Center>
                    <Nodes>147, 173, 0;148, 173, 0;151, 173, 0;146, 174, 0;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0</Nodes>
                </Cell>
                <Cell id="714">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4909603689"/>
                    <PropertyData symbol-ref="d" value="83.48858864"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9632785591"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09636532739"/>
                    <PropertyData symbol-ref="d_normal" value="0.8266981826"/>
                    <Center>136.8181818,174.9090909,0</Center>
                    <Nodes>138, 172, 0;139, 172, 0;136, 173, 0;137, 173, 0;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0</Nodes>
                </Cell>
                <Cell id="715">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2551315663"/>
                    <PropertyData symbol-ref="d" value="24.31079119"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01973380791"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.00198005534"/>
                    <PropertyData symbol-ref="d_normal" value="0.1094509143"/>
                    <Center>92.51515152,123.0909091,0</Center>
                    <Nodes>90, 119, 0;91, 119, 0;91, 120, 0;91, 121, 0;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0</Nodes>
                </Cell>
                <Cell id="720">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2534606428"/>
                    <PropertyData symbol-ref="d" value="21.09080998"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01402242063"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001433515496"/>
                    <PropertyData symbol-ref="d_normal" value="0.07470239071"/>
                    <Center>120.125,107.0625,0</Center>
                    <Nodes>120, 104, 0;119, 105, 0;120, 105, 0;121, 105, 0;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0</Nodes>
                </Cell>
                <Cell id="722">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3048691303"/>
                    <PropertyData symbol-ref="d" value="45.86197022"/>
                    <PropertyData symbol-ref="GSH_local" value="0.216619461"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02193264622"/>
                    <PropertyData symbol-ref="d_normal" value="0.3714523599"/>
                    <Center>55.36363636,110.3939394,0</Center>
                    <Nodes>55, 107, 0;55, 108, 0;56, 108, 0;57, 108, 0;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0</Nodes>
                </Cell>
                <Cell id="723">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.435188857"/>
                    <PropertyData symbol-ref="d" value="65.17824119"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7415114281"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07421867222"/>
                    <PropertyData symbol-ref="d_normal" value="0.605383909"/>
                    <Center>37.03030303,82.54545455,0</Center>
                    <Nodes>35, 80, 0;36, 80, 0;37, 80, 0;38, 80, 0;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0</Nodes>
                </Cell>
                <Cell id="724">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2586678229"/>
                    <PropertyData symbol-ref="d" value="29.18263142"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03500787299"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003514599784"/>
                    <PropertyData symbol-ref="d_normal" value="0.1683453036"/>
                    <Center>123.65625,83.1875,0</Center>
                    <Nodes>123, 80, 0;124, 80, 0;125, 80, 0;122, 81, 0;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0</Nodes>
                </Cell>
                <Cell id="726">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2987878355"/>
                    <PropertyData symbol-ref="d" value="44.79390741"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1943411846"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01950260121"/>
                    <PropertyData symbol-ref="d_normal" value="0.3577954951"/>
                    <Center>95.06451613,144.6129032,0</Center>
                    <Nodes>95, 141, 0;94, 142, 0;95, 142, 0;96, 142, 0;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0</Nodes>
                </Cell>
                <Cell id="727">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4462042142"/>
                    <PropertyData symbol-ref="d" value="67.41601401"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7839505532"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0784427287"/>
                    <PropertyData symbol-ref="d_normal" value="0.6288838647"/>
                    <Center>114.1875,165.90625,0</Center>
                    <Nodes>114, 163, 0;115, 163, 0;113, 164, 0;114, 164, 0;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0</Nodes>
                </Cell>
                <Cell id="730">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4918816168"/>
                    <PropertyData symbol-ref="d" value="84.36459427"/>
                    <PropertyData symbol-ref="GSH_local" value="0.966707697"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09672180201"/>
                    <PropertyData symbol-ref="d_normal" value="0.8368569941"/>
                    <Center>133.625,22.59375,0</Center>
                    <Nodes>132, 19, 0;132, 20, 0;133, 20, 0;134, 20, 0;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0</Nodes>
                </Cell>
                <Cell id="734">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4938828816"/>
                    <PropertyData symbol-ref="d" value="87.39009364"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9764372406"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09756953533"/>
                    <PropertyData symbol-ref="d_normal" value="0.8724243003"/>
                    <Center>37.34375,161,0</Center>
                    <Nodes>39, 158, 0;34, 159, 0;35, 159, 0;36, 159, 0;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0</Nodes>
                </Cell>
                <Cell id="735">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3227056686"/>
                    <PropertyData symbol-ref="d" value="49.27782311"/>
                    <PropertyData symbol-ref="GSH_local" value="0.294808056"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02950292224"/>
                    <PropertyData symbol-ref="d_normal" value="0.412785446"/>
                    <Center>93.87878788,51,0</Center>
                    <Nodes>93, 47, 0;94, 47, 0;95, 47, 0;93, 48, 0;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0</Nodes>
                </Cell>
                <Cell id="736">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4211636451"/>
                    <PropertyData symbol-ref="d" value="63.2884178"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6921995079"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06929518813"/>
                    <PropertyData symbol-ref="d_normal" value="0.58104224"/>
                    <Center>102.96875,163.0625,0</Center>
                    <Nodes>105, 160, 0;102, 161, 0;103, 161, 0;104, 161, 0;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0</Nodes>
                </Cell>
                <Cell id="737">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4652208896"/>
                    <PropertyData symbol-ref="d" value="71.63813385"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8642277003"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08623872478"/>
                    <PropertyData symbol-ref="d_normal" value="0.6850857061"/>
                    <Center>119.4333333,31,0</Center>
                    <Nodes>121, 28, 0;122, 28, 0;119, 29, 0;120, 29, 0;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0</Nodes>
                </Cell>
                <Cell id="739">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4579644025"/>
                    <PropertyData symbol-ref="d" value="69.75502852"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8298544248"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08313747766"/>
                    <PropertyData symbol-ref="d_normal" value="0.6584595898"/>
                    <Center>168.7575758,111.4848485,0</Center>
                    <Nodes>166, 109, 0;167, 109, 0;169, 109, 0;170, 109, 0;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0</Nodes>
                </Cell>
                <Cell id="742">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4469601164"/>
                    <PropertyData symbol-ref="d" value="67.295959"/>
                    <PropertyData symbol-ref="GSH_local" value="0.792445369"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07898912636"/>
                    <PropertyData symbol-ref="d_normal" value="0.6339728982"/>
                    <Center>97.66666667,32.87878788,0</Center>
                    <Nodes>98, 29, 0;99, 29, 0;100, 29, 0;98, 30, 0;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0</Nodes>
                </Cell>
                <Cell id="745">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.379815741"/>
                    <PropertyData symbol-ref="d" value="57.40218119"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5236070572"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05210850263"/>
                    <PropertyData symbol-ref="d_normal" value="0.5094498488"/>
                    <Center>136.8709677,143.8387097,0</Center>
                    <Nodes>135, 141, 0;135, 142, 0;136, 142, 0;137, 142, 0;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0</Nodes>
                </Cell>
                <Cell id="751">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4410372183"/>
                    <PropertyData symbol-ref="d" value="66.01901943"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7594434209"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07649275425"/>
                    <PropertyData symbol-ref="d_normal" value="0.6149630506"/>
                    <Center>80.125,162.9375,0</Center>
                    <Nodes>81, 160, 0;79, 161, 0;80, 161, 0;81, 161, 0;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0</Nodes>
                </Cell>
                <Cell id="753">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4484825209"/>
                    <PropertyData symbol-ref="d" value="67.78728275"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7961227206"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07961227206"/>
                    <PropertyData symbol-ref="d_normal" value="0.6362235104"/>
                    <Center>67.09375,159.375,0</Center>
                    <Nodes>65, 157, 0;66, 157, 0;67, 157, 0;68, 157, 0;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0</Nodes>
                </Cell>
                <Cell id="754">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4268182199"/>
                    <PropertyData symbol-ref="d" value="63.46691003"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6970093225"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06994562193"/>
                    <PropertyData symbol-ref="d_normal" value="0.5833096748"/>
                    <Center>118.1,160.8666667,0</Center>
                    <Nodes>118, 158, 0;119, 158, 0;117, 159, 0;118, 159, 0;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0</Nodes>
                </Cell>
                <Cell id="755">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2684488831"/>
                    <PropertyData symbol-ref="d" value="35.45454545"/>
                    <PropertyData symbol-ref="GSH_local" value="0.07290864907"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.007354208274"/>
                    <PropertyData symbol-ref="d_normal" value="0.245715517"/>
                    <Center>78.8,128.4666667,0</Center>
                    <Nodes>77, 126, 0;78, 126, 0;80, 126, 0;81, 126, 0;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0</Nodes>
                </Cell>
                <Cell id="758">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3114296666"/>
                    <PropertyData symbol-ref="d" value="46.71984607"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2483802586"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02483802586"/>
                    <PropertyData symbol-ref="d_normal" value="0.389273034"/>
                    <Center>146.46875,105.125,0</Center>
                    <Nodes>148, 102, 0;147, 103, 0;148, 103, 0;149, 103, 0;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0</Nodes>
                </Cell>
                <Cell id="759">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4906364561"/>
                    <PropertyData symbol-ref="d" value="83.58412912"/>
                    <PropertyData symbol-ref="GSH_local" value="0.962506856"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09628435737"/>
                    <PropertyData symbol-ref="d_normal" value="0.8245383099"/>
                    <Center>143.25,28.4375,0</Center>
                    <Nodes>141, 26, 0;142, 26, 0;143, 26, 0;146, 26, 0;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0</Nodes>
                </Cell>
                <Cell id="768">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3468711798"/>
                    <PropertyData symbol-ref="d" value="52.48148855"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3882289581"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03847169108"/>
                    <PropertyData symbol-ref="d_normal" value="0.4545237166"/>
                    <Center>152.4375,101.21875,0</Center>
                    <Nodes>152, 97, 0;151, 98, 0;152, 98, 0;153, 98, 0;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0</Nodes>
                </Cell>
                <Cell id="771">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4531148003"/>
                    <PropertyData symbol-ref="d" value="68.76902631"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8159042581"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08142999337"/>
                    <PropertyData symbol-ref="d_normal" value="0.6488841059"/>
                    <Center>103.7666667,168.5333333,0</Center>
                    <Nodes>103, 166, 0;104, 166, 0;105, 166, 0;101, 167, 0;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0</Nodes>
                </Cell>
                <Cell id="773">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2521009452"/>
                    <PropertyData symbol-ref="d" value="16.86556449"/>
                    <PropertyData symbol-ref="GSH_local" value="0.008205624925"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0008256967517"/>
                    <PropertyData symbol-ref="d_normal" value="0.02053040829"/>
                    <Center>94.67741935,84.03225806,0</Center>
                    <Nodes>92, 82, 0;93, 82, 0;94, 82, 0;95, 82, 0;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0</Nodes>
                </Cell>
                <Cell id="776">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4831754964"/>
                    <PropertyData symbol-ref="d" value="78.05587567"/>
                    <PropertyData symbol-ref="GSH_local" value="0.930772585"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09315545756"/>
                    <PropertyData symbol-ref="d_normal" value="0.7598618023"/>
                    <Center>65.71875,29.875,0</Center>
                    <Nodes>63, 27, 0;64, 27, 0;65, 27, 0;63, 28, 0;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0</Nodes>
                </Cell>
                <Cell id="777">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4782124909"/>
                    <PropertyData symbol-ref="d" value="76.1115354"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9129650082"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0912287434"/>
                    <PropertyData symbol-ref="d_normal" value="0.7350387311"/>
                    <Center>122.516129,172.7741935,0</Center>
                    <Nodes>124, 170, 0;125, 170, 0;121, 171, 0;122, 171, 0;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0</Nodes>
                </Cell>
                <Cell id="778">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3479885682"/>
                    <PropertyData symbol-ref="d" value="53.00354375"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4029252165"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03916637909"/>
                    <PropertyData symbol-ref="d_normal" value="0.4606708607"/>
                    <Center>99.4516129,152.6129032,0</Center>
                    <Nodes>99, 149, 0;97, 150, 0;98, 150, 0;99, 150, 0;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0</Nodes>
                </Cell>
                <Cell id="779">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3828731734"/>
                    <PropertyData symbol-ref="d" value="57.75571536"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5325187342"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05339567157"/>
                    <PropertyData symbol-ref="d_normal" value="0.5130258804"/>
                    <Center>42.61764706,100.4705882,0</Center>
                    <Nodes>44, 96, 0;45, 96, 0;43, 97, 0;43, 98, 0;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0</Nodes>
                </Cell>
                <Cell id="780">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2641110726"/>
                    <PropertyData symbol-ref="d" value="32.91801487"/>
                    <PropertyData symbol-ref="GSH_local" value="0.05578769151"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.00563431129"/>
                    <PropertyData symbol-ref="d_normal" value="0.2171202219"/>
                    <Center>95.17241379,67.51724138,0</Center>
                    <Nodes>92, 65, 0;93, 65, 0;93, 66, 0;95, 66, 0;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0</Nodes>
                </Cell>
                <Cell id="781">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4772517674"/>
                    <PropertyData symbol-ref="d" value="75.82756022"/>
                    <PropertyData symbol-ref="GSH_local" value="0.910791458"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0909419425"/>
                    <PropertyData symbol-ref="d_normal" value="0.7323337158"/>
                    <Center>112.1290323,174.7096774,0</Center>
                    <Nodes>112, 172, 0;113, 172, 0;114, 172, 0;111, 173, 0;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0</Nodes>
                </Cell>
                <Cell id="783">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3465556157"/>
                    <PropertyData symbol-ref="d" value="52.56808271"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3867785238"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03888405203"/>
                    <PropertyData symbol-ref="d_normal" value="0.453912607"/>
                    <Center>89.21875,48.375,0</Center>
                    <Nodes>87, 46, 0;88, 46, 0;89, 46, 0;90, 46, 0;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0</Nodes>
                </Cell>
                <Cell id="784">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4842439173"/>
                    <PropertyData symbol-ref="d" value="78.90256179"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9370811294"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09372750338"/>
                    <PropertyData symbol-ref="d_normal" value="0.7700923734"/>
                    <Center>175.625,77.78125,0</Center>
                    <Nodes>175, 75, 0;176, 75, 0;177, 75, 0;174, 76, 0;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0</Nodes>
                </Cell>
                <Cell id="785">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4942049164"/>
                    <PropertyData symbol-ref="d" value="87.69697138"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9774844711"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09769822747"/>
                    <PropertyData symbol-ref="d_normal" value="0.8770777159"/>
                    <Center>186.6176471,111.7058824,0</Center>
                    <Nodes>188, 109, 0;183, 110, 0;184, 110, 0;185, 110, 0;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0</Nodes>
                </Cell>
                <Cell id="787">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.412647019"/>
                    <PropertyData symbol-ref="d" value="61.76367918"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6543247801"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0654173234"/>
                    <PropertyData symbol-ref="d_normal" value="0.563810417"/>
                    <Center>40.71875,117.53125,0</Center>
                    <Nodes>38, 115, 0;39, 115, 0;40, 115, 0;42, 115, 0;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0</Nodes>
                </Cell>
                <Cell id="788">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3017042731"/>
                    <PropertyData symbol-ref="d" value="45.00701761"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2062390729"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02037182435"/>
                    <PropertyData symbol-ref="d_normal" value="0.3652253728"/>
                    <Center>85.90322581,142.7741935,0</Center>
                    <Nodes>86, 140, 0;84, 141, 0;85, 141, 0;86, 141, 0;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0</Nodes>
                </Cell>
                <Cell id="789">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2578390913"/>
                    <PropertyData symbol-ref="d" value="27.87569153"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03010455316"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003016410755"/>
                    <PropertyData symbol-ref="d_normal" value="0.1527488149"/>
                    <Center>84.93548387,76.4516129,0</Center>
                    <Nodes>85, 73, 0;85, 74, 0;86, 74, 0;87, 74, 0;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0</Nodes>
                </Cell>
                <Cell id="790">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2894455919"/>
                    <PropertyData symbol-ref="d" value="42.38440771"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1580390907"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01562528054"/>
                    <PropertyData symbol-ref="d_normal" value="0.3327108825"/>
                    <Center>76.46875,64.8125,0</Center>
                    <Nodes>78, 62, 0;73, 63, 0;74, 63, 0;75, 63, 0;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0</Nodes>
                </Cell>
                <Cell id="792">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.395065087"/>
                    <PropertyData symbol-ref="d" value="59.06567889"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5793300692"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05796677867"/>
                    <PropertyData symbol-ref="d_normal" value="0.5320023869"/>
                    <Center>53.25,136.125,0</Center>
                    <Nodes>53, 132, 0;51, 133, 0;52, 133, 0;53, 133, 0;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0</Nodes>
                </Cell>
                <Cell id="795">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2687092661"/>
                    <PropertyData symbol-ref="d" value="35.62118949"/>
                    <PropertyData symbol-ref="GSH_local" value="0.07532650095"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.007600848353"/>
                    <PropertyData symbol-ref="d_normal" value="0.249239131"/>
                    <Center>74.63333333,75.26666667,0</Center>
                    <Nodes>76, 73, 0;78, 73, 0;71, 74, 0;72, 74, 0;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0</Nodes>
                </Cell>
                <Cell id="796">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3866117811"/>
                    <PropertyData symbol-ref="d" value="58.48539222"/>
                    <PropertyData symbol-ref="GSH_local" value="0.556104396"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05476385515"/>
                    <PropertyData symbol-ref="d_normal" value="0.522536663"/>
                    <Center>73.64516129,152.3548387,0</Center>
                    <Nodes>74, 149, 0;72, 150, 0;73, 150, 0;74, 150, 0;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0</Nodes>
                </Cell>
                <Cell id="797">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4491800539"/>
                    <PropertyData symbol-ref="d" value="67.75724097"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7969932415"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07967907944"/>
                    <PropertyData symbol-ref="d_normal" value="0.6367606927"/>
                    <Center>149.3666667,146.2666667,0</Center>
                    <Nodes>149, 144, 0;150, 144, 0;151, 144, 0;152, 144, 0;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0</Nodes>
                </Cell>
                <Cell id="801">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3005825492"/>
                    <PropertyData symbol-ref="d" value="45.05944424"/>
                    <PropertyData symbol-ref="GSH_local" value="0.199640199"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01958208648"/>
                    <PropertyData symbol-ref="d_normal" value="0.3611455364"/>
                    <Center>56.16129032,89.22580645,0</Center>
                    <Nodes>57, 86, 0;57, 87, 0;58, 87, 0;59, 87, 0;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0</Nodes>
                </Cell>
                <Cell id="802">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4678942692"/>
                    <PropertyData symbol-ref="d" value="72.41724957"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8726036958"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08705208986"/>
                    <PropertyData symbol-ref="d_normal" value="0.6924178762"/>
                    <Center>155.96875,146.09375,0</Center>
                    <Nodes>154, 143, 0;153, 144, 0;154, 144, 0;155, 144, 0;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0</Nodes>
                </Cell>
                <Cell id="805">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2624481841"/>
                    <PropertyData symbol-ref="d" value="31.71112901"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04861934378"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.004994450127"/>
                    <PropertyData symbol-ref="d_normal" value="0.202610722"/>
                    <Center>68.75,105.71875,0</Center>
                    <Nodes>67, 103, 0;68, 103, 0;69, 103, 0;66, 104, 0;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0</Nodes>
                </Cell>
                <Cell id="807">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2555660213"/>
                    <PropertyData symbol-ref="d" value="25.29569272"/>
                    <PropertyData symbol-ref="GSH_local" value="0.02266655378"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.002214390184"/>
                    <PropertyData symbol-ref="d_normal" value="0.1236062546"/>
                    <Center>80.0625,115.84375,0</Center>
                    <Nodes>80, 112, 0;79, 113, 0;80, 113, 0;81, 113, 0;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0</Nodes>
                </Cell>
                <Cell id="810">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4530680128"/>
                    <PropertyData symbol-ref="d" value="68.53015988"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8073738088"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08065946303"/>
                    <PropertyData symbol-ref="d_normal" value="0.6433035291"/>
                    <Center>37.93548387,70.93548387,0</Center>
                    <Nodes>37, 68, 0;38, 68, 0;39, 68, 0;36, 69, 0;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0</Nodes>
                </Cell>
                <Cell id="811">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4543492328"/>
                    <PropertyData symbol-ref="d" value="68.73460853"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8151526339"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08198723156"/>
                    <PropertyData symbol-ref="d_normal" value="0.648384494"/>
                    <Center>83.70967742,166.9354839,0</Center>
                    <Nodes>84, 164, 0;82, 165, 0;83, 165, 0;84, 165, 0;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0</Nodes>
                </Cell>
                <Cell id="812">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2609367143"/>
                    <PropertyData symbol-ref="d" value="31.119671"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04505873856"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.004550357279"/>
                    <PropertyData symbol-ref="d_normal" value="0.1946317108"/>
                    <Center>86.48387097,128,0</Center>
                    <Nodes>85, 125, 0;87, 125, 0;88, 125, 0;89, 125, 0;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0</Nodes>
                </Cell>
                <Cell id="815">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4919054595"/>
                    <PropertyData symbol-ref="d" value="84.35743729"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9665522641"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09661579875"/>
                    <PropertyData symbol-ref="d_normal" value="0.8363751273"/>
                    <Center>63.5483871,24.03225806,0</Center>
                    <Nodes>63, 22, 0;64, 22, 0;65, 22, 0;66, 22, 0;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0</Nodes>
                </Cell>
                <Cell id="816">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4902861562"/>
                    <PropertyData symbol-ref="d" value="83.26128396"/>
                    <PropertyData symbol-ref="GSH_local" value="0.960972867"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09618528567"/>
                    <PropertyData symbol-ref="d_normal" value="0.8203689053"/>
                    <Center>177.0909091,130.969697,0</Center>
                    <Nodes>176, 128, 0;177, 128, 0;178, 128, 0;174, 129, 0;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0</Nodes>
                </Cell>
                <Cell id="818">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2533883087"/>
                    <PropertyData symbol-ref="d" value="20.85476033"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01414235276"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001404585359"/>
                    <PropertyData symbol-ref="d_normal" value="0.07556620666"/>
                    <Center>108.4193548,119.1612903,0</Center>
                    <Nodes>108, 115, 0;107, 116, 0;108, 116, 0;109, 116, 0;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0</Nodes>
                </Cell>
                <Cell id="821">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2540043774"/>
                    <PropertyData symbol-ref="d" value="22.46732144"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01628864454"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001660484209"/>
                    <PropertyData symbol-ref="d_normal" value="0.08991356951"/>
                    <Center>77.75757576,99.57575758,0</Center>
                    <Nodes>77, 96, 0;76, 97, 0;77, 97, 0;78, 97, 0;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0</Nodes>
                </Cell>
                <Cell id="825">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.280524077"/>
                    <PropertyData symbol-ref="d" value="40.18532769"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1242421484"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01242421484"/>
                    <PropertyData symbol-ref="d_normal" value="0.3047142843"/>
                    <Center>63.25806452,116,0</Center>
                    <Nodes>62, 113, 0;61, 114, 0;62, 114, 0;63, 114, 0;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0</Nodes>
                </Cell>
                <Cell id="831">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4884902823"/>
                    <PropertyData symbol-ref="d" value="81.63517476"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9536539085"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09536539085"/>
                    <PropertyData symbol-ref="d_normal" value="0.8024163865"/>
                    <Center>121.2333333,178.6333333,0</Center>
                    <Nodes>120, 176, 0;121, 176, 0;122, 176, 0;123, 176, 0;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0</Nodes>
                </Cell>
                <Cell id="834">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4479906169"/>
                    <PropertyData symbol-ref="d" value="68.08655022"/>
                    <PropertyData symbol-ref="GSH_local" value="0.798751723"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07953471246"/>
                    <PropertyData symbol-ref="d_normal" value="0.6378510808"/>
                    <Center>125.3225806,36.80645161,0</Center>
                    <Nodes>127, 34, 0;128, 34, 0;124, 35, 0;125, 35, 0;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0</Nodes>
                </Cell>
                <Cell id="837">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3902068916"/>
                    <PropertyData symbol-ref="d" value="58.56666439"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5668399535"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05677682401"/>
                    <PropertyData symbol-ref="d_normal" value="0.5268969713"/>
                    <Center>153.90625,123.03125,0</Center>
                    <Nodes>155, 120, 0;151, 121, 0;154, 121, 0;155, 121, 0;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0</Nodes>
                </Cell>
                <Cell id="842">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2932153078"/>
                    <PropertyData symbol-ref="d" value="44.00611069"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1800007223"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01767487949"/>
                    <PropertyData symbol-ref="d_normal" value="0.3483657405"/>
                    <Center>100.7419355,143.8387097,0</Center>
                    <Nodes>102, 141, 0;98, 142, 0;99, 142, 0;100, 142, 0;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0</Nodes>
                </Cell>
                <Cell id="844">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3032914443"/>
                    <PropertyData symbol-ref="d" value="45.39316097"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2106287403"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02095141193"/>
                    <PropertyData symbol-ref="d_normal" value="0.3678860304"/>
                    <Center>57.32258065,115.516129,0</Center>
                    <Nodes>58, 112, 0;58, 113, 0;59, 113, 0;55, 114, 0;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0</Nodes>
                </Cell>
                <Cell id="845">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3422915757"/>
                    <PropertyData symbol-ref="d" value="52.24566713"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3738686411"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03722375912"/>
                    <PropertyData symbol-ref="d_normal" value="0.4484344321"/>
                    <Center>147.3030303,122.1818182,0</Center>
                    <Nodes>148, 119, 0;149, 119, 0;147, 120, 0;148, 120, 0;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0</Nodes>
                </Cell>
                <Cell id="846">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3234155634"/>
                    <PropertyData symbol-ref="d" value="49.48235688"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2996469228"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02999692965"/>
                    <PropertyData symbol-ref="d_normal" value="0.4151020254"/>
                    <Center>149.09375,94.9375,0</Center>
                    <Nodes>150, 92, 0;151, 92, 0;147, 93, 0;148, 93, 0;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0</Nodes>
                </Cell>
                <Cell id="847">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4790498155"/>
                    <PropertyData symbol-ref="d" value="76.08949409"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9137637433"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09142920087"/>
                    <PropertyData symbol-ref="d_normal" value="0.7360481351"/>
                    <Center>175.90625,105.15625,0</Center>
                    <Nodes>174, 102, 0;177, 102, 0;178, 102, 0;174, 103, 0;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0</Nodes>
                </Cell>
                <Cell id="857">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3107218133"/>
                    <PropertyData symbol-ref="d" value="47.00470426"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2439334464"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02409276013"/>
                    <PropertyData symbol-ref="d_normal" value="0.3868766021"/>
                    <Center>141.4137931,77.55172414,0</Center>
                    <Nodes>143, 75, 0;144, 75, 0;138, 76, 0;141, 76, 0;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0</Nodes>
                </Cell>
                <Cell id="860">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4934709104"/>
                    <PropertyData symbol-ref="d" value="86.71148841"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9740563189"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09738135153"/>
                    <PropertyData symbol-ref="d_normal" value="0.8625541047"/>
                    <Center>119.2903226,184.3870968,0</Center>
                    <Nodes>118, 181, 0;119, 181, 0;118, 182, 0;119, 182, 0;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0</Nodes>
                </Cell>
                <Cell id="862">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4024487876"/>
                    <PropertyData symbol-ref="d" value="59.88630178"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6063971242"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06076154367"/>
                    <PropertyData symbol-ref="d_normal" value="0.543219262"/>
                    <Center>142.9090909,57.87878788,0</Center>
                    <Nodes>141, 55, 0;142, 55, 0;143, 55, 0;144, 55, 0;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0</Nodes>
                </Cell>
                <Cell id="866">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4857417977"/>
                    <PropertyData symbol-ref="d" value="80.3606983"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9456497065"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09449325356"/>
                    <PropertyData symbol-ref="d_normal" value="0.7856422199"/>
                    <Center>131.28125,173.96875,0</Center>
                    <Nodes>131, 171, 0;132, 171, 0;133, 171, 0;130, 172, 0;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0</Nodes>
                </Cell>
                <Cell id="868">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2602830288"/>
                    <PropertyData symbol-ref="d" value="30.33732875"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04122932281"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.004072315278"/>
                    <PropertyData symbol-ref="d_normal" value="0.1853497803"/>
                    <Center>79.16666667,122.5,0</Center>
                    <Nodes>80, 119, 0;78, 120, 0;79, 120, 0;80, 120, 0;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0</Nodes>
                </Cell>
                <Cell id="870">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.332498891"/>
                    <PropertyData symbol-ref="d" value="50.71714223"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3322987747"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03340014668"/>
                    <PropertyData symbol-ref="d_normal" value="0.4302193682"/>
                    <Center>53.58064516,120,0</Center>
                    <Nodes>54, 117, 0;53, 118, 0;54, 118, 0;55, 118, 0;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0</Nodes>
                </Cell>
                <Cell id="872">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.419508676"/>
                    <PropertyData symbol-ref="d" value="62.57527413"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6741488735"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06742739827"/>
                    <PropertyData symbol-ref="d_normal" value="0.5727010357"/>
                    <Center>131.3870968,154.2258065,0</Center>
                    <Nodes>130, 151, 0;131, 151, 0;130, 152, 0;131, 152, 0;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0</Nodes>
                </Cell>
                <Cell id="879">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3026047708"/>
                    <PropertyData symbol-ref="d" value="45.37228362"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2077894555"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02102684141"/>
                    <PropertyData symbol-ref="d_normal" value="0.3661698139"/>
                    <Center>137.4,125.6,0</Center>
                    <Nodes>136, 123, 0;137, 123, 0;138, 123, 0;139, 123, 0;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0</Nodes>
                </Cell>
                <Cell id="881">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2535257842"/>
                    <PropertyData symbol-ref="d" value="21.58124788"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01461527443"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001428256233"/>
                    <PropertyData symbol-ref="d_normal" value="0.07890350265"/>
                    <Center>121.5151515,100.3636364,0</Center>
                    <Nodes>120, 98, 0;121, 98, 0;122, 98, 0;123, 98, 0;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0</Nodes>
                </Cell>
                <Cell id="883">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3141048903"/>
                    <PropertyData symbol-ref="d" value="47.95619967"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2616923805"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02605800122"/>
                    <PropertyData symbol-ref="d_normal" value="0.3962809127"/>
                    <Center>145.8064516,85.93548387,0</Center>
                    <Nodes>144, 83, 0;145, 83, 0;147, 83, 0;144, 84, 0;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0</Nodes>
                </Cell>
                <Cell id="885">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.494041317"/>
                    <PropertyData symbol-ref="d" value="87.33816507"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9760100769"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09763166719"/>
                    <PropertyData symbol-ref="d_normal" value="0.8705839038"/>
                    <Center>72.40625,182.78125,0</Center>
                    <Nodes>71, 180, 0;73, 180, 0;69, 181, 0;70, 181, 0;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0</Nodes>
                </Cell>
                <Cell id="887">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3781896554"/>
                    <PropertyData symbol-ref="d" value="56.87477472"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5121637462"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05177361945"/>
                    <PropertyData symbol-ref="d_normal" value="0.5048664587"/>
                    <Center>46.5483871,119.1290323,0</Center>
                    <Nodes>44, 116, 0;45, 116, 0;44, 117, 0;45, 117, 0;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0</Nodes>
                </Cell>
                <Cell id="896">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.313670096"/>
                    <PropertyData symbol-ref="d" value="47.28126033"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2493435232"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0252418021"/>
                    <PropertyData symbol-ref="d_normal" value="0.3897883431"/>
                    <Center>75.93548387,59.38709677,0</Center>
                    <Nodes>74, 57, 0;75, 57, 0;76, 57, 0;77, 57, 0;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0</Nodes>
                </Cell>
                <Cell id="897">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4956741165"/>
                    <PropertyData symbol-ref="d" value="89.93382351"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9828661723"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09826697073"/>
                    <PropertyData symbol-ref="d_normal" value="0.9049418231"/>
                    <Center>138.78125,18.78125,0</Center>
                    <Nodes>139, 15, 0;138, 16, 0;139, 16, 0;140, 16, 0;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0</Nodes>
                </Cell>
                <Cell id="899">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4455266582"/>
                    <PropertyData symbol-ref="d" value="66.94472125"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7815018932"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0777459703"/>
                    <PropertyData symbol-ref="d_normal" value="0.6274440222"/>
                    <Center>107.9677419,166.3225806,0</Center>
                    <Nodes>107, 163, 0;108, 163, 0;106, 164, 0;107, 164, 0;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0</Nodes>
                </Cell>
                <Cell id="901">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4133765773"/>
                    <PropertyData symbol-ref="d" value="61.46572343"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6456746142"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06483454336"/>
                    <PropertyData symbol-ref="d_normal" value="0.5600080024"/>
                    <Center>160.625,90.3125,0</Center>
                    <Nodes>159, 87, 0;160, 87, 0;159, 88, 0;160, 88, 0;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0</Nodes>
                </Cell>
                <Cell id="904">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3736114224"/>
                    <PropertyData symbol-ref="d" value="56.11254908"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4936320264"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04973887278"/>
                    <PropertyData symbol-ref="d_normal" value="0.4974526728"/>
                    <Center>59.64516129,138.9032258,0</Center>
                    <Nodes>59, 136, 0;60, 136, 0;58, 137, 0;59, 137, 0;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0</Nodes>
                </Cell>
                <Cell id="908">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2873230375"/>
                    <PropertyData symbol-ref="d" value="41.95995347"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1487595068"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01488500429"/>
                    <PropertyData symbol-ref="d_normal" value="0.3255636265"/>
                    <Center>119.7333333,63.1,0</Center>
                    <Nodes>120, 60, 0;117, 61, 0;118, 61, 0;119, 61, 0;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0</Nodes>
                </Cell>
                <Cell id="910">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2905899238"/>
                    <PropertyData symbol-ref="d" value="42.65907976"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1587469941"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01603569475"/>
                    <PropertyData symbol-ref="d_normal" value="0.3332419249"/>
                    <Center>95.5625,57.6875,0</Center>
                    <Nodes>93, 55, 0;94, 55, 0;95, 55, 0;96, 55, 0;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0</Nodes>
                </Cell>
                <Cell id="913">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2600863375"/>
                    <PropertyData symbol-ref="d" value="30.2360828"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04033105786"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.004027256263"/>
                    <PropertyData symbol-ref="d_normal" value="0.1830533466"/>
                    <Center>79.19354839,78.22580645,0</Center>
                    <Nodes>78, 76, 0;79, 76, 0;80, 76, 0;81, 76, 0;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0</Nodes>
                </Cell>
                <Cell id="914">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2575677599"/>
                    <PropertyData symbol-ref="d" value="27.94460281"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03072303232"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.002963348698"/>
                    <PropertyData symbol-ref="d_normal" value="0.1548462212"/>
                    <Center>106,127.34375,0</Center>
                    <Nodes>106, 124, 0;107, 124, 0;105, 125, 0;106, 125, 0;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0</Nodes>
                </Cell>
                <Cell id="917">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4927075368"/>
                    <PropertyData symbol-ref="d" value="85.35376587"/>
                    <PropertyData symbol-ref="GSH_local" value="0.970444158"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09702231193"/>
                    <PropertyData symbol-ref="d_normal" value="0.849147244"/>
                    <Center>103.09375,14.78125,0</Center>
                    <Nodes>104, 12, 0;105, 12, 0;102, 13, 0;103, 13, 0;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0</Nodes>
                </Cell>
                <Cell id="918">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4963309748"/>
                    <PropertyData symbol-ref="d" value="91.21956898"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9851334423"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09850653292"/>
                    <PropertyData symbol-ref="d_normal" value="0.9193662867"/>
                    <Center>123.8387097,188.0322581,0</Center>
                    <Nodes>121, 185, 0;123, 185, 0;124, 185, 0;121, 186, 0;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0</Nodes>
                </Cell>
                <Cell id="919">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2647948157"/>
                    <PropertyData symbol-ref="d" value="33.80673761"/>
                    <PropertyData symbol-ref="GSH_local" value="0.06051139419"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.006024289391"/>
                    <PropertyData symbol-ref="d_normal" value="0.225749599"/>
                    <Center>106.0666667,133.2333333,0</Center>
                    <Nodes>104, 131, 0;105, 131, 0;106, 131, 0;107, 131, 0;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0</Nodes>
                </Cell>
                <Cell id="923">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4836822644"/>
                    <PropertyData symbol-ref="d" value="78.83790976"/>
                    <PropertyData symbol-ref="GSH_local" value="0.937181772"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09356967872"/>
                    <PropertyData symbol-ref="d_normal" value="0.7702631971"/>
                    <Center>23.03030303,81.57575758,0</Center>
                    <Nodes>22, 78, 0;21, 79, 0;22, 79, 0;23, 79, 0;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0</Nodes>
                </Cell>
                <Cell id="926">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2517948773"/>
                    <PropertyData symbol-ref="d" value="15.46953912"/>
                    <PropertyData symbol-ref="GSH_local" value="0.007122052273"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0007212542828"/>
                    <PropertyData symbol-ref="d_normal" value="0.006258818062"/>
                    <Center>100.0909091,115.4848485,0</Center>
                    <Nodes>96, 114, 0;97, 114, 0;98, 114, 0;99, 114, 0;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0</Nodes>
                </Cell>
                <Cell id="929">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3045078921"/>
                    <PropertyData symbol-ref="d" value="45.70305823"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2178316291"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02200096408"/>
                    <PropertyData symbol-ref="d_normal" value="0.3721652396"/>
                    <Center>80,141.3,0</Center>
                    <Nodes>79, 139, 0;80, 139, 0;81, 139, 0;82, 139, 0;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0</Nodes>
                </Cell>
                <Cell id="931">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3036960085"/>
                    <PropertyData symbol-ref="d" value="45.81810392"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2162299828"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0213856699"/>
                    <PropertyData symbol-ref="d_normal" value="0.3712226945"/>
                    <Center>126.8125,137.1875,0</Center>
                    <Nodes>124, 134, 0;126, 134, 0;122, 135, 0;123, 135, 0;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0</Nodes>
                </Cell>
                <Cell id="932">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3715661706"/>
                    <PropertyData symbol-ref="d" value="55.94944388"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4855238288"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04929107515"/>
                    <PropertyData symbol-ref="d_normal" value="0.4942079128"/>
                    <Center>49.56666667,124.3333333,0</Center>
                    <Nodes>50, 122, 0;51, 122, 0;52, 122, 0;47, 123, 0;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0</Nodes>
                </Cell>
                <Cell id="933">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.454113263"/>
                    <PropertyData symbol-ref="d" value="69.50661009"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8217717015"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08198612274"/>
                    <PropertyData symbol-ref="d_normal" value="0.6528397317"/>
                    <Center>31.375,87.53125,0</Center>
                    <Nodes>29, 86, 0;30, 86, 0;31, 86, 0;32, 86, 0;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0</Nodes>
                </Cell>
                <Cell id="940">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4609466968"/>
                    <PropertyData symbol-ref="d" value="70.17700973"/>
                    <PropertyData symbol-ref="GSH_local" value="0.841549547"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08436521385"/>
                    <PropertyData symbol-ref="d_normal" value="0.6669802946"/>
                    <Center>103.5333333,29.73333333,0</Center>
                    <Nodes>103, 27, 0;104, 27, 0;105, 27, 0;102, 28, 0;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0</Nodes>
                </Cell>
                <Cell id="942">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4222779913"/>
                    <PropertyData symbol-ref="d" value="63.42464058"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6987206263"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06907878552"/>
                    <PropertyData symbol-ref="d_normal" value="0.5841213"/>
                    <Center>83.4375,38.9375,0</Center>
                    <Nodes>82, 36, 0;83, 36, 0;84, 36, 0;82, 37, 0;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0</Nodes>
                </Cell>
                <Cell id="943">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2642717074"/>
                    <PropertyData symbol-ref="d" value="33.34985593"/>
                    <PropertyData symbol-ref="GSH_local" value="0.05764862804"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.005752637185"/>
                    <PropertyData symbol-ref="d_normal" value="0.2205988237"/>
                    <Center>68.83870968,111.1612903,0</Center>
                    <Nodes>67, 109, 0;68, 109, 0;69, 109, 0;70, 109, 0;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0</Nodes>
                </Cell>
                <Cell id="952">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4620210779"/>
                    <PropertyData symbol-ref="d" value="71.03402243"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8547731121"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08532313628"/>
                    <PropertyData symbol-ref="d_normal" value="0.6772538804"/>
                    <Center>29.74193548,91.25806452,0</Center>
                    <Nodes>27, 89, 0;29, 89, 0;27, 90, 0;28, 90, 0;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0</Nodes>
                </Cell>
                <Cell id="953">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4962505925"/>
                    <PropertyData symbol-ref="d" value="91.35914993"/>
                    <PropertyData symbol-ref="GSH_local" value="0.985074837"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09848905792"/>
                    <PropertyData symbol-ref="d_normal" value="0.9189669034"/>
                    <Center>118.15625,189.4375,0</Center>
                    <Nodes>115, 187, 0;116, 187, 0;115, 188, 0;116, 188, 0;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0</Nodes>
                </Cell>
                <Cell id="956">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2608133154"/>
                    <PropertyData symbol-ref="d" value="31.15744105"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04434540676"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.004385319953"/>
                    <PropertyData symbol-ref="d_normal" value="0.1929612592"/>
                    <Center>126.4193548,116.516129,0</Center>
                    <Nodes>125, 114, 0;126, 114, 0;127, 114, 0;123, 115, 0;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0</Nodes>
                </Cell>
                <Cell id="958">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4828339473"/>
                    <PropertyData symbol-ref="d" value="78.41013591"/>
                    <PropertyData symbol-ref="GSH_local" value="0.932420973"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09314194034"/>
                    <PropertyData symbol-ref="d_normal" value="0.7624486716"/>
                    <Center>67.96774194,171.9032258,0</Center>
                    <Nodes>67, 168, 0;68, 168, 0;69, 168, 0;67, 169, 0;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0</Nodes>
                </Cell>
                <Cell id="960">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3511315384"/>
                    <PropertyData symbol-ref="d" value="53.88313816"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4158404248"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04061428924"/>
                    <PropertyData symbol-ref="d_normal" value="0.4660127402"/>
                    <Center>137.483871,138.7419355,0</Center>
                    <Nodes>136, 136, 0;137, 136, 0;139, 136, 0;135, 137, 0;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0</Nodes>
                </Cell>
                <Cell id="965">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4775182101"/>
                    <PropertyData symbol-ref="d" value="75.92142962"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9113284356"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09098152235"/>
                    <PropertyData symbol-ref="d_normal" value="0.7329964098"/>
                    <Center>62.21212121,34.33333333,0</Center>
                    <Nodes>63, 31, 0;61, 32, 0;62, 32, 0;63, 32, 0;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0</Nodes>
                </Cell>
                <Cell id="966">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4624783508"/>
                    <PropertyData symbol-ref="d" value="71.12420104"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8566103445"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08525216875"/>
                    <PropertyData symbol-ref="d_normal" value="0.6787417353"/>
                    <Center>109.4193548,29.80645161,0</Center>
                    <Nodes>110, 26, 0;107, 27, 0;109, 27, 0;110, 27, 0;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0</Nodes>
                </Cell>
                <Cell id="969">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4340912617"/>
                    <PropertyData symbol-ref="d" value="65.17498232"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7347489569"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07425073141"/>
                    <PropertyData symbol-ref="d_normal" value="0.6018852176"/>
                    <Center>151.3225806,140.4193548,0</Center>
                    <Nodes>151, 137, 0;152, 137, 0;150, 138, 0;151, 138, 0;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0</Nodes>
                </Cell>
                <Cell id="970">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3903946168"/>
                    <PropertyData symbol-ref="d" value="58.66237648"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5609975"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05562334651"/>
                    <PropertyData symbol-ref="d_normal" value="0.5245211341"/>
                    <Center>102.0333333,41.4,0</Center>
                    <Nodes>101, 38, 0;101, 39, 0;102, 39, 0;103, 39, 0;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0</Nodes>
                </Cell>
                <Cell id="971">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2649237647"/>
                    <PropertyData symbol-ref="d" value="33.63006758"/>
                    <PropertyData symbol-ref="GSH_local" value="0.05864596966"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.005826801476"/>
                    <PropertyData symbol-ref="d_normal" value="0.2224199558"/>
                    <Center>81,72.48387097,0</Center>
                    <Nodes>80, 70, 0;81, 70, 0;82, 70, 0;78, 71, 0;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0</Nodes>
                </Cell>
                <Cell id="976">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2700175252"/>
                    <PropertyData symbol-ref="d" value="36.15658512"/>
                    <PropertyData symbol-ref="GSH_local" value="0.07959914826"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.007952504704"/>
                    <PropertyData symbol-ref="d_normal" value="0.2552194109"/>
                    <Center>129.84375,120.4375,0</Center>
                    <Nodes>131, 117, 0;130, 118, 0;131, 118, 0;132, 118, 0;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0</Nodes>
                </Cell>
                <Cell id="979">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4397546984"/>
                    <PropertyData symbol-ref="d" value="66.03621905"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7553873871"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07591540339"/>
                    <PropertyData symbol-ref="d_normal" value="0.6127554926"/>
                    <Center>86.8125,34.96875,0</Center>
                    <Nodes>86, 31, 0;86, 32, 0;87, 32, 0;85, 33, 0;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0</Nodes>
                </Cell>
                <Cell id="980">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2946031767"/>
                    <PropertyData symbol-ref="d" value="43.43930185"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1685624835"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01732556607"/>
                    <PropertyData symbol-ref="d_normal" value="0.3404150353"/>
                    <Center>80.93548387,61.09677419,0</Center>
                    <Nodes>80, 58, 0;81, 58, 0;82, 58, 0;79, 59, 0;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0</Nodes>
                </Cell>
                <Cell id="981">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4220953365"/>
                    <PropertyData symbol-ref="d" value="63.25295665"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6908148151"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06896585933"/>
                    <PropertyData symbol-ref="d_normal" value="0.5803931391"/>
                    <Center>142.6774194,146.8387097,0</Center>
                    <Nodes>143, 143, 0;142, 144, 0;143, 144, 0;144, 144, 0;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0</Nodes>
                </Cell>
                <Cell id="982">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4907152186"/>
                    <PropertyData symbol-ref="d" value="83.74018716"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9636003712"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09635220147"/>
                    <PropertyData symbol-ref="d_normal" value="0.827611808"/>
                    <Center>169.21875,147.25,0</Center>
                    <Nodes>170, 144, 0;169, 145, 0;170, 145, 0;171, 145, 0;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0</Nodes>
                </Cell>
                <Cell id="987">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.489504436"/>
                    <PropertyData symbol-ref="d" value="82.62734608"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9607504172"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09606170252"/>
                    <PropertyData symbol-ref="d_normal" value="0.8197773848"/>
                    <Center>44.28125,38.5625,0</Center>
                    <Nodes>42, 36, 0;43, 36, 0;45, 36, 0;41, 37, 0;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0</Nodes>
                </Cell>
                <Cell id="988">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4970012495"/>
                    <PropertyData symbol-ref="d" value="93.18991342"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9880543873"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09879491914"/>
                    <PropertyData symbol-ref="d_normal" value="0.9415373675"/>
                    <Center>154.6875,175.46875,0</Center>
                    <Nodes>156, 172, 0;155, 173, 0;156, 173, 0;157, 173, 0;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0</Nodes>
                </Cell>
                <Cell id="989">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4923332306"/>
                    <PropertyData symbol-ref="d" value="85.29913087"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9700153447"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09696705955"/>
                    <PropertyData symbol-ref="d_normal" value="0.8476626129"/>
                    <Center>17.03225806,80.19354839,0</Center>
                    <Nodes>15, 78, 0;16, 78, 0;17, 78, 0;18, 78, 0;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0</Nodes>
                </Cell>
                <Cell id="1002">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4193017672"/>
                    <PropertyData symbol-ref="d" value="62.84378108"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6796240039"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06838396601"/>
                    <PropertyData symbol-ref="d_normal" value="0.5752044416"/>
                    <Center>162.9375,99.96875,0</Center>
                    <Nodes>163, 97, 0;164, 97, 0;165, 97, 0;162, 98, 0;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0</Nodes>
                </Cell>
                <Cell id="1005">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4450692814"/>
                    <PropertyData symbol-ref="d" value="67.33716243"/>
                    <PropertyData symbol-ref="GSH_local" value="0.78692743"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07846806382"/>
                    <PropertyData symbol-ref="d_normal" value="0.6306503221"/>
                    <Center>32.77419355,96.61290323,0</Center>
                    <Nodes>33, 93, 0;31, 94, 0;32, 94, 0;33, 94, 0;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0</Nodes>
                </Cell>
                <Cell id="1013">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2557488601"/>
                    <PropertyData symbol-ref="d" value="25.37001926"/>
                    <PropertyData symbol-ref="GSH_local" value="0.0226530922"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.002292499751"/>
                    <PropertyData symbol-ref="d_normal" value="0.12354547"/>
                    <Center>77.5625,88.15625,0</Center>
                    <Nodes>77, 85, 0;78, 85, 0;76, 86, 0;77, 86, 0;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0</Nodes>
                </Cell>
                <Cell id="1014">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4778074245"/>
                    <PropertyData symbol-ref="d" value="76.05688275"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9122318989"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09132416989"/>
                    <PropertyData symbol-ref="d_normal" value="0.7341196112"/>
                    <Center>91.87878788,24.39393939,0</Center>
                    <Nodes>94, 21, 0;90, 22, 0;91, 22, 0;92, 22, 0;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0</Nodes>
                </Cell>
                <Cell id="1016">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2731537837"/>
                    <PropertyData symbol-ref="d" value="37.5872033"/>
                    <PropertyData symbol-ref="GSH_local" value="0.09388020662"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.009337063935"/>
                    <PropertyData symbol-ref="d_normal" value="0.2732848052"/>
                    <Center>73.5625,126.53125,0</Center>
                    <Nodes>72, 124, 0;73, 124, 0;74, 124, 0;76, 124, 0;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0</Nodes>
                </Cell>
                <Cell id="1017">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4276652359"/>
                    <PropertyData symbol-ref="d" value="63.97828228"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7126101057"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07097526772"/>
                    <PropertyData symbol-ref="d_normal" value="0.5908094624"/>
                    <Center>72.29032258,157.9677419,0</Center>
                    <Nodes>71, 155, 0;72, 155, 0;70, 156, 0;71, 156, 0;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0</Nodes>
                </Cell>
                <Cell id="1020">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4911640805"/>
                    <PropertyData symbol-ref="d" value="84.03125581"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9646751598"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09646182562"/>
                    <PropertyData symbol-ref="d_normal" value="0.8307205019"/>
                    <Center>46,164.0322581,0</Center>
                    <Nodes>45, 161, 0;46, 161, 0;45, 162, 0;46, 162, 0;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0</Nodes>
                </Cell>
                <Cell id="1021">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3237124293"/>
                    <PropertyData symbol-ref="d" value="48.76564252"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2878219059"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02916590865"/>
                    <PropertyData symbol-ref="d_normal" value="0.4094013894"/>
                    <Center>123.6969697,142.8787879,0</Center>
                    <Nodes>124, 140, 0;123, 141, 0;124, 141, 0;125, 141, 0;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0</Nodes>
                </Cell>
                <Cell id="1023">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3449068789"/>
                    <PropertyData symbol-ref="d" value="52.26383879"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3776404856"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03768512102"/>
                    <PropertyData symbol-ref="d_normal" value="0.4500424724"/>
                    <Center>97.46875,47.75,0</Center>
                    <Nodes>98, 43, 0;97, 44, 0;96, 45, 0;97, 45, 0;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0</Nodes>
                </Cell>
                <Cell id="1024">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2903682614"/>
                    <PropertyData symbol-ref="d" value="43.10971196"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1625820767"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01629136099"/>
                    <PropertyData symbol-ref="d_normal" value="0.3360859705"/>
                    <Center>142.516129,92.58064516,0</Center>
                    <Nodes>141, 90, 0;139, 91, 0;140, 91, 0;141, 91, 0;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0</Nodes>
                </Cell>
                <Cell id="1026">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4724443426"/>
                    <PropertyData symbol-ref="d" value="74.16072205"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8940125515"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08921615047"/>
                    <PropertyData symbol-ref="d_normal" value="0.7132399138"/>
                    <Center>64.70967742,165.1612903,0</Center>
                    <Nodes>66, 162, 0;64, 163, 0;65, 163, 0;66, 163, 0;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0</Nodes>
                </Cell>
                <Cell id="1028">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3612875411"/>
                    <PropertyData symbol-ref="d" value="54.6812675"/>
                    <PropertyData symbol-ref="GSH_local" value="0.447052825"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04449557829"/>
                    <PropertyData symbol-ref="d_normal" value="0.4787414292"/>
                    <Center>56.40625,133,0</Center>
                    <Nodes>55, 130, 0;56, 130, 0;57, 130, 0;54, 131, 0;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0</Nodes>
                </Cell>
                <Cell id="1041">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3740237516"/>
                    <PropertyData symbol-ref="d" value="56.50902168"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4948722427"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04975151512"/>
                    <PropertyData symbol-ref="d_normal" value="0.4979488252"/>
                    <Center>80.125,152.84375,0</Center>
                    <Nodes>80, 150, 0;77, 151, 0;78, 151, 0;79, 151, 0;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0</Nodes>
                </Cell>
                <Cell id="1045">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2839687918"/>
                    <PropertyData symbol-ref="d" value="40.98022558"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1353077279"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01373760612"/>
                    <PropertyData symbol-ref="d_normal" value="0.3145177961"/>
                    <Center>59.21875,96.625,0</Center>
                    <Nodes>58, 93, 0;60, 93, 0;58, 94, 0;59, 94, 0;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0</Nodes>
                </Cell>
                <Cell id="1047">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3118250203"/>
                    <PropertyData symbol-ref="d" value="47.01279521"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2429693913"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02495747261"/>
                    <PropertyData symbol-ref="d_normal" value="0.3863531787"/>
                    <Center>88.40625,54.40625,0</Center>
                    <Nodes>87, 52, 0;88, 52, 0;89, 52, 0;90, 52, 0;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0</Nodes>
                </Cell>
                <Cell id="1049">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4017077489"/>
                    <PropertyData symbol-ref="d" value="60.14695545"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6104894533"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06011180285"/>
                    <PropertyData symbol-ref="d_normal" value="0.5449370076"/>
                    <Center>121.516129,156.0967742,0</Center>
                    <Nodes>122, 152, 0;121, 153, 0;122, 153, 0;123, 153, 0;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0</Nodes>
                </Cell>
                <Cell id="1050">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4617476943"/>
                    <PropertyData symbol-ref="d" value="70.93703881"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8445057343"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08416443182"/>
                    <PropertyData symbol-ref="d_normal" value="0.6692142672"/>
                    <Center>118.65625,168.34375,0</Center>
                    <Nodes>118, 164, 0;118, 165, 0;119, 165, 0;120, 165, 0;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0</Nodes>
                </Cell>
                <Cell id="1053">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4829321207"/>
                    <PropertyData symbol-ref="d" value="78.33025949"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9314770122"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09306706237"/>
                    <PropertyData symbol-ref="d_normal" value="0.7609602234"/>
                    <Center>162.28125,147.84375,0</Center>
                    <Nodes>162, 145, 0;163, 145, 0;164, 145, 0;161, 146, 0;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0</Nodes>
                </Cell>
                <Cell id="1054">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3829896496"/>
                    <PropertyData symbol-ref="d" value="57.59723237"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5315447295"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05345853946"/>
                    <PropertyData symbol-ref="d_normal" value="0.5126346728"/>
                    <Center>85.03125,44.40625,0</Center>
                    <Nodes>84, 42, 0;85, 42, 0;86, 42, 0;87, 42, 0;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0</Nodes>
                </Cell>
                <Cell id="1061">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4915210086"/>
                    <PropertyData symbol-ref="d" value="83.86481987"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9651641414"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09655026333"/>
                    <PropertyData symbol-ref="d_normal" value="0.8321650905"/>
                    <Center>143.6774194,171.3548387,0</Center>
                    <Nodes>145, 169, 0;140, 170, 0;141, 170, 0;142, 170, 0;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0</Nodes>
                </Cell>
                <Cell id="1067">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2881749204"/>
                    <PropertyData symbol-ref="d" value="42.53472846"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1554380472"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01535379699"/>
                    <PropertyData symbol-ref="d_normal" value="0.3307429148"/>
                    <Center>110.40625,58.375,0</Center>
                    <Nodes>109, 55, 0;110, 55, 0;108, 56, 0;109, 56, 0;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0</Nodes>
                </Cell>
                <Cell id="1071">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3155988875"/>
                    <PropertyData symbol-ref="d" value="47.91357551"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2605888015"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02644485375"/>
                    <PropertyData symbol-ref="d_normal" value="0.39570895"/>
                    <Center>102.8064516,52.29032258,0</Center>
                    <Nodes>102, 50, 0;103, 50, 0;105, 50, 0;100, 51, 0;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0</Nodes>
                </Cell>
                <Cell id="1074">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4971001905"/>
                    <PropertyData symbol-ref="d" value="93.39267102"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9882122246"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09885784574"/>
                    <PropertyData symbol-ref="d_normal" value="0.9428834469"/>
                    <Center>70.4375,188.8125,0</Center>
                    <Nodes>70, 185, 0;71, 186, 0;72, 186, 0;69, 187, 0;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0</Nodes>
                </Cell>
                <Cell id="1075">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2585374374"/>
                    <PropertyData symbol-ref="d" value="28.74499459"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03485869623"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003487504217"/>
                    <PropertyData symbol-ref="d_normal" value="0.167902812"/>
                    <Center>100.2258065,71.19354839,0</Center>
                    <Nodes>98, 69, 0;100, 69, 0;101, 69, 0;102, 69, 0;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0</Nodes>
                </Cell>
                <Cell id="1076">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2527945225"/>
                    <PropertyData symbol-ref="d" value="19.20744078"/>
                    <PropertyData symbol-ref="GSH_local" value="0.0110365411"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.00112268547"/>
                    <PropertyData symbol-ref="d_normal" value="0.05045543026"/>
                    <Center>96.03125,118.78125,0</Center>
                    <Nodes>96, 116, 0;95, 117, 0;96, 117, 0;97, 117, 0;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0</Nodes>
                </Cell>
                <Cell id="1078">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4197202381"/>
                    <PropertyData symbol-ref="d" value="62.70096596"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6740218062"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06753564229"/>
                    <PropertyData symbol-ref="d_normal" value="0.5726431975"/>
                    <Center>37.61764706,106.9705882,0</Center>
                    <Nodes>37, 104, 0;39, 104, 0;40, 104, 0;36, 105, 0;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0</Nodes>
                </Cell>
                <Cell id="1081">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2746176042"/>
                    <PropertyData symbol-ref="d" value="37.92821018"/>
                    <PropertyData symbol-ref="GSH_local" value="0.09768115557"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.009997947179"/>
                    <PropertyData symbol-ref="d_normal" value="0.2776740716"/>
                    <Center>62.9375,107.84375,0</Center>
                    <Nodes>63, 105, 0;65, 105, 0;62, 106, 0;63, 106, 0;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0</Nodes>
                </Cell>
                <Cell id="1083">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4943971711"/>
                    <PropertyData symbol-ref="d" value="87.90411147"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9776996088"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09776245789"/>
                    <PropertyData symbol-ref="d_normal" value="0.8780598255"/>
                    <Center>78.87096774,185.3870968,0</Center>
                    <Nodes>78, 183, 0;79, 183, 0;80, 183, 0;81, 183, 0;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0</Nodes>
                </Cell>
                <Cell id="1085">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2766871844"/>
                    <PropertyData symbol-ref="d" value="38.72006152"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1073516755"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01091953344"/>
                    <PropertyData symbol-ref="d_normal" value="0.2881917442"/>
                    <Center>128.9677419,74.29032258,0</Center>
                    <Nodes>129, 70, 0;129, 71, 0;130, 71, 0;131, 71, 0;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0</Nodes>
                </Cell>
                <Cell id="1098">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2576483414"/>
                    <PropertyData symbol-ref="d" value="28.08461569"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03074247217"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003115093941"/>
                    <PropertyData symbol-ref="d_normal" value="0.1549114814"/>
                    <Center>127.8125,96.625,0</Center>
                    <Nodes>126, 94, 0;128, 94, 0;129, 94, 0;126, 95, 0;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0</Nodes>
                </Cell>
                <Cell id="1099">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3920073662"/>
                    <PropertyData symbol-ref="d" value="59.258205"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5797745038"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05695799987"/>
                    <PropertyData symbol-ref="d_normal" value="0.5321847778"/>
                    <Center>156.9032258,84.22580645,0</Center>
                    <Nodes>155, 82, 0;156, 82, 0;157, 82, 0;160, 82, 0;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0</Nodes>
                </Cell>
                <Cell id="1100">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3441462604"/>
                    <PropertyData symbol-ref="d" value="52.16882065"/>
                    <PropertyData symbol-ref="GSH_local" value="0.374063834"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03708480759"/>
                    <PropertyData symbol-ref="d_normal" value="0.4485178067"/>
                    <Center>73.42424242,144.6969697,0</Center>
                    <Nodes>71, 142, 0;71, 143, 0;72, 143, 0;73, 143, 0;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0</Nodes>
                </Cell>
                <Cell id="1107">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4818574367"/>
                    <PropertyData symbol-ref="d" value="77.56825734"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9293446154"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09297084793"/>
                    <PropertyData symbol-ref="d_normal" value="0.7576665302"/>
                    <Center>46.46875,44.09375,0</Center>
                    <Nodes>47, 41, 0;48, 41, 0;43, 42, 0;44, 42, 0;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0</Nodes>
                </Cell>
                <Cell id="1110">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3886057273"/>
                    <PropertyData symbol-ref="d" value="58.20596879"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5487998111"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.055358933"/>
                    <PropertyData symbol-ref="d_normal" value="0.5195822613"/>
                    <Center>54.625,63.6875,0</Center>
                    <Nodes>54, 61, 0;55, 61, 0;52, 62, 0;53, 62, 0;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0</Nodes>
                </Cell>
                <Cell id="1112">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3701579344"/>
                    <PropertyData symbol-ref="d" value="55.80388769"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4833362596"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04759926507"/>
                    <PropertyData symbol-ref="d_normal" value="0.4933320343"/>
                    <Center>79.96774194,47.80645161,0</Center>
                    <Nodes>81, 44, 0;80, 45, 0;81, 45, 0;82, 45, 0;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0</Nodes>
                </Cell>
                <Cell id="1114">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3453761018"/>
                    <PropertyData symbol-ref="d" value="52.47306362"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3825816476"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03895676138"/>
                    <PropertyData symbol-ref="d_normal" value="0.4521395251"/>
                    <Center>77.59375,147.5625,0</Center>
                    <Nodes>77, 145, 0;78, 145, 0;79, 145, 0;80, 145, 0;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0</Nodes>
                </Cell>
                <Cell id="1119">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4542844295"/>
                    <PropertyData symbol-ref="d" value="68.88889606"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8150511324"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08143255094"/>
                    <PropertyData symbol-ref="d_normal" value="0.6483171455"/>
                    <Center>32.25806452,112.3870968,0</Center>
                    <Nodes>31, 110, 0;32, 110, 0;33, 110, 0;34, 110, 0;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0</Nodes>
                </Cell>
                <Cell id="1121">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.269674176"/>
                    <PropertyData symbol-ref="d" value="36.15907107"/>
                    <PropertyData symbol-ref="GSH_local" value="0.07935625993"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.008087769384"/>
                    <PropertyData symbol-ref="d_normal" value="0.2548874191"/>
                    <Center>63.90625,97.40625,0</Center>
                    <Nodes>62, 94, 0;63, 94, 0;62, 95, 0;63, 95, 0;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0</Nodes>
                </Cell>
                <Cell id="1129">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3675762113"/>
                    <PropertyData symbol-ref="d" value="55.55764975"/>
                    <PropertyData symbol-ref="GSH_local" value="0.476021088"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04700323384"/>
                    <PropertyData symbol-ref="d_normal" value="0.4904010717"/>
                    <Center>115.9032258,46.83870968,0</Center>
                    <Nodes>114, 44, 0;115, 44, 0;116, 44, 0;113, 45, 0;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0</Nodes>
                </Cell>
                <Cell id="1130">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3323180415"/>
                    <PropertyData symbol-ref="d" value="50.76577649"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3328362797"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03304711703"/>
                    <PropertyData symbol-ref="d_normal" value="0.4304615243"/>
                    <Center>82.90322581,147.9032258,0</Center>
                    <Nodes>82, 144, 0;81, 145, 0;82, 145, 0;83, 145, 0;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0</Nodes>
                </Cell>
                <Cell id="1133">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2756070834"/>
                    <PropertyData symbol-ref="d" value="38.84677935"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1039059769"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01041647865"/>
                    <PropertyData symbol-ref="d_normal" value="0.2845441078"/>
                    <Center>127.6774194,127.516129,0</Center>
                    <Nodes>127, 125, 0;128, 125, 0;129, 125, 0;125, 126, 0;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0</Nodes>
                </Cell>
                <Cell id="1136">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2536317308"/>
                    <PropertyData symbol-ref="d" value="21.50947428"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01440202253"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001462346874"/>
                    <PropertyData symbol-ref="d_normal" value="0.07741201093"/>
                    <Center>116.6060606,113.4242424,0</Center>
                    <Nodes>118, 110, 0;116, 111, 0;117, 111, 0;118, 111, 0;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0</Nodes>
                </Cell>
                <Cell id="1137">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2521350158"/>
                    <PropertyData symbol-ref="d" value="17.04133875"/>
                    <PropertyData symbol-ref="GSH_local" value="0.008576822142"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0008318328778"/>
                    <PropertyData symbol-ref="d_normal" value="0.0249922001"/>
                    <Center>104.7575758,83.6969697,0</Center>
                    <Nodes>104, 80, 0;105, 80, 0;105, 81, 0;106, 81, 0;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0</Nodes>
                </Cell>
                <Cell id="1144">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.479366604"/>
                    <PropertyData symbol-ref="d" value="76.014859"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9169355832"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09189746195"/>
                    <PropertyData symbol-ref="d_normal" value="0.740142081"/>
                    <Center>107.53125,24.5625,0</Center>
                    <Nodes>107, 21, 0;106, 22, 0;107, 22, 0;108, 22, 0;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0</Nodes>
                </Cell>
                <Cell id="1147">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3384041094"/>
                    <PropertyData symbol-ref="d" value="51.41673525"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3461136115"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03519657551"/>
                    <PropertyData symbol-ref="d_normal" value="0.4363833459"/>
                    <Center>83.63636364,51.15151515,0</Center>
                    <Nodes>83, 48, 0;84, 48, 0;85, 48, 0;86, 48, 0;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0</Nodes>
                </Cell>
                <Cell id="1149">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4481422817"/>
                    <PropertyData symbol-ref="d" value="67.25897361"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7878250566"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07895949546"/>
                    <PropertyData symbol-ref="d_normal" value="0.6311864917"/>
                    <Center>61.32258065,45,0</Center>
                    <Nodes>61, 41, 0;61, 42, 0;59, 43, 0;60, 43, 0;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0</Nodes>
                </Cell>
                <Cell id="1151">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4565224496"/>
                    <PropertyData symbol-ref="d" value="69.68340775"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8286734749"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08290730203"/>
                    <PropertyData symbol-ref="d_normal" value="0.657625496"/>
                    <Center>79.875,33.375,0</Center>
                    <Nodes>76, 31, 0;82, 31, 0;76, 32, 0;77, 32, 0;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0</Nodes>
                </Cell>
                <Cell id="1152">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4870062678"/>
                    <PropertyData symbol-ref="d" value="80.35920745"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9471389266"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09476885069"/>
                    <PropertyData symbol-ref="d_normal" value="0.788577857"/>
                    <Center>53.64516129,34.48387097,0</Center>
                    <Nodes>53, 31, 0;54, 31, 0;52, 32, 0;53, 32, 0;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0</Nodes>
                </Cell>
                <Cell id="1154">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3818870255"/>
                    <PropertyData symbol-ref="d" value="56.83560113"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5094653645"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05191741235"/>
                    <PropertyData symbol-ref="d_normal" value="0.5037865982"/>
                    <Center>67.34375,53.34375,0</Center>
                    <Nodes>66, 50, 0;67, 50, 0;68, 50, 0;65, 51, 0;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0</Nodes>
                </Cell>
                <Cell id="1158">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4830406217"/>
                    <PropertyData symbol-ref="d" value="78.12138117"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9329725506"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09326078812"/>
                    <PropertyData symbol-ref="d_normal" value="0.7633273552"/>
                    <Center>28.51612903,68.29032258,0</Center>
                    <Nodes>29, 65, 0;27, 66, 0;28, 66, 0;29, 66, 0;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0</Nodes>
                </Cell>
                <Cell id="1163">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4922305364"/>
                    <PropertyData symbol-ref="d" value="85.22820563"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9690350465"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09684941221"/>
                    <PropertyData symbol-ref="d_normal" value="0.8443444746"/>
                    <Center>15.54545455,109.4848485,0</Center>
                    <Nodes>15, 106, 0;16, 106, 0;15, 107, 0;16, 107, 0;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0</Nodes>
                </Cell>
                <Cell id="1166">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4269666624"/>
                    <PropertyData symbol-ref="d" value="63.88913279"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7045423538"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07043302167"/>
                    <PropertyData symbol-ref="d_normal" value="0.5869022951"/>
                    <Center>36.15151515,101.2424242,0</Center>
                    <Nodes>35, 99, 0;36, 99, 0;37, 99, 0;38, 99, 0;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0</Nodes>
                </Cell>
                <Cell id="1172">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2537526191"/>
                    <PropertyData symbol-ref="d" value="21.83401579"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01485744535"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001463803353"/>
                    <PropertyData symbol-ref="d_normal" value="0.08057147538"/>
                    <Center>87.6969697,81.93939394,0</Center>
                    <Nodes>87, 79, 0;88, 79, 0;85, 80, 0;86, 80, 0;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0</Nodes>
                </Cell>
                <Cell id="1175">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4258589808"/>
                    <PropertyData symbol-ref="d" value="63.5712004"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7009764284"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07062195162"/>
                    <PropertyData symbol-ref="d_normal" value="0.5851951856"/>
                    <Center>133.3870968,46.09677419,0</Center>
                    <Nodes>134, 43, 0;135, 43, 0;133, 44, 0;134, 44, 0;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0</Nodes>
                </Cell>
                <Cell id="1177">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2574878676"/>
                    <PropertyData symbol-ref="d" value="27.09520974"/>
                    <PropertyData symbol-ref="GSH_local" value="0.02812014917"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0029259841"/>
                    <PropertyData symbol-ref="d_normal" value="0.1457254185"/>
                    <Center>100,127.125,0</Center>
                    <Nodes>100, 124, 0;101, 124, 0;99, 125, 0;100, 125, 0;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0</Nodes>
                </Cell>
                <Cell id="1180">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3952923557"/>
                    <PropertyData symbol-ref="d" value="59.50893611"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5786723536"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05816031478"/>
                    <PropertyData symbol-ref="d_normal" value="0.5317325646"/>
                    <Center>57.51515152,58.24242424,0</Center>
                    <Nodes>55, 55, 0;57, 55, 0;56, 56, 0;57, 56, 0;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0</Nodes>
                </Cell>
                <Cell id="1182">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4384270269"/>
                    <PropertyData symbol-ref="d" value="65.97646156"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7577510084"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07544697793"/>
                    <PropertyData symbol-ref="d_normal" value="0.6140388758"/>
                    <Center>164.1212121,86.27272727,0</Center>
                    <Nodes>164, 83, 0;162, 84, 0;163, 84, 0;164, 84, 0;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0</Nodes>
                </Cell>
                <Cell id="1183">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4199851794"/>
                    <PropertyData symbol-ref="d" value="62.38730465"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6705046276"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06742710789"/>
                    <PropertyData symbol-ref="d_normal" value="0.5710468295"/>
                    <Center>126.0645161,156.516129,0</Center>
                    <Nodes>124, 153, 0;124, 154, 0;125, 154, 0;127, 154, 0;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0</Nodes>
                </Cell>
                <Cell id="1185">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3195216749"/>
                    <PropertyData symbol-ref="d" value="48.47906483"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2785724253"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02772681808"/>
                    <PropertyData symbol-ref="d_normal" value="0.4048446089"/>
                    <Center>128.09375,60.53125,0</Center>
                    <Nodes>127, 58, 0;128, 58, 0;125, 59, 0;126, 59, 0;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0</Nodes>
                </Cell>
                <Cell id="1189">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.330872506"/>
                    <PropertyData symbol-ref="d" value="50.38058282"/>
                    <PropertyData symbol-ref="GSH_local" value="0.322933272"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03203719779"/>
                    <PropertyData symbol-ref="d_normal" value="0.4259675881"/>
                    <Center>70.53125,59.1875,0</Center>
                    <Nodes>70, 56, 0;71, 56, 0;68, 57, 0;69, 57, 0;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0</Nodes>
                </Cell>
                <Cell id="1200">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4794118736"/>
                    <PropertyData symbol-ref="d" value="76.45072138"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9193602297"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09176731757"/>
                    <PropertyData symbol-ref="d_normal" value="0.743368607"/>
                    <Center>51.16666667,41.1,0</Center>
                    <Nodes>52, 37, 0;52, 38, 0;53, 38, 0;51, 39, 0;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0</Nodes>
                </Cell>
                <Cell id="1202">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4704457785"/>
                    <PropertyData symbol-ref="d" value="73.47595073"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8851823927"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08838076128"/>
                    <PropertyData symbol-ref="d_normal" value="0.7042448871"/>
                    <Center>47.90322581,151.5483871,0</Center>
                    <Nodes>45, 149, 0;46, 149, 0;47, 149, 0;48, 149, 0;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0</Nodes>
                </Cell>
                <Cell id="1209">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.341217513"/>
                    <PropertyData symbol-ref="d" value="51.43389264"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3535701991"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03585387744"/>
                    <PropertyData symbol-ref="d_normal" value="0.439661744"/>
                    <Center>51.03125,115.46875,0</Center>
                    <Nodes>52, 112, 0;51, 113, 0;52, 113, 0;53, 113, 0;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0</Nodes>
                </Cell>
                <Cell id="1213">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2771787506"/>
                    <PropertyData symbol-ref="d" value="38.93270429"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1077407402"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01055471757"/>
                    <PropertyData symbol-ref="d_normal" value="0.2885971047"/>
                    <Center>74.53125,70.71875,0</Center>
                    <Nodes>72, 68, 0;76, 68, 0;72, 69, 0;73, 69, 0;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0</Nodes>
                </Cell>
                <Cell id="1215">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4935821307"/>
                    <PropertyData symbol-ref="d" value="86.76262966"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9747400567"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09747932117"/>
                    <PropertyData symbol-ref="d_normal" value="0.8652950953"/>
                    <Center>151.65625,30.3125,0</Center>
                    <Nodes>152, 26, 0;151, 27, 0;152, 27, 0;150, 28, 0;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0</Nodes>
                </Cell>
                <Cell id="1226">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4495820664"/>
                    <PropertyData symbol-ref="d" value="67.8115234"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7963876319"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07929440542"/>
                    <PropertyData symbol-ref="d_normal" value="0.6363868012"/>
                    <Center>32.48387097,106.1935484,0</Center>
                    <Nodes>33, 103, 0;34, 103, 0;32, 104, 0;33, 104, 0;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0</Nodes>
                </Cell>
                <Cell id="1230">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3372693045"/>
                    <PropertyData symbol-ref="d" value="51.56660022"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3559905436"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03570894501"/>
                    <PropertyData symbol-ref="d_normal" value="0.4407190758"/>
                    <Center>120.1612903,52.70967742,0</Center>
                    <Nodes>119, 49, 0;120, 49, 0;119, 50, 0;120, 50, 0;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0</Nodes>
                </Cell>
                <Cell id="1234">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3185791527"/>
                    <PropertyData symbol-ref="d" value="48.34410994"/>
                    <PropertyData symbol-ref="GSH_local" value="0.272368788"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02729251064"/>
                    <PropertyData symbol-ref="d_normal" value="0.4017362643"/>
                    <Center>145.03125,117.53125,0</Center>
                    <Nodes>146, 114, 0;147, 114, 0;143, 115, 0;145, 115, 0;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0</Nodes>
                </Cell>
                <Cell id="1236">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4891036356"/>
                    <PropertyData symbol-ref="d" value="81.7742283"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9547071522"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09540918097"/>
                    <PropertyData symbol-ref="d_normal" value="0.8048255512"/>
                    <Center>87.93548387,19,0</Center>
                    <Nodes>87, 16, 0;88, 16, 0;89, 16, 0;86, 17, 0;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0</Nodes>
                </Cell>
                <Cell id="1238">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4459458075"/>
                    <PropertyData symbol-ref="d" value="67.66259352"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7932930789"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07879320108"/>
                    <PropertyData symbol-ref="d_normal" value="0.6344890786"/>
                    <Center>140.6060606,45.81818182,0</Center>
                    <Nodes>137, 44, 0;138, 44, 0;139, 44, 0;140, 44, 0;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0</Nodes>
                </Cell>
                <Cell id="1239">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4088751043"/>
                    <PropertyData symbol-ref="d" value="60.99039371"/>
                    <PropertyData symbol-ref="GSH_local" value="0.637604538"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06391157756"/>
                    <PropertyData symbol-ref="d_normal" value="0.5564982193"/>
                    <Center>154.6774194,73,0</Center>
                    <Nodes>154, 70, 0;155, 70, 0;152, 71, 0;153, 71, 0;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0</Nodes>
                </Cell>
                <Cell id="1243">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.461026153"/>
                    <PropertyData symbol-ref="d" value="70.89950532"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8501880088"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08473841761"/>
                    <PropertyData symbol-ref="d_normal" value="0.6736076396"/>
                    <Center>97.33333333,170.6363636,0</Center>
                    <Nodes>94, 168, 0;96, 168, 0;94, 169, 0;96, 169, 0;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0</Nodes>
                </Cell>
                <Cell id="1244">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4188175816"/>
                    <PropertyData symbol-ref="d" value="62.53853923"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6768318437"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06799893203"/>
                    <PropertyData symbol-ref="d_normal" value="0.5739250062"/>
                    <Center>146.2903226,141.9354839,0</Center>
                    <Nodes>145, 139, 0;146, 139, 0;147, 139, 0;148, 139, 0;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0</Nodes>
                </Cell>
                <Cell id="1245">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2519544528"/>
                    <PropertyData symbol-ref="d" value="16.59739837"/>
                    <PropertyData symbol-ref="GSH_local" value="0.007936219596"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0007854646535"/>
                    <PropertyData symbol-ref="d_normal" value="0.01716496405"/>
                    <Center>88.3,111.8333333,0</Center>
                    <Nodes>88, 109, 0;89, 109, 0;86, 110, 0;87, 110, 0;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0</Nodes>
                </Cell>
                <Cell id="1248">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4114610889"/>
                    <PropertyData symbol-ref="d" value="61.37908114"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6407208632"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06469052349"/>
                    <PropertyData symbol-ref="d_normal" value="0.5578494265"/>
                    <Center>39.60606061,111.8181818,0</Center>
                    <Nodes>40, 108, 0;39, 109, 0;40, 109, 0;41, 109, 0;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0</Nodes>
                </Cell>
                <Cell id="1249">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3437543651"/>
                    <PropertyData symbol-ref="d" value="52.47177524"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3743750649"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03771025274"/>
                    <PropertyData symbol-ref="d_normal" value="0.4486507096"/>
                    <Center>47.6875,96.625,0</Center>
                    <Nodes>48, 93, 0;47, 94, 0;48, 94, 0;49, 94, 0;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0</Nodes>
                </Cell>
                <Cell id="1257">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4751742869"/>
                    <PropertyData symbol-ref="d" value="74.3218876"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8993737153"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0899802414"/>
                    <PropertyData symbol-ref="d_normal" value="0.7190285146"/>
                    <Center>150.3,44.66666667,0</Center>
                    <Nodes>149, 42, 0;151, 42, 0;148, 43, 0;149, 43, 0;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0</Nodes>
                </Cell>
                <Cell id="1259">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3186786546"/>
                    <PropertyData symbol-ref="d" value="48.26674279"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2762012544"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02789857247"/>
                    <PropertyData symbol-ref="d_normal" value="0.4036616405"/>
                    <Center>51.96969697,105.8484848,0</Center>
                    <Nodes>51, 103, 0;52, 103, 0;53, 103, 0;54, 103, 0;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0</Nodes>
                </Cell>
                <Cell id="1262">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4783458178"/>
                    <PropertyData symbol-ref="d" value="75.98224262"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9116267425"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09119645609"/>
                    <PropertyData symbol-ref="d_normal" value="0.7333661226"/>
                    <Center>24,103.25,0</Center>
                    <Nodes>23, 100, 0;24, 100, 0;25, 100, 0;22, 101, 0;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0</Nodes>
                </Cell>
                <Cell id="1269">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2810594872"/>
                    <PropertyData symbol-ref="d" value="40.89740403"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1359189643"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01260009594"/>
                    <PropertyData symbol-ref="d_normal" value="0.3150392301"/>
                    <Center>135.75,80.15625,0</Center>
                    <Nodes>134, 77, 0;133, 78, 0;134, 78, 0;135, 78, 0;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0</Nodes>
                </Cell>
                <Cell id="1272">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4958827298"/>
                    <PropertyData symbol-ref="d" value="90.24232243"/>
                    <PropertyData symbol-ref="GSH_local" value="0.983097183"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09833574385"/>
                    <PropertyData symbol-ref="d_normal" value="0.9063227687"/>
                    <Center>133.65625,16.1875,0</Center>
                    <Nodes>132, 13, 0;132, 14, 0;133, 14, 0;134, 14, 0;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0</Nodes>
                </Cell>
                <Cell id="1273">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3438556986"/>
                    <PropertyData symbol-ref="d" value="52.03944432"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3630327374"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03600911097"/>
                    <PropertyData symbol-ref="d_normal" value="0.4437774755"/>
                    <Center>76.81818182,53.57575758,0</Center>
                    <Nodes>74, 51, 0;75, 51, 0;78, 51, 0;75, 52, 0;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0</Nodes>
                </Cell>
                <Cell id="1276">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.283399842"/>
                    <PropertyData symbol-ref="d" value="40.54901583"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1287942254"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01303181044"/>
                    <PropertyData symbol-ref="d_normal" value="0.3088337779"/>
                    <Center>137.5806452,84.5483871,0</Center>
                    <Nodes>137, 82, 0;138, 82, 0;139, 82, 0;140, 82, 0;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0</Nodes>
                </Cell>
                <Cell id="1284">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2535815347"/>
                    <PropertyData symbol-ref="d" value="21.55681214"/>
                    <PropertyData symbol-ref="GSH_local" value="0.01493007485"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.001453180474"/>
                    <PropertyData symbol-ref="d_normal" value="0.08106649963"/>
                    <Center>84.77419355,115.516129,0</Center>
                    <Nodes>85, 112, 0;83, 113, 0;84, 113, 0;85, 113, 0;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0</Nodes>
                </Cell>
                <Cell id="1288">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2971458935"/>
                    <PropertyData symbol-ref="d" value="44.27597681"/>
                    <PropertyData symbol-ref="GSH_local" value="0.192183974"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01928693938"/>
                    <PropertyData symbol-ref="d_normal" value="0.3564118769"/>
                    <Center>63.57575758,74.6969697,0</Center>
                    <Nodes>65, 72, 0;66, 72, 0;60, 73, 0;61, 73, 0;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0</Nodes>
                </Cell>
                <Cell id="1290">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4553414184"/>
                    <PropertyData symbol-ref="d" value="69.07147142"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8208283955"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0819034884"/>
                    <PropertyData symbol-ref="d_normal" value="0.6521970038"/>
                    <Center>89.90322581,168.4193548,0</Center>
                    <Nodes>86, 166, 0;87, 166, 0;88, 166, 0;89, 166, 0;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0</Nodes>
                </Cell>
                <Cell id="1295">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3786388007"/>
                    <PropertyData symbol-ref="d" value="56.61384065"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5012869945"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05064216213"/>
                    <PropertyData symbol-ref="d_normal" value="0.5005147989"/>
                    <Center>43.64516129,107.6774194,0</Center>
                    <Nodes>43, 104, 0;44, 104, 0;41, 105, 0;42, 105, 0;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0</Nodes>
                </Cell>
                <Cell id="1296">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4863858552"/>
                    <PropertyData symbol-ref="d" value="80.47269946"/>
                    <PropertyData symbol-ref="GSH_local" value="0.946071645"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09453372009"/>
                    <PropertyData symbol-ref="d_normal" value="0.7864661894"/>
                    <Center>83.09375,21.4375,0</Center>
                    <Nodes>80, 19, 0;81, 19, 0;82, 19, 0;83, 19, 0;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0</Nodes>
                </Cell>
                <Cell id="1297">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4334160842"/>
                    <PropertyData symbol-ref="d" value="64.77838573"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7347696724"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07294984697"/>
                    <PropertyData symbol-ref="d_normal" value="0.601895847"/>
                    <Center>143.21875,51.5625,0</Center>
                    <Nodes>141, 48, 0;141, 49, 0;142, 49, 0;143, 49, 0;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0</Nodes>
                </Cell>
                <Cell id="1298">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.263294323"/>
                    <PropertyData symbol-ref="d" value="32.80445444"/>
                    <PropertyData symbol-ref="GSH_local" value="0.05346812101"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.005398630965"/>
                    <PropertyData symbol-ref="d_normal" value="0.2126280956"/>
                    <Center>124.0645161,122.3548387,0</Center>
                    <Nodes>124, 119, 0;125, 119, 0;123, 120, 0;124, 120, 0;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0</Nodes>
                </Cell>
                <Cell id="1302">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3965097492"/>
                    <PropertyData symbol-ref="d" value="59.177715"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5900715293"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05904094911"/>
                    <PropertyData symbol-ref="d_normal" value="0.5364261083"/>
                    <Center>155.3225806,78.70967742,0</Center>
                    <Nodes>157, 76, 0;152, 77, 0;153, 77, 0;154, 77, 0;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0</Nodes>
                </Cell>
                <Cell id="1311">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3105273698"/>
                    <PropertyData symbol-ref="d" value="46.84459431"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2436289858"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02429096016"/>
                    <PropertyData symbol-ref="d_normal" value="0.3867114503"/>
                    <Center>53.13333333,99.7,0</Center>
                    <Nodes>55, 97, 0;56, 97, 0;51, 98, 0;52, 98, 0;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0</Nodes>
                </Cell>
                <Cell id="1315">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4955029011"/>
                    <PropertyData symbol-ref="d" value="89.60943031"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9819128202"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09822007313"/>
                    <PropertyData symbol-ref="d_normal" value="0.8994299136"/>
                    <Center>101.28125,10.21875,0</Center>
                    <Nodes>99, 8, 0;100, 8, 0;101, 8, 0;102, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="1317">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4154063442"/>
                    <PropertyData symbol-ref="d" value="62.36788743"/>
                    <PropertyData symbol-ref="GSH_local" value="0.671504062"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06701287134"/>
                    <PropertyData symbol-ref="d_normal" value="0.5714995592"/>
                    <Center>44.16129032,127.4193548,0</Center>
                    <Nodes>44, 125, 0;45, 125, 0;40, 126, 0;41, 126, 0;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0</Nodes>
                </Cell>
                <Cell id="1318">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2637856423"/>
                    <PropertyData symbol-ref="d" value="32.90262919"/>
                    <PropertyData symbol-ref="GSH_local" value="0.05490279686"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.005472122661"/>
                    <PropertyData symbol-ref="d_normal" value="0.2154276509"/>
                    <Center>123.3225806,76.67741935,0</Center>
                    <Nodes>122, 74, 0;123, 74, 0;124, 74, 0;125, 74, 0;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0</Nodes>
                </Cell>
                <Cell id="1324">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4862351835"/>
                    <PropertyData symbol-ref="d" value="80.00684785"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9440970477"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09444737948"/>
                    <PropertyData symbol-ref="d_normal" value="0.7826611773"/>
                    <Center>144.4242424,166.3333333,0</Center>
                    <Nodes>145, 163, 0;143, 164, 0;144, 164, 0;145, 164, 0;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0</Nodes>
                </Cell>
                <Cell id="1325">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2620152042"/>
                    <PropertyData symbol-ref="d" value="31.65173717"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04928030725"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.004874375778"/>
                    <PropertyData symbol-ref="d_normal" value="0.2040305285"/>
                    <Center>127.9032258,85.61290323,0</Center>
                    <Nodes>127, 83, 0;128, 83, 0;129, 83, 0;130, 83, 0;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0</Nodes>
                </Cell>
                <Cell id="1327">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2568056973"/>
                    <PropertyData symbol-ref="d" value="27.07905816"/>
                    <PropertyData symbol-ref="GSH_local" value="0.02832493559"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.002802859717"/>
                    <PropertyData symbol-ref="d_normal" value="0.146472108"/>
                    <Center>120.4375,117.78125,0</Center>
                    <Nodes>119, 115, 0;120, 115, 0;118, 116, 0;119, 116, 0;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0</Nodes>
                </Cell>
                <Cell id="1329">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2831607851"/>
                    <PropertyData symbol-ref="d" value="40.86609182"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1342607099"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.013296307"/>
                    <PropertyData symbol-ref="d_normal" value="0.3136199694"/>
                    <Center>87.46666667,138.9333333,0</Center>
                    <Nodes>84, 137, 0;86, 137, 0;87, 137, 0;88, 137, 0;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0</Nodes>
                </Cell>
                <Cell id="1330">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.280745869"/>
                    <PropertyData symbol-ref="d" value="40.65154181"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1269154511"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0127176409"/>
                    <PropertyData symbol-ref="d_normal" value="0.3071488725"/>
                    <Center>140.5151515,103.030303,0</Center>
                    <Nodes>140, 101, 0;141, 101, 0;142, 101, 0;143, 101, 0;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0</Nodes>
                </Cell>
                <Cell id="1339">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4883797015"/>
                    <PropertyData symbol-ref="d" value="81.45880022"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9525690972"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09536863012"/>
                    <PropertyData symbol-ref="d_normal" value="0.7999888672"/>
                    <Center>126.03125,22.8125,0</Center>
                    <Nodes>124, 20, 0;125, 20, 0;126, 20, 0;127, 20, 0;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0</Nodes>
                </Cell>
                <Cell id="1347">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2815098883"/>
                    <PropertyData symbol-ref="d" value="40.32956069"/>
                    <PropertyData symbol-ref="GSH_local" value="0.123723033"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01244044583"/>
                    <PropertyData symbol-ref="d_normal" value="0.304236325"/>
                    <Center>132.25,124.0625,0</Center>
                    <Nodes>134, 121, 0;130, 122, 0;131, 122, 0;132, 122, 0;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0</Nodes>
                </Cell>
                <Cell id="1352">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4960002543"/>
                    <PropertyData symbol-ref="d" value="90.61990235"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9836590376"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09838383362"/>
                    <PropertyData symbol-ref="d_normal" value="0.9097604346"/>
                    <Center>83.7,189.1666667,0</Center>
                    <Nodes>82, 187, 0;83, 187, 0;84, 187, 0;85, 187, 0;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0</Nodes>
                </Cell>
                <Cell id="1353">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.48181401"/>
                    <PropertyData symbol-ref="d" value="77.65384328"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9265946848"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0926412294"/>
                    <PropertyData symbol-ref="d_normal" value="0.753551989"/>
                    <Center>138.8181818,32.78787879,0</Center>
                    <Nodes>140, 29, 0;138, 30, 0;139, 30, 0;140, 30, 0;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0</Nodes>
                </Cell>
                <Cell id="1362">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4757075102"/>
                    <PropertyData symbol-ref="d" value="75.05672499"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9011639108"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09023535153"/>
                    <PropertyData symbol-ref="d_normal" value="0.7210224349"/>
                    <Center>78.09090909,28.15151515,0</Center>
                    <Nodes>77, 24, 0;76, 25, 0;77, 25, 0;78, 25, 0;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0</Nodes>
                </Cell>
                <Cell id="1377">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2722316228"/>
                    <PropertyData symbol-ref="d" value="37.74824499"/>
                    <PropertyData symbol-ref="GSH_local" value="0.09307716394"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.009203272954"/>
                    <PropertyData symbol-ref="d_normal" value="0.2723371498"/>
                    <Center>89.39393939,64.12121212,0</Center>
                    <Nodes>89, 61, 0;90, 61, 0;91, 61, 0;87, 62, 0;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0</Nodes>
                </Cell>
                <Cell id="1383">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4897911315"/>
                    <PropertyData symbol-ref="d" value="82.51140667"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9585240585"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09590672338"/>
                    <PropertyData symbol-ref="d_normal" value="0.8140281126"/>
                    <Center>120.8125,20.15625,0</Center>
                    <Nodes>121, 16, 0;120, 17, 0;121, 17, 0;119, 18, 0;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0</Nodes>
                </Cell>
                <Cell id="1387">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4604725668"/>
                    <PropertyData symbol-ref="d" value="70.48921903"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8462343479"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08476700479"/>
                    <PropertyData symbol-ref="d_normal" value="0.6705366625"/>
                    <Center>134.8125,38.65625,0</Center>
                    <Nodes>133, 36, 0;134, 36, 0;136, 36, 0;132, 37, 0;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0</Nodes>
                </Cell>
                <Cell id="1393">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2698164569"/>
                    <PropertyData symbol-ref="d" value="36.13620339"/>
                    <PropertyData symbol-ref="GSH_local" value="0.07928985158"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0078573673"/>
                    <PropertyData symbol-ref="d_normal" value="0.2547964873"/>
                    <Center>115.516129,67.06451613,0</Center>
                    <Nodes>116, 64, 0;117, 64, 0;113, 65, 0;114, 65, 0;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0</Nodes>
                </Cell>
                <Cell id="1395">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4357721673"/>
                    <PropertyData symbol-ref="d" value="65.25066451"/>
                    <PropertyData symbol-ref="GSH_local" value="0.745204226"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07439145501"/>
                    <PropertyData symbol-ref="d_normal" value="0.6073195972"/>
                    <Center>97.83870968,165.1290323,0</Center>
                    <Nodes>97, 162, 0;98, 162, 0;99, 162, 0;96, 163, 0;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0</Nodes>
                </Cell>
                <Cell id="1397">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3238516661"/>
                    <PropertyData symbol-ref="d" value="49.06342834"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2966263498"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0298134112"/>
                    <PropertyData symbol-ref="d_normal" value="0.4136585006"/>
                    <Center>140.8387097,73,0</Center>
                    <Nodes>142, 70, 0;143, 70, 0;139, 71, 0;140, 71, 0;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0</Nodes>
                </Cell>
                <Cell id="1408">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3002408953"/>
                    <PropertyData symbol-ref="d" value="45.15539132"/>
                    <PropertyData symbol-ref="GSH_local" value="0.2031455314"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01968841435"/>
                    <PropertyData symbol-ref="d_normal" value="0.3633250563"/>
                    <Center>133.8064516,130.0322581,0</Center>
                    <Nodes>133, 127, 0;134, 127, 0;132, 128, 0;133, 128, 0;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0</Nodes>
                </Cell>
                <Cell id="1414">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3997809127"/>
                    <PropertyData symbol-ref="d" value="59.81583879"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5985671993"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05970666247"/>
                    <PropertyData symbol-ref="d_normal" value="0.539949865"/>
                    <Center>126.6363636,46.51515152,0</Center>
                    <Nodes>126, 44, 0;127, 44, 0;128, 44, 0;124, 45, 0;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0</Nodes>
                </Cell>
                <Cell id="1416">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2679445403"/>
                    <PropertyData symbol-ref="d" value="35.42697154"/>
                    <PropertyData symbol-ref="GSH_local" value="0.07146732804"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.007194709379"/>
                    <PropertyData symbol-ref="d_normal" value="0.2435634827"/>
                    <Center>128.90625,79.625,0</Center>
                    <Nodes>126, 77, 0;125, 78, 0;127, 78, 0;128, 78, 0;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0</Nodes>
                </Cell>
                <Cell id="1417">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4957795984"/>
                    <PropertyData symbol-ref="d" value="90.26593846"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9833622062"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09832248266"/>
                    <PropertyData symbol-ref="d_normal" value="0.9079300677"/>
                    <Center>66.9375,184,0</Center>
                    <Nodes>65, 181, 0;66, 181, 0;67, 181, 0;65, 182, 0;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0</Nodes>
                </Cell>
                <Cell id="1422">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3722564681"/>
                    <PropertyData symbol-ref="d" value="56.57596046"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4861743061"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04913762894"/>
                    <PropertyData symbol-ref="d_normal" value="0.4944683123"/>
                    <Center>149.6,127.2666667,0</Center>
                    <Nodes>148, 125, 0;149, 125, 0;150, 125, 0;151, 125, 0;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0</Nodes>
                </Cell>
                <Cell id="1426">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2853384337"/>
                    <PropertyData symbol-ref="d" value="41.49952045"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1412319201"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01417271707"/>
                    <PropertyData symbol-ref="d_normal" value="0.3194904466"/>
                    <Center>136.9677419,119.4516129,0</Center>
                    <Nodes>137, 116, 0;136, 117, 0;137, 117, 0;138, 117, 0;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0</Nodes>
                </Cell>
                <Cell id="1440">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.435565362"/>
                    <PropertyData symbol-ref="d" value="64.78549341"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7337380081"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.07337174761"/>
                    <PropertyData symbol-ref="d_normal" value="0.6013671271"/>
                    <Center>91.58064516,35.77419355,0</Center>
                    <Nodes>90, 33, 0;91, 33, 0;92, 33, 0;94, 33, 0;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0</Nodes>
                </Cell>
                <Cell id="1456">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4845555351"/>
                    <PropertyData symbol-ref="d" value="79.19169903"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9387323783"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09392602681"/>
                    <PropertyData symbol-ref="d_normal" value="0.7729278922"/>
                    <Center>103.78125,179.25,0</Center>
                    <Nodes>103, 177, 0;104, 177, 0;105, 177, 0;107, 177, 0;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0</Nodes>
                </Cell>
                <Cell id="1460">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4718253986"/>
                    <PropertyData symbol-ref="d" value="73.64544388"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8876515579"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0887106518"/>
                    <PropertyData symbol-ref="d_normal" value="0.7066974144"/>
                    <Center>83.125,28.59375,0</Center>
                    <Nodes>80, 26, 0;81, 26, 0;82, 26, 0;83, 26, 0;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0</Nodes>
                </Cell>
                <Cell id="1467">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.484200174"/>
                    <PropertyData symbol-ref="d" value="79.06475303"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9403133993"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09388966097"/>
                    <PropertyData symbol-ref="d_normal" value="0.7757105672"/>
                    <Center>45.53125,157.21875,0</Center>
                    <Nodes>46, 153, 0;45, 154, 0;46, 154, 0;44, 155, 0;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0</Nodes>
                </Cell>
                <Cell id="1470">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3676219578"/>
                    <PropertyData symbol-ref="d" value="55.6108567"/>
                    <PropertyData symbol-ref="GSH_local" value="0.4684144504"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.04719337184"/>
                    <PropertyData symbol-ref="d_normal" value="0.4873489338"/>
                    <Center>45.83870968,113.0645161,0</Center>
                    <Nodes>48, 110, 0;45, 111, 0;46, 111, 0;47, 111, 0;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0</Nodes>
                </Cell>
                <Cell id="1472">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4639731273"/>
                    <PropertyData symbol-ref="d" value="71.28032334"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8563863813"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.085394847"/>
                    <PropertyData symbol-ref="d_normal" value="0.6785595164"/>
                    <Center>31.87878788,78.6969697,0</Center>
                    <Nodes>33, 75, 0;31, 76, 0;32, 76, 0;33, 76, 0;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0</Nodes>
                </Cell>
                <Cell id="1476">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4200984607"/>
                    <PropertyData symbol-ref="d" value="63.19592777"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6904984378"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06902037324"/>
                    <PropertyData symbol-ref="d_normal" value="0.5802450571"/>
                    <Center>150.2258065,61.64516129,0</Center>
                    <Nodes>149, 59, 0;150, 59, 0;151, 59, 0;152, 59, 0;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0</Nodes>
                </Cell>
                <Cell id="1478">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2595081143"/>
                    <PropertyData symbol-ref="d" value="29.48485112"/>
                    <PropertyData symbol-ref="GSH_local" value="0.0366706045"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003715459934"/>
                    <PropertyData symbol-ref="d_normal" value="0.1731580062"/>
                    <Center>94.0625,129,0</Center>
                    <Nodes>93, 126, 0;94, 126, 0;95, 126, 0;92, 127, 0;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0</Nodes>
                </Cell>
                <Cell id="1482">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2758001243"/>
                    <PropertyData symbol-ref="d" value="38.49815867"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1015683711"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01038618753"/>
                    <PropertyData symbol-ref="d_normal" value="0.282008157"/>
                    <Center>107.0909091,62.21212121,0</Center>
                    <Nodes>107, 59, 0;108, 59, 0;107, 60, 0;108, 60, 0;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0</Nodes>
                </Cell>
                <Cell id="1488">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4903761204"/>
                    <PropertyData symbol-ref="d" value="83.37182739"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9619296073"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09617479367"/>
                    <PropertyData symbol-ref="d_normal" value="0.8229504388"/>
                    <Center>29.84375,144.84375,0</Center>
                    <Nodes>30, 142, 0;31, 142, 0;32, 142, 0;29, 143, 0;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0</Nodes>
                </Cell>
                <Cell id="1489">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2591672782"/>
                    <PropertyData symbol-ref="d" value="29.59416248"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03667475215"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003715691458"/>
                    <PropertyData symbol-ref="d_normal" value="0.1731697467"/>
                    <Center>106.28125,71.21875,0</Center>
                    <Nodes>104, 69, 0;105, 69, 0;106, 69, 0;107, 69, 0;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0</Nodes>
                </Cell>
                <Cell id="1496">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4927818098"/>
                    <PropertyData symbol-ref="d" value="85.69969711"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9713330885"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0972060281"/>
                    <PropertyData symbol-ref="d_normal" value="0.8522925897"/>
                    <Center>111.3125,15.125,0</Center>
                    <Nodes>109, 13, 0;110, 13, 0;111, 13, 0;112, 13, 0;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0</Nodes>
                </Cell>
                <Cell id="1498">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2608721001"/>
                    <PropertyData symbol-ref="d" value="31.22356695"/>
                    <PropertyData symbol-ref="GSH_local" value="0.04462723375"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.004357733066"/>
                    <PropertyData symbol-ref="d_normal" value="0.1936242699"/>
                    <Center>74.66666667,118.1666667,0</Center>
                    <Nodes>73, 116, 0;74, 116, 0;75, 116, 0;76, 116, 0;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0</Nodes>
                </Cell>
                <Cell id="1500">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.450238438"/>
                    <PropertyData symbol-ref="d" value="68.24471636"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8037494418"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08022959017"/>
                    <PropertyData symbol-ref="d_normal" value="0.640989538"/>
                    <Center>161.46875,70.78125,0</Center>
                    <Nodes>161, 68, 0;162, 68, 0;160, 69, 0;161, 69, 0;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0</Nodes>
                </Cell>
                <Cell id="1503">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3801339732"/>
                    <PropertyData symbol-ref="d" value="57.38236098"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5256537448"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05266153885"/>
                    <PropertyData symbol-ref="d_normal" value="0.5102705165"/>
                    <Center>50.96875,129.28125,0</Center>
                    <Nodes>52, 126, 0;51, 127, 0;52, 127, 0;53, 127, 0;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0</Nodes>
                </Cell>
                <Cell id="1504">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4855792749"/>
                    <PropertyData symbol-ref="d" value="79.42287275"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9405758675"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09408744026"/>
                    <PropertyData symbol-ref="d_normal" value="0.7761791898"/>
                    <Center>33.6875,56.53125,0</Center>
                    <Nodes>32, 54, 0;33, 54, 0;34, 54, 0;31, 55, 0;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0</Nodes>
                </Cell>
                <Cell id="1515">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.256672241"/>
                    <PropertyData symbol-ref="d" value="26.67109961"/>
                    <PropertyData symbol-ref="GSH_local" value="0.02724248166"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.002663652616"/>
                    <PropertyData symbol-ref="d_normal" value="0.142464274"/>
                    <Center>86.25,122.78125,0</Center>
                    <Nodes>90, 120, 0;83, 121, 0;89, 121, 0;90, 121, 0;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0</Nodes>
                </Cell>
                <Cell id="1516">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2777414796"/>
                    <PropertyData symbol-ref="d" value="39.22963956"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1091003252"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01118903028"/>
                    <PropertyData symbol-ref="d_normal" value="0.2900036051"/>
                    <Center>66.40625,120.46875,0</Center>
                    <Nodes>66, 118, 0;67, 118, 0;68, 118, 0;69, 118, 0;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0</Nodes>
                </Cell>
                <Cell id="1518">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4907847233"/>
                    <PropertyData symbol-ref="d" value="83.33851458"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9621208338"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09621208338"/>
                    <PropertyData symbol-ref="d_normal" value="0.8234738793"/>
                    <Center>178.5,71.43333333,0</Center>
                    <Nodes>180, 68, 0;178, 69, 0;179, 69, 0;180, 69, 0;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0</Nodes>
                </Cell>
                <Cell id="1519">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4962844817"/>
                    <PropertyData symbol-ref="d" value="90.63990916"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9844503036"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09845044419"/>
                    <PropertyData symbol-ref="d_normal" value="0.9148042302"/>
                    <Center>61.5625,17.875,0</Center>
                    <Nodes>61, 14, 0;62, 14, 0;63, 14, 0;61, 15, 0;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0</Nodes>
                </Cell>
                <Cell id="1522">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4534335312"/>
                    <PropertyData symbol-ref="d" value="68.74565165"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8182451117"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08207717114"/>
                    <PropertyData symbol-ref="d_normal" value="0.6504502927"/>
                    <Center>165.40625,120.90625,0</Center>
                    <Nodes>164, 118, 0;166, 118, 0;163, 119, 0;164, 119, 0;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0</Nodes>
                </Cell>
                <Cell id="1523">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4910890946"/>
                    <PropertyData symbol-ref="d" value="83.84489144"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9642236609"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09644988198"/>
                    <PropertyData symbol-ref="d_normal" value="0.8294036524"/>
                    <Center>99.58064516,183.7741935,0</Center>
                    <Nodes>100, 180, 0;98, 181, 0;99, 181, 0;100, 181, 0;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0</Nodes>
                </Cell>
                <Cell id="1525">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3160751171"/>
                    <PropertyData symbol-ref="d" value="48.20996611"/>
                    <PropertyData symbol-ref="GSH_local" value="0.266134757"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.02650920642"/>
                    <PropertyData symbol-ref="d_normal" value="0.3985677367"/>
                    <Center>111.78125,53.125,0</Center>
                    <Nodes>112, 50, 0;110, 51, 0;111, 51, 0;112, 51, 0;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0</Nodes>
                </Cell>
                <Cell id="1528">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4875499648"/>
                    <PropertyData symbol-ref="d" value="80.52799876"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9487134369"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09488491161"/>
                    <PropertyData symbol-ref="d_normal" value="0.7917678"/>
                    <Center>180.0645161,108.3548387,0</Center>
                    <Nodes>179, 105, 0;180, 105, 0;181, 105, 0;179, 106, 0;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0</Nodes>
                </Cell>
                <Cell id="1558">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2807101368"/>
                    <PropertyData symbol-ref="d" value="40.37899071"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1266003848"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01241412933"/>
                    <PropertyData symbol-ref="d_normal" value="0.3068642349"/>
                    <Center>59.84375,103.75,0</Center>
                    <Nodes>59, 100, 0;59, 101, 0;60, 101, 0;61, 101, 0;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0</Nodes>
                </Cell>
                <Cell id="1566">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4924738375"/>
                    <PropertyData symbol-ref="d" value="85.28300535"/>
                    <PropertyData symbol-ref="GSH_local" value="0.969748076"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09694679707"/>
                    <PropertyData symbol-ref="d_normal" value="0.8467476537"/>
                    <Center>85.21212121,184.0909091,0</Center>
                    <Nodes>85, 181, 0;83, 182, 0;84, 182, 0;85, 182, 0;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0</Nodes>
                </Cell>
                <Cell id="1569">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3354405972"/>
                    <PropertyData symbol-ref="d" value="51.07878879"/>
                    <PropertyData symbol-ref="GSH_local" value="0.3449166356"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.03473748294"/>
                    <PropertyData symbol-ref="d_normal" value="0.435854025"/>
                    <Center>62.12903226,134,0</Center>
                    <Nodes>60, 131, 0;60, 132, 0;61, 132, 0;62, 132, 0;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0</Nodes>
                </Cell>
                <Cell id="1574">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4734603369"/>
                    <PropertyData symbol-ref="d" value="74.28780829"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8950231216"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08959052506"/>
                    <PropertyData symbol-ref="d_normal" value="0.7143109432"/>
                    <Center>89.84375,173.625,0</Center>
                    <Nodes>88, 171, 0;89, 171, 0;90, 171, 0;88, 172, 0;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0</Nodes>
                </Cell>
                <Cell id="1582">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4836392011"/>
                    <PropertyData symbol-ref="d" value="78.81645982"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9365555985"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09351153103"/>
                    <PropertyData symbol-ref="d_normal" value="0.7692044934"/>
                    <Center>166.0967742,143,0</Center>
                    <Nodes>165, 140, 0;167, 140, 0;165, 141, 0;166, 141, 0;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0</Nodes>
                </Cell>
                <Cell id="1583">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2782621975"/>
                    <PropertyData symbol-ref="d" value="39.12860656"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1097850128"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01119983126"/>
                    <PropertyData symbol-ref="d_normal" value="0.2907061032"/>
                    <Center>100.6129032,60.87096774,0</Center>
                    <Nodes>99, 58, 0;100, 58, 0;101, 58, 0;102, 58, 0;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0</Nodes>
                </Cell>
                <Cell id="1584">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4927169248"/>
                    <PropertyData symbol-ref="d" value="85.38675555"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9691573219"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09701784327"/>
                    <PropertyData symbol-ref="d_normal" value="0.8447527569"/>
                    <Center>116.5,16.25,0</Center>
                    <Nodes>116, 13, 0;117, 13, 0;118, 13, 0;116, 14, 0;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0</Nodes>
                </Cell>
                <Cell id="1589">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4898338728"/>
                    <PropertyData symbol-ref="d" value="82.91043649"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9595143777"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09590731557"/>
                    <PropertyData symbol-ref="d_normal" value="0.8165480394"/>
                    <Center>169.59375,55.125,0</Center>
                    <Nodes>170, 52, 0;171, 52, 0;168, 53, 0;169, 53, 0;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0</Nodes>
                </Cell>
                <Cell id="1595">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4832880822"/>
                    <PropertyData symbol-ref="d" value="78.21185797"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9334740157"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09320827747"/>
                    <PropertyData symbol-ref="d_normal" value="0.7641320515"/>
                    <Center>27.72727273,130.0909091,0</Center>
                    <Nodes>26, 127, 0;27, 127, 0;28, 127, 0;25, 128, 0;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0</Nodes>
                </Cell>
                <Cell id="1615">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2638051023"/>
                    <PropertyData symbol-ref="d" value="33.0233109"/>
                    <PropertyData symbol-ref="GSH_local" value="0.05661715831"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.005536837222"/>
                    <PropertyData symbol-ref="d_normal" value="0.2186839907"/>
                    <Center>118.4545455,72.6969697,0</Center>
                    <Nodes>117, 70, 0;118, 70, 0;119, 70, 0;120, 70, 0;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0</Nodes>
                </Cell>
                <Cell id="1616">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4792028834"/>
                    <PropertyData symbol-ref="d" value="76.1757716"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9151136382"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09154146308"/>
                    <PropertyData symbol-ref="d_normal" value="0.7377734811"/>
                    <Center>39.42424242,54,0</Center>
                    <Nodes>37, 52, 0;38, 52, 0;39, 52, 0;40, 52, 0;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0</Nodes>
                </Cell>
                <Cell id="1620">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4963387327"/>
                    <PropertyData symbol-ref="d" value="91.72322178"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9858850961"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09856113005"/>
                    <PropertyData symbol-ref="d_normal" value="0.9246308556"/>
                    <Center>136.7096774,184.0645161,0</Center>
                    <Nodes>135, 182, 0;136, 182, 0;138, 182, 0;140, 182, 0;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0</Nodes>
                </Cell>
                <Cell id="1629">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4831342059"/>
                    <PropertyData symbol-ref="d" value="78.26733636"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9322066793"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09324116544"/>
                    <PropertyData symbol-ref="d_normal" value="0.7621090873"/>
                    <Center>135.5666667,169.6666667,0</Center>
                    <Nodes>134, 167, 0;135, 167, 0;136, 167, 0;137, 167, 0;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0</Nodes>
                </Cell>
                <Cell id="1634">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2965890193"/>
                    <PropertyData symbol-ref="d" value="44.09047206"/>
                    <PropertyData symbol-ref="GSH_local" value="0.180605474"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01839130841"/>
                    <PropertyData symbol-ref="d_normal" value="0.3487749266"/>
                    <Center>105.34375,56.5,0</Center>
                    <Nodes>107, 52, 0;106, 53, 0;107, 53, 0;108, 53, 0;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0</Nodes>
                </Cell>
                <Cell id="1635">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4907188601"/>
                    <PropertyData symbol-ref="d" value="83.7350733"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9634087709"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09637850873"/>
                    <PropertyData symbol-ref="d_normal" value="0.827066923"/>
                    <Center>90.93939394,183.1212121,0</Center>
                    <Nodes>88, 180, 0;89, 180, 0;90, 180, 0;91, 180, 0;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0</Nodes>
                </Cell>
                <Cell id="1636">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4911860883"/>
                    <PropertyData symbol-ref="d" value="84.0240386"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9648310346"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09649178057"/>
                    <PropertyData symbol-ref="d_normal" value="0.8311788963"/>
                    <Center>96.03225806,16.12903226,0</Center>
                    <Nodes>94, 14, 0;95, 14, 0;96, 14, 0;97, 14, 0;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0</Nodes>
                </Cell>
                <Cell id="1637">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.3732854835"/>
                    <PropertyData symbol-ref="d" value="56.87411572"/>
                    <PropertyData symbol-ref="GSH_local" value="0.5110484804"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.05026636798"/>
                    <PropertyData symbol-ref="d_normal" value="0.5044201117"/>
                    <Center>136.6451613,56.5483871,0</Center>
                    <Nodes>135, 54, 0;136, 54, 0;137, 54, 0;138, 54, 0;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0</Nodes>
                </Cell>
                <Cell id="1643">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4813029452"/>
                    <PropertyData symbol-ref="d" value="77.46947484"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9269456856"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09269960993"/>
                    <PropertyData symbol-ref="d_normal" value="0.7540691775"/>
                    <Center>26.03125,123.1875,0</Center>
                    <Nodes>26, 120, 0;27, 120, 0;25, 121, 0;26, 121, 0;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0</Nodes>
                </Cell>
                <Cell id="1648">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4737928194"/>
                    <PropertyData symbol-ref="d" value="74.36300424"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8961244484"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08961279718"/>
                    <PropertyData symbol-ref="d_normal" value="0.7154885733"/>
                    <Center>30.68965517,73.62068966,0</Center>
                    <Nodes>28, 72, 0;29, 72, 0;30, 72, 0;31, 72, 0;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0</Nodes>
                </Cell>
                <Cell id="1656">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4578453878"/>
                    <PropertyData symbol-ref="d" value="69.21084076"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8228353336"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08284872354"/>
                    <PropertyData symbol-ref="d_normal" value="0.6535676481"/>
                    <Center>47.03030303,144.9090909,0</Center>
                    <Nodes>47, 141, 0;48, 141, 0;46, 142, 0;47, 142, 0;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0</Nodes>
                </Cell>
                <Cell id="1661">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4669862039"/>
                    <PropertyData symbol-ref="d" value="71.97914822"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8675486674"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08683876499"/>
                    <PropertyData symbol-ref="d_normal" value="0.6879456334"/>
                    <Center>39.5625,139.46875,0</Center>
                    <Nodes>39, 136, 0;39, 137, 0;40, 137, 0;41, 137, 0;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0</Nodes>
                </Cell>
                <Cell id="1664">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4680787632"/>
                    <PropertyData symbol-ref="d" value="72.53404239"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8746386903"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08728622478"/>
                    <PropertyData symbol-ref="d_normal" value="0.6942610831"/>
                    <Center>29.67741935,117.7741935,0</Center>
                    <Nodes>29, 115, 0;30, 115, 0;31, 115, 0;32, 115, 0;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0</Nodes>
                </Cell>
                <Cell id="1673">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4874912222"/>
                    <PropertyData symbol-ref="d" value="80.64458375"/>
                    <PropertyData symbol-ref="GSH_local" value="0.949552334"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09495141571"/>
                    <PropertyData symbol-ref="d_normal" value="0.7935054164"/>
                    <Center>94.25,180.40625,0</Center>
                    <Nodes>92, 178, 0;93, 178, 0;94, 178, 0;95, 178, 0;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0</Nodes>
                </Cell>
                <Cell id="1677">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4594414976"/>
                    <PropertyData symbol-ref="d" value="70.67448889"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8453400577"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08404712079"/>
                    <PropertyData symbol-ref="d_normal" value="0.6698510196"/>
                    <Center>46.625,53.78125,0</Center>
                    <Nodes>43, 52, 0;44, 52, 0;45, 52, 0;46, 52, 0;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0</Nodes>
                </Cell>
                <Cell id="1678">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2652581882"/>
                    <PropertyData symbol-ref="d" value="33.96051246"/>
                    <PropertyData symbol-ref="GSH_local" value="0.06236822586"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.006236822586"/>
                    <PropertyData symbol-ref="d_normal" value="0.2289698638"/>
                    <Center>101.25,66.03125,0</Center>
                    <Nodes>98, 64, 0;100, 64, 0;101, 64, 0;102, 64, 0;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0</Nodes>
                </Cell>
                <Cell id="1680">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2576895154"/>
                    <PropertyData symbol-ref="d" value="27.94600487"/>
                    <PropertyData symbol-ref="GSH_local" value="0.03097215363"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.003025386502"/>
                    <PropertyData symbol-ref="d_normal" value="0.1556795182"/>
                    <Center>117.9666667,78.73333333,0</Center>
                    <Nodes>117, 75, 0;118, 76, 0;119, 76, 0;117, 77, 0;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0</Nodes>
                </Cell>
                <Cell id="1693">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4832955341"/>
                    <PropertyData symbol-ref="d" value="79.05521211"/>
                    <PropertyData symbol-ref="GSH_local" value="0.935355115"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09341779789"/>
                    <PropertyData symbol-ref="d_normal" value="0.7672017276"/>
                    <Center>21.6969697,108.9090909,0</Center>
                    <Nodes>21, 106, 0;19, 107, 0;20, 107, 0;21, 107, 0;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0</Nodes>
                </Cell>
                <Cell id="1709">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4969630554"/>
                    <PropertyData symbol-ref="d" value="92.98581505"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9879108632"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09878064018"/>
                    <PropertyData symbol-ref="d_normal" value="0.9403285213"/>
                    <Center>153.8125,23.75,0</Center>
                    <Nodes>155, 20, 0;153, 21, 0;154, 21, 0;155, 21, 0;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0</Nodes>
                </Cell>
                <Cell id="1711">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4864528101"/>
                    <PropertyData symbol-ref="d" value="80.30174956"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9469204503"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09461457913"/>
                    <PropertyData symbol-ref="d_normal" value="0.7881423361"/>
                    <Center>111.1515152,20.54545455,0</Center>
                    <Nodes>108, 18, 0;109, 18, 0;111, 18, 0;113, 18, 0;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0</Nodes>
                </Cell>
                <Cell id="1740">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.494966525"/>
                    <PropertyData symbol-ref="d" value="89.00500886"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9805181638"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09804211946"/>
                    <PropertyData symbol-ref="d_normal" value="0.8918598616"/>
                    <Center>39.4375,34.4375,0</Center>
                    <Nodes>39, 31, 0;38, 32, 0;39, 32, 0;40, 32, 0;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0</Nodes>
                </Cell>
                <Cell id="1756">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4768580695"/>
                    <PropertyData symbol-ref="d" value="75.41111687"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9049574124"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09054290153"/>
                    <PropertyData symbol-ref="d_normal" value="0.7253562803"/>
                    <Center>25.71875,113.5,0</Center>
                    <Nodes>26, 110, 0;25, 111, 0;26, 111, 0;22, 112, 0;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0</Nodes>
                </Cell>
                <Cell id="1764">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4785456423"/>
                    <PropertyData symbol-ref="d" value="76.38903498"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9155075583"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09132995466"/>
                    <PropertyData symbol-ref="d_normal" value="0.7382816537"/>
                    <Center>32.6875,63.25,0</Center>
                    <Nodes>32, 59, 0;33, 60, 0;34, 60, 0;33, 61, 0;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0</Nodes>
                </Cell>
                <Cell id="1765">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4951522506"/>
                    <PropertyData symbol-ref="d" value="89.2943036"/>
                    <PropertyData symbol-ref="GSH_local" value="0.981129802"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09816485857"/>
                    <PropertyData symbol-ref="d_normal" value="0.8951120916"/>
                    <Center>51.25,25.125,0</Center>
                    <Nodes>50, 22, 0;51, 22, 0;52, 22, 0;53, 22, 0;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0</Nodes>
                </Cell>
                <Cell id="1778">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4964002143"/>
                    <PropertyData symbol-ref="d" value="91.88406598"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9858759199"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09860422871"/>
                    <PropertyData symbol-ref="d_normal" value="0.9245649356"/>
                    <Center>119.8709677,10.29032258,0</Center>
                    <Nodes>117, 8, 0;118, 8, 0;119, 8, 0;120, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="1783">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2772121066"/>
                    <PropertyData symbol-ref="d" value="39.01086587"/>
                    <PropertyData symbol-ref="GSH_local" value="0.1063520444"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.01054098742"/>
                    <PropertyData symbol-ref="d_normal" value="0.2871442853"/>
                    <Center>122.4545455,68.06060606,0</Center>
                    <Nodes>120, 66, 0;121, 66, 0;122, 66, 0;123, 66, 0;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0</Nodes>
                </Cell>
                <Cell id="1797">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4964285499"/>
                    <PropertyData symbol-ref="d" value="91.81993871"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9860112496"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09858820655"/>
                    <PropertyData symbol-ref="d_normal" value="0.9255414302"/>
                    <Center>78.06451613,10.70967742,0</Center>
                    <Nodes>77, 8, 0;78, 8, 0;79, 8, 0;80, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="1803">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4915527588"/>
                    <PropertyData symbol-ref="d" value="84.16904947"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9661606336"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09662151991"/>
                    <PropertyData symbol-ref="d_normal" value="0.8351705298"/>
                    <Center>105.8125,184,0</Center>
                    <Nodes>105, 181, 0;104, 182, 0;105, 182, 0;106, 182, 0;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0</Nodes>
                </Cell>
                <Cell id="1810">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4875179965"/>
                    <PropertyData symbol-ref="d" value="80.46081272"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9478051097"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09485908271"/>
                    <PropertyData symbol-ref="d_normal" value="0.7899164297"/>
                    <Center>178.15625,118.53125,0</Center>
                    <Nodes>176, 116, 0;177, 116, 0;178, 116, 0;179, 116, 0;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0</Nodes>
                </Cell>
                <Cell id="1815">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4837290246"/>
                    <PropertyData symbol-ref="d" value="78.80154607"/>
                    <PropertyData symbol-ref="GSH_local" value="0.938053269"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09367176282"/>
                    <PropertyData symbol-ref="d_normal" value="0.7717531899"/>
                    <Center>174.2258065,125.9677419,0</Center>
                    <Nodes>176, 122, 0;176, 123, 0;177, 123, 0;176, 124, 0;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0</Nodes>
                </Cell>
                <Cell id="1817">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.2568810529"/>
                    <PropertyData symbol-ref="d" value="26.91951256"/>
                    <PropertyData symbol-ref="GSH_local" value="0.02754737393"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.002731478505"/>
                    <PropertyData symbol-ref="d_normal" value="0.143608585"/>
                    <Center>90.41935484,74.83870968,0</Center>
                    <Nodes>90, 72, 0;91, 72, 0;88, 73, 0;89, 73, 0;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0</Nodes>
                </Cell>
                <Cell id="1818">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4652009382"/>
                    <PropertyData symbol-ref="d" value="71.76611016"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8636250866"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08593356566"/>
                    <PropertyData symbol-ref="d_normal" value="0.6845730938"/>
                    <Center>167.375,75.28125,0</Center>
                    <Nodes>166, 72, 0;167, 72, 0;168, 72, 0;166, 73, 0;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0</Nodes>
                </Cell>
                <Cell id="1823">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4925004032"/>
                    <PropertyData symbol-ref="d" value="85.2516073"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9696951427"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09703395561"/>
                    <PropertyData symbol-ref="d_normal" value="0.8465673728"/>
                    <Center>16.96969697,119.0606061,0</Center>
                    <Nodes>16, 116, 0;15, 117, 0;16, 117, 0;17, 117, 0;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0</Nodes>
                </Cell>
                <Cell id="1840">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4696210896"/>
                    <PropertyData symbol-ref="d" value="73.29947978"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8802025351"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08795093716"/>
                    <PropertyData symbol-ref="d_normal" value="0.699434951"/>
                    <Center>170.71875,80.75,0</Center>
                    <Nodes>169, 78, 0;170, 78, 0;171, 78, 0;172, 78, 0;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0</Nodes>
                </Cell>
                <Cell id="1842">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4889131553"/>
                    <PropertyData symbol-ref="d" value="82.19097545"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9566983852"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09566983852"/>
                    <PropertyData symbol-ref="d_normal" value="0.8095298247"/>
                    <Center>181.96875,95.40625,0</Center>
                    <Nodes>179, 93, 0;183, 93, 0;184, 93, 0;185, 93, 0;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0</Nodes>
                </Cell>
                <Cell id="1844">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4184651096"/>
                    <PropertyData symbol-ref="d" value="62.2784354"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6680791449"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0673570967"/>
                    <PropertyData symbol-ref="d_normal" value="0.5699510095"/>
                    <Center>47.27272727,133.2424242,0</Center>
                    <Nodes>45, 130, 0;45, 131, 0;46, 131, 0;47, 131, 0;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0</Nodes>
                </Cell>
                <Cell id="1864">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4924445383"/>
                    <PropertyData symbol-ref="d" value="85.50899989"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9695303711"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09708283398"/>
                    <PropertyData symbol-ref="d_normal" value="0.8460081387"/>
                    <Center>112.6129032,184.483871,0</Center>
                    <Nodes>111, 181, 0;110, 182, 0;111, 182, 0;112, 182, 0;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0</Nodes>
                </Cell>
                <Cell id="1865">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4733130316"/>
                    <PropertyData symbol-ref="d" value="73.89674225"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8896924814"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08897609655"/>
                    <PropertyData symbol-ref="d_normal" value="0.7087603787"/>
                    <Center>35.25,135.625,0</Center>
                    <Nodes>33, 133, 0;34, 133, 0;35, 133, 0;36, 133, 0;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0</Nodes>
                </Cell>
                <Cell id="1869">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4789623777"/>
                    <PropertyData symbol-ref="d" value="76.38598261"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9142604307"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09163742502"/>
                    <PropertyData symbol-ref="d_normal" value="0.7366801029"/>
                    <Center>148.2424242,159.0909091,0</Center>
                    <Nodes>148, 156, 0;149, 156, 0;147, 157, 0;148, 157, 0;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0</Nodes>
                </Cell>
                <Cell id="1889">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.463402159"/>
                    <PropertyData symbol-ref="d" value="71.35630431"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8544036803"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08514344982"/>
                    <PropertyData symbol-ref="d_normal" value="0.6769565917"/>
                    <Center>169.9032258,86.5483871,0</Center>
                    <Nodes>168, 83, 0;168, 84, 0;169, 84, 0;170, 84, 0;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0</Nodes>
                </Cell>
                <Cell id="1892">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4951664147"/>
                    <PropertyData symbol-ref="d" value="88.92604293"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9805113351"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09804686784"/>
                    <PropertyData symbol-ref="d_normal" value="0.8918241195"/>
                    <Center>89.64516129,188.483871,0</Center>
                    <Nodes>90, 185, 0;89, 186, 0;90, 186, 0;91, 186, 0;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0</Nodes>
                </Cell>
                <Cell id="1897">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4942540388"/>
                    <PropertyData symbol-ref="d" value="87.60357331"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9771220325"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09769646049"/>
                    <PropertyData symbol-ref="d_normal" value="0.8754437222"/>
                    <Center>186.28125,85.5625,0</Center>
                    <Nodes>186, 81, 0;185, 82, 0;186, 82, 0;186, 83, 0;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0</Nodes>
                </Cell>
                <Cell id="1909">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4970824457"/>
                    <PropertyData symbol-ref="d" value="93.38606444"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9885110483"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09884774138"/>
                    <PropertyData symbol-ref="d_normal" value="0.9454813965"/>
                    <Center>129.25,188.625,0</Center>
                    <Nodes>129, 185, 0;128, 186, 0;129, 186, 0;130, 186, 0;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0</Nodes>
                </Cell>
                <Cell id="1913">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4888550492"/>
                    <PropertyData symbol-ref="d" value="81.82513988"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9543021202"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09541187436"/>
                    <PropertyData symbol-ref="d_normal" value="0.8038928405"/>
                    <Center>19.4516129,113.9677419,0</Center>
                    <Nodes>18, 111, 0;19, 111, 0;18, 112, 0;19, 112, 0;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0</Nodes>
                </Cell>
                <Cell id="1917">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4900782014"/>
                    <PropertyData symbol-ref="d" value="83.22188902"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9615227877"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09607250843"/>
                    <PropertyData symbol-ref="d_normal" value="0.8218452088"/>
                    <Center>78.25,180.5625,0</Center>
                    <Nodes>76, 178, 0;77, 178, 0;78, 178, 0;75, 179, 0;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0</Nodes>
                </Cell>
                <Cell id="1921">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4828199638"/>
                    <PropertyData symbol-ref="d" value="78.68591763"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9318001092"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09313147481"/>
                    <PropertyData symbol-ref="d_normal" value="0.7614675353"/>
                    <Center>42,152.7741935,0</Center>
                    <Nodes>43, 150, 0;44, 150, 0;42, 151, 0;43, 151, 0;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0</Nodes>
                </Cell>
                <Cell id="1928">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4905830597"/>
                    <PropertyData symbol-ref="d" value="83.45212887"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9628676124"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09624797007"/>
                    <PropertyData symbol-ref="d_normal" value="0.8255426359"/>
                    <Center>40.18181818,42.09090909,0</Center>
                    <Nodes>39, 39, 0;40, 39, 0;41, 39, 0;38, 40, 0;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0</Nodes>
                </Cell>
                <Cell id="1936">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4709607066"/>
                    <PropertyData symbol-ref="d" value="72.9312892"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8812205303"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08828926723"/>
                    <PropertyData symbol-ref="d_normal" value="0.7004039335"/>
                    <Center>161.7575758,138.3333333,0</Center>
                    <Nodes>159, 135, 0;161, 135, 0;162, 135, 0;163, 135, 0;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0</Nodes>
                </Cell>
                <Cell id="1937">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4940684084"/>
                    <PropertyData symbol-ref="d" value="86.89871985"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9754627953"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0976277823"/>
                    <PropertyData symbol-ref="d_normal" value="0.8682721497"/>
                    <Center>48.15625,169.9375,0</Center>
                    <Nodes>46, 167, 0;47, 167, 0;48, 167, 0;49, 167, 0;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0</Nodes>
                </Cell>
                <Cell id="1941">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4794013088"/>
                    <PropertyData symbol-ref="d" value="76.77214283"/>
                    <PropertyData symbol-ref="GSH_local" value="0.919667822"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0915596128"/>
                    <PropertyData symbol-ref="d_normal" value="0.7437842278"/>
                    <Center>98.16666667,176.7333333,0</Center>
                    <Nodes>97, 174, 0;98, 174, 0;99, 174, 0;100, 174, 0;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0</Nodes>
                </Cell>
                <Cell id="1960">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4523451307"/>
                    <PropertyData symbol-ref="d" value="68.50327928"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8083551412"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08118104469"/>
                    <PropertyData symbol-ref="d_normal" value="0.6439357528"/>
                    <Center>34.67741935,120.4193548,0</Center>
                    <Nodes>33, 118, 0;37, 118, 0;32, 119, 0;33, 119, 0;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0</Nodes>
                </Cell>
                <Cell id="1972">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4954111602"/>
                    <PropertyData symbol-ref="d" value="89.49473735"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9814253801"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09814927348"/>
                    <PropertyData symbol-ref="d_normal" value="0.8967209855"/>
                    <Center>105.4137931,189.3103448,0</Center>
                    <Nodes>104, 187, 0;105, 187, 0;106, 187, 0;107, 187, 0;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0</Nodes>
                </Cell>
                <Cell id="1998">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4773191614"/>
                    <PropertyData symbol-ref="d" value="75.53002818"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9092639015"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09079161947"/>
                    <PropertyData symbol-ref="d_normal" value="0.7304680095"/>
                    <Center>174.6060606,88.72727273,0</Center>
                    <Nodes>173, 85, 0;172, 86, 0;173, 86, 0;174, 86, 0;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0</Nodes>
                </Cell>
                <Cell id="2006">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.494155442"/>
                    <PropertyData symbol-ref="d" value="87.30252877"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9760459846"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09762507615"/>
                    <PropertyData symbol-ref="d_normal" value="0.8707373733"/>
                    <Center>128.3225806,17.5483871,0</Center>
                    <Nodes>125, 15, 0;126, 15, 0;127, 15, 0;128, 15, 0;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0</Nodes>
                </Cell>
                <Cell id="2015">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4905946474"/>
                    <PropertyData symbol-ref="d" value="83.03194535"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9620980329"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09623169383"/>
                    <PropertyData symbol-ref="d_normal" value="0.8234113337"/>
                    <Center>57.21875,171.03125,0</Center>
                    <Nodes>60, 168, 0;55, 169, 0;57, 169, 0;59, 169, 0;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0</Nodes>
                </Cell>
                <Cell id="2016">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4846587387"/>
                    <PropertyData symbol-ref="d" value="78.86155913"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9362134052"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09373358329"/>
                    <PropertyData symbol-ref="d_normal" value="0.7686300392"/>
                    <Center>54.96875,164.625,0</Center>
                    <Nodes>53, 161, 0;54, 161, 0;55, 161, 0;53, 162, 0;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0</Nodes>
                </Cell>
                <Cell id="2021">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4826606076"/>
                    <PropertyData symbol-ref="d" value="78.40382743"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9313532851"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09312195146"/>
                    <PropertyData symbol-ref="d_normal" value="0.7607665395"/>
                    <Center>171.53125,131.84375,0</Center>
                    <Nodes>170, 129, 0;171, 129, 0;172, 129, 0;173, 129, 0;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0</Nodes>
                </Cell>
                <Cell id="2051">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4894798062"/>
                    <PropertyData symbol-ref="d" value="82.03887184"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9568314099"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09570506297"/>
                    <PropertyData symbol-ref="d_normal" value="0.8098514062"/>
                    <Center>154.625,161.28125,0</Center>
                    <Nodes>156, 158, 0;154, 159, 0;155, 159, 0;156, 159, 0;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0</Nodes>
                </Cell>
                <Cell id="2057">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4976980738"/>
                    <PropertyData symbol-ref="d" value="95.54134924"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9909163222"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09908841552"/>
                    <PropertyData symbol-ref="d_normal" value="0.969215094"/>
                    <Center>132.71875,10.1875,0</Center>
                    <Nodes>129, 8, 0;130, 8, 0;131, 8, 0;132, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="2060">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.482685042"/>
                    <PropertyData symbol-ref="d" value="78.74202589"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9318745919"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09318745919"/>
                    <PropertyData symbol-ref="d_normal" value="0.7615848005"/>
                    <Center>177.5483871,112.9354839,0</Center>
                    <Nodes>176, 110, 0;177, 110, 0;176, 111, 0;177, 111, 0;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0</Nodes>
                </Cell>
                <Cell id="2077">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4879215165"/>
                    <PropertyData symbol-ref="d" value="81.33834347"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9514395663"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09520016439"/>
                    <PropertyData symbol-ref="d_normal" value="0.7975167093"/>
                    <Center>18.43333333,103.6666667,0</Center>
                    <Nodes>16, 101, 0;17, 101, 0;16, 102, 0;17, 102, 0;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0</Nodes>
                </Cell>
                <Cell id="2088">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4163469868"/>
                    <PropertyData symbol-ref="d" value="62.01078063"/>
                    <PropertyData symbol-ref="GSH_local" value="0.6539534202"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.06612670752"/>
                    <PropertyData symbol-ref="d_normal" value="0.5636462736"/>
                    <Center>42.375,123,0</Center>
                    <Nodes>40, 121, 0;41, 121, 0;42, 121, 0;43, 121, 0;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0</Nodes>
                </Cell>
                <Cell id="2105">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4857651451"/>
                    <PropertyData symbol-ref="d" value="79.46931816"/>
                    <PropertyData symbol-ref="GSH_local" value="0.941208242"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09420359102"/>
                    <PropertyData symbol-ref="d_normal" value="0.7773162739"/>
                    <Center>101.8484848,20.51515152,0</Center>
                    <Nodes>99, 17, 0;100, 17, 0;101, 17, 0;99, 18, 0;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0</Nodes>
                </Cell>
                <Cell id="2122">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4950350626"/>
                    <PropertyData symbol-ref="d" value="88.53608132"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9796179334"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09796855322"/>
                    <PropertyData symbol-ref="d_normal" value="0.8872507207"/>
                    <Center>139.1612903,179.2580645,0</Center>
                    <Nodes>139, 176, 0;140, 176, 0;137, 177, 0;138, 177, 0;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0</Nodes>
                </Cell>
                <Cell id="2132">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4918190754"/>
                    <PropertyData symbol-ref="d" value="84.57385133"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9674102037"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09667426815"/>
                    <PropertyData symbol-ref="d_normal" value="0.8390623364"/>
                    <Center>166.25,152.6875,0</Center>
                    <Nodes>165, 150, 0;166, 150, 0;167, 150, 0;164, 151, 0;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0</Nodes>
                </Cell>
                <Cell id="2145">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4951793512"/>
                    <PropertyData symbol-ref="d" value="89.13277207"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9809979663"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0980662396"/>
                    <PropertyData symbol-ref="d_normal" value="0.8944024379"/>
                    <Center>95.375,11.09375,0</Center>
                    <Nodes>97, 8, 0;98, 8, 0;96, 9, 0;97, 9, 0;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0</Nodes>
                </Cell>
                <Cell id="2150">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4711267094"/>
                    <PropertyData symbol-ref="d" value="73.50880182"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8863144594"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08887257974"/>
                    <PropertyData symbol-ref="d_normal" value="0.7053635587"/>
                    <Center>41.4375,144.65625,0</Center>
                    <Nodes>42, 141, 0;41, 142, 0;43, 142, 0;40, 143, 0;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0</Nodes>
                </Cell>
                <Cell id="2151">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4942904145"/>
                    <PropertyData symbol-ref="d" value="87.59898816"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9769521693"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09768646538"/>
                    <PropertyData symbol-ref="d_normal" value="0.8746866043"/>
                    <Center>88.5,13.09375,0</Center>
                    <Nodes>88, 10, 0;88, 11, 0;89, 11, 0;90, 11, 0;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0</Nodes>
                </Cell>
                <Cell id="2158">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4967555343"/>
                    <PropertyData symbol-ref="d" value="91.91067547"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9864595559"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09866396867"/>
                    <PropertyData symbol-ref="d_normal" value="0.9288441258"/>
                    <Center>124.7878788,11.3030303,0</Center>
                    <Nodes>123, 8, 0;124, 8, 0;125, 8, 0;126, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="2175">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4919222176"/>
                    <PropertyData symbol-ref="d" value="84.9986962"/>
                    <PropertyData symbol-ref="GSH_local" value="0.968626726"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09685045098"/>
                    <PropertyData symbol-ref="d_normal" value="0.8429922939"/>
                    <Center>36.20588235,155.9411765,0</Center>
                    <Nodes>35, 153, 0;34, 154, 0;35, 154, 0;36, 154, 0;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0</Nodes>
                </Cell>
                <Cell id="2179">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4747483501"/>
                    <PropertyData symbol-ref="d" value="73.9104716"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8910923174"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08925192095"/>
                    <PropertyData symbol-ref="d_normal" value="0.7101947458"/>
                    <Center>142.2,161,0</Center>
                    <Nodes>143, 158, 0;141, 159, 0;142, 159, 0;143, 159, 0;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0</Nodes>
                </Cell>
                <Cell id="2180">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4979989396"/>
                    <PropertyData symbol-ref="d" value="96.7707365"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9921161623"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09921161623"/>
                    <PropertyData symbol-ref="d_normal" value="0.9835025402"/>
                    <Center>65.8,9.433333333,0</Center>
                    <Nodes>62, 8, 0;63, 8, 0;64, 8, 0;65, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="2181">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4966685166"/>
                    <PropertyData symbol-ref="d" value="92.16442914"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9865092277"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09865058385"/>
                    <PropertyData symbol-ref="d_normal" value="0.9292166759"/>
                    <Center>76.3125,189.03125,0</Center>
                    <Nodes>75, 185, 0;74, 186, 0;75, 186, 0;73, 187, 0;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0</Nodes>
                </Cell>
                <Cell id="2184">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4778804841"/>
                    <PropertyData symbol-ref="d" value="76.03496786"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9107882752"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09114305112"/>
                    <PropertyData symbol-ref="d_normal" value="0.7323297987"/>
                    <Center>44.38709677,48.32258065,0</Center>
                    <Nodes>43, 45, 0;44, 45, 0;42, 46, 0;43, 46, 0;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0</Nodes>
                </Cell>
                <Cell id="2220">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4946679685"/>
                    <PropertyData symbol-ref="d" value="88.3723204"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9787083912"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09787251839"/>
                    <PropertyData symbol-ref="d_normal" value="0.8827920692"/>
                    <Center>12.6875,113.5,0</Center>
                    <Nodes>11, 110, 0;12, 110, 0;9, 111, 0;10, 111, 0;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0</Nodes>
                </Cell>
                <Cell id="2233">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4891498368"/>
                    <PropertyData symbol-ref="d" value="82.07318571"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9557384256"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09559696476"/>
                    <PropertyData symbol-ref="d_normal" value="0.8072367356"/>
                    <Center>28.96774194,58.90322581,0</Center>
                    <Nodes>26, 56, 0;27, 56, 0;28, 56, 0;29, 56, 0;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0</Nodes>
                </Cell>
                <Cell id="2241">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4949033818"/>
                    <PropertyData symbol-ref="d" value="88.50348496"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9791253272"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09787508283"/>
                    <PropertyData symbol-ref="d_normal" value="0.8848123055"/>
                    <Center>160.3636364,164.6969697,0</Center>
                    <Nodes>158, 162, 0;163, 162, 0;158, 163, 0;159, 163, 0;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0</Nodes>
                </Cell>
                <Cell id="2277">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4957662206"/>
                    <PropertyData symbol-ref="d" value="90.17204151"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9831431096"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09829849498"/>
                    <PropertyData symbol-ref="d_normal" value="0.9065995193"/>
                    <Center>107.6875,10.15625,0</Center>
                    <Nodes>105, 8, 0;106, 8, 0;107, 8, 0;108, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="2283">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4704661516"/>
                    <PropertyData symbol-ref="d" value="73.34686597"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8835026844"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08814247041"/>
                    <PropertyData symbol-ref="d_normal" value="0.7026026099"/>
                    <Center>165.8787879,67.75757576,0</Center>
                    <Nodes>167, 64, 0;164, 65, 0;165, 65, 0;166, 65, 0;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0</Nodes>
                </Cell>
                <Cell id="2314">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4855654502"/>
                    <PropertyData symbol-ref="d" value="79.49234682"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9411823055"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09410510063"/>
                    <PropertyData symbol-ref="d_normal" value="0.7772694121"/>
                    <Center>169.9375,62.21875,0</Center>
                    <Nodes>170, 59, 0;171, 59, 0;168, 60, 0;169, 60, 0;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0</Nodes>
                </Cell>
                <Cell id="2318">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4963581252"/>
                    <PropertyData symbol-ref="d" value="91.60670861"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9857518448"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09857518448"/>
                    <PropertyData symbol-ref="d_normal" value="0.9236777209"/>
                    <Center>83.9375,9.8125,0</Center>
                    <Nodes>81, 8, 0;82, 8, 0;83, 8, 0;84, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="2325">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4835307394"/>
                    <PropertyData symbol-ref="d" value="78.63033059"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9344900902"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09344720838"/>
                    <PropertyData symbol-ref="d_normal" value="0.7657799596"/>
                    <Center>155.65625,44.5625,0</Center>
                    <Nodes>153, 42, 0;154, 42, 0;155, 42, 0;156, 42, 0;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0</Nodes>
                </Cell>
                <Cell id="2364">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4822054846"/>
                    <PropertyData symbol-ref="d" value="77.84084089"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9273864724"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09278028097"/>
                    <PropertyData symbol-ref="d_normal" value="0.7547219151"/>
                    <Center>35.6875,143.96875,0</Center>
                    <Nodes>35, 141, 0;36, 141, 0;38, 141, 0;33, 142, 0;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0</Nodes>
                </Cell>
                <Cell id="2372">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4932221614"/>
                    <PropertyData symbol-ref="d" value="85.60509007"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9712834453"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09716716762"/>
                    <PropertyData symbol-ref="d_normal" value="0.8521144563"/>
                    <Center>45.64516129,34.22580645,0</Center>
                    <Nodes>44, 31, 0;43, 32, 0;44, 32, 0;45, 32, 0;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0</Nodes>
                </Cell>
                <Cell id="2378">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4930567885"/>
                    <PropertyData symbol-ref="d" value="86.15889901"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9727499035"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09730555935"/>
                    <PropertyData symbol-ref="d_normal" value="0.8575069949"/>
                    <Center>82.60606061,15.6969697,0</Center>
                    <Nodes>81, 13, 0;82, 13, 0;83, 13, 0;84, 13, 0;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0</Nodes>
                </Cell>
                <Cell id="2396">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4506205514"/>
                    <PropertyData symbol-ref="d" value="67.77282313"/>
                    <PropertyData symbol-ref="GSH_local" value="0.7966890647"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08001084177"/>
                    <PropertyData symbol-ref="d_normal" value="0.6365727962"/>
                    <Center>40.90625,133.71875,0</Center>
                    <Nodes>38, 131, 0;39, 131, 0;40, 131, 0;39, 132, 0;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0</Nodes>
                </Cell>
                <Cell id="2416">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4952185397"/>
                    <PropertyData symbol-ref="d" value="89.15849807"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9808589351"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09807052227"/>
                    <PropertyData symbol-ref="d_normal" value="0.8936592632"/>
                    <Center>40.42424242,166.030303,0</Center>
                    <Nodes>40, 162, 0;40, 163, 0;41, 163, 0;42, 163, 0;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0</Nodes>
                </Cell>
                <Cell id="2417">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4960429995"/>
                    <PropertyData symbol-ref="d" value="91.00336984"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9843493733"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0984359255"/>
                    <PropertyData symbol-ref="d_normal" value="0.9141469925"/>
                    <Center>43.14705882,171.2647059,0</Center>
                    <Nodes>43, 167, 0;43, 168, 0;44, 168, 0;45, 168, 0;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0</Nodes>
                </Cell>
                <Cell id="2449">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4973717535"/>
                    <PropertyData symbol-ref="d" value="94.08328168"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9893143058"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09893143058"/>
                    <PropertyData symbol-ref="d_normal" value="0.9528106227"/>
                    <Center>72.70967742,9.967741935,0</Center>
                    <Nodes>70, 8, 0;71, 8, 0;72, 8, 0;73, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="2494">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4899762366"/>
                    <PropertyData symbol-ref="d" value="82.97373748"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9609774548"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09603510047"/>
                    <PropertyData symbol-ref="d_normal" value="0.8203811387"/>
                    <Center>51.81818182,167.9090909,0</Center>
                    <Nodes>50, 164, 0;51, 164, 0;53, 164, 0;50, 165, 0;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0</Nodes>
                </Cell>
                <Cell id="2508">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4977807797"/>
                    <PropertyData symbol-ref="d" value="95.77378555"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9912756933"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09911122493"/>
                    <PropertyData symbol-ref="d_normal" value="0.9732879689"/>
                    <Center>64.16129032,188.9354839,0</Center>
                    <Nodes>63, 186, 0;64, 186, 0;62, 187, 0;63, 187, 0;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0</Nodes>
                </Cell>
                <Cell id="2520">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4930455484"/>
                    <PropertyData symbol-ref="d" value="86.2670273"/>
                    <PropertyData symbol-ref="GSH_local" value="0.972767975"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09726306415"/>
                    <PropertyData symbol-ref="d_normal" value="0.8575751921"/>
                    <Center>160.8387097,38.93548387,0</Center>
                    <Nodes>162, 36, 0;163, 36, 0;160, 37, 0;161, 37, 0;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0</Nodes>
                </Cell>
                <Cell id="2522">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4702626896"/>
                    <PropertyData symbol-ref="d" value="73.15402572"/>
                    <PropertyData symbol-ref="GSH_local" value="0.8831739996"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.08815112471"/>
                    <PropertyData symbol-ref="d_normal" value="0.7022836584"/>
                    <Center>165.6176471,132.6764706,0</Center>
                    <Nodes>165, 128, 0;165, 129, 0;164, 130, 0;165, 130, 0;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0</Nodes>
                </Cell>
                <Cell id="2523">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4971943559"/>
                    <PropertyData symbol-ref="d" value="93.64349448"/>
                    <PropertyData symbol-ref="GSH_local" value="0.988701426"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09887573791"/>
                    <PropertyData symbol-ref="d_normal" value="0.9471715866"/>
                    <Center>46.12121212,23.63636364,0</Center>
                    <Nodes>44, 21, 0;45, 21, 0;48, 21, 0;49, 21, 0;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0</Nodes>
                </Cell>
                <Cell id="2525">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4846418681"/>
                    <PropertyData symbol-ref="d" value="79.1134764"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9376146044"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09368139706"/>
                    <PropertyData symbol-ref="d_normal" value="0.7710007792"/>
                    <Center>23.25806452,118.6129032,0</Center>
                    <Nodes>22, 116, 0;23, 116, 0;24, 116, 0;25, 116, 0;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0</Nodes>
                </Cell>
                <Cell id="2539">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4916339653"/>
                    <PropertyData symbol-ref="d" value="84.27530424"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9666661231"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09666214827"/>
                    <PropertyData symbol-ref="d_normal" value="0.8367278961"/>
                    <Center>21.21875,69.90625,0</Center>
                    <Nodes>21, 66, 0;20, 67, 0;21, 67, 0;20, 68, 0;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0</Nodes>
                </Cell>
                <Cell id="2603">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4925581773"/>
                    <PropertyData symbol-ref="d" value="85.4320648"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9709063825"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09708188446"/>
                    <PropertyData symbol-ref="d_normal" value="0.8507711229"/>
                    <Center>184.0322581,115.3225806,0</Center>
                    <Nodes>182, 112, 0;182, 113, 0;183, 113, 0;181, 114, 0;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0</Nodes>
                </Cell>
                <Cell id="2626">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4962876451"/>
                    <PropertyData symbol-ref="d" value="91.40092399"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9851322357"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09851878318"/>
                    <PropertyData symbol-ref="d_normal" value="0.9193580483"/>
                    <Center>156.7272727,28.6969697,0</Center>
                    <Nodes>157, 24, 0;157, 25, 0;156, 26, 0;157, 26, 0;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0</Nodes>
                </Cell>
                <Cell id="2629">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4934488342"/>
                    <PropertyData symbol-ref="d" value="86.24755431"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9728615374"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09735989093"/>
                    <PropertyData symbol-ref="d_normal" value="0.8579289761"/>
                    <Center>163.3333333,158.6363636,0</Center>
                    <Nodes>163, 156, 0;164, 156, 0;166, 156, 0;160, 157, 0;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0</Nodes>
                </Cell>
                <Cell id="2651">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4903727712"/>
                    <PropertyData symbol-ref="d" value="83.01800138"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9612652067"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09611688438"/>
                    <PropertyData symbol-ref="d_normal" value="0.8211512091"/>
                    <Center>171.8,141.7,0</Center>
                    <Nodes>168, 140, 0;169, 140, 0;170, 140, 0;171, 140, 0;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0</Nodes>
                </Cell>
                <Cell id="2657">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4951927592"/>
                    <PropertyData symbol-ref="d" value="89.26796738"/>
                    <PropertyData symbol-ref="GSH_local" value="0.981162327"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09809315469"/>
                    <PropertyData symbol-ref="d_normal" value="0.8952879169"/>
                    <Center>110.9354839,188.7096774,0</Center>
                    <Nodes>108, 186, 0;109, 186, 0;111, 186, 0;108, 187, 0;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0</Nodes>
                </Cell>
                <Cell id="2667">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4962299012"/>
                    <PropertyData symbol-ref="d" value="90.92335747"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9844214086"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09846732702"/>
                    <PropertyData symbol-ref="d_normal" value="0.9146156438"/>
                    <Center>113.9393939,10.15151515,0</Center>
                    <Nodes>111, 8, 0;112, 8, 0;113, 8, 0;114, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="2697">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4916455343"/>
                    <PropertyData symbol-ref="d" value="84.35120035"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9667560477"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.096648292"/>
                    <PropertyData symbol-ref="d_normal" value="0.8370073321"/>
                    <Center>32.16129032,150.1935484,0</Center>
                    <Nodes>33, 146, 0;32, 147, 0;33, 147, 0;34, 147, 0;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0</Nodes>
                </Cell>
                <Cell id="2727">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4956354165"/>
                    <PropertyData symbol-ref="d" value="90.16613756"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9828144944"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0983076757"/>
                    <PropertyData symbol-ref="d_normal" value="0.904635406"/>
                    <Center>71.4516129,14.80645161,0</Center>
                    <Nodes>69, 12, 0;71, 12, 0;69, 13, 0;70, 13, 0;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0</Nodes>
                </Cell>
                <Cell id="2784">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4893935012"/>
                    <PropertyData symbol-ref="d" value="82.31992619"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9568206034"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09568481644"/>
                    <PropertyData symbol-ref="d_normal" value="0.8098252466"/>
                    <Center>25.38709677,134.7419355,0</Center>
                    <Nodes>23, 133, 0;24, 133, 0;25, 133, 0;26, 133, 0;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0</Nodes>
                </Cell>
                <Cell id="2791">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4970418126"/>
                    <PropertyData symbol-ref="d" value="92.81749776"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9875585477"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0987800973"/>
                    <PropertyData symbol-ref="d_normal" value="0.9374201956"/>
                    <Center>46.48387097,175.9032258,0</Center>
                    <Nodes>46, 173, 0;47, 173, 0;48, 173, 0;45, 174, 0;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0</Nodes>
                </Cell>
                <Cell id="2819">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4875931262"/>
                    <PropertyData symbol-ref="d" value="80.40105769"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9475382636"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09477357497"/>
                    <PropertyData symbol-ref="d_normal" value="0.7893783246"/>
                    <Center>180.0967742,91.09677419,0</Center>
                    <Nodes>182, 88, 0;183, 88, 0;179, 89, 0;180, 89, 0;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0</Nodes>
                </Cell>
                <Cell id="2861">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4920744025"/>
                    <PropertyData symbol-ref="d" value="85.02145166"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9689206458"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09683175079"/>
                    <PropertyData symbol-ref="d_normal" value="0.8439638969"/>
                    <Center>181.4333333,75.83333333,0</Center>
                    <Nodes>182, 72, 0;181, 73, 0;182, 73, 0;180, 74, 0;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0</Nodes>
                </Cell>
                <Cell id="2862">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4907367285"/>
                    <PropertyData symbol-ref="d" value="83.68133338"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9630234479"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09628078455"/>
                    <PropertyData symbol-ref="d_normal" value="0.8259793775"/>
                    <Center>24.125,64.84375,0</Center>
                    <Nodes>24, 61, 0;23, 62, 0;24, 62, 0;25, 62, 0;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0</Nodes>
                </Cell>
                <Cell id="2903">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4897334976"/>
                    <PropertyData symbol-ref="d" value="82.66299051"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9594404516"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09592038626"/>
                    <PropertyData symbol-ref="d_normal" value="0.8163579028"/>
                    <Center>163,46.8,0</Center>
                    <Nodes>162, 44, 0;163, 44, 0;164, 44, 0;161, 45, 0;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0</Nodes>
                </Cell>
                <Cell id="2907">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4937023742"/>
                    <PropertyData symbol-ref="d" value="87.16863005"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9752327483"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09753800498"/>
                    <PropertyData symbol-ref="d_normal" value="0.8673153875"/>
                    <Center>150.875,170.84375,0</Center>
                    <Nodes>151, 168, 0;152, 168, 0;147, 169, 0;149, 169, 0;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0</Nodes>
                </Cell>
                <Cell id="2974">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4847561031"/>
                    <PropertyData symbol-ref="d" value="79.55336431"/>
                    <PropertyData symbol-ref="GSH_local" value="0.940062048"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09402030281"/>
                    <PropertyData symbol-ref="d_normal" value="0.7752635988"/>
                    <Center>39.29032258,48.83870968,0</Center>
                    <Nodes>39, 45, 0;39, 46, 0;40, 46, 0;37, 47, 0;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0</Nodes>
                </Cell>
                <Cell id="3194">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4915191231"/>
                    <PropertyData symbol-ref="d" value="84.31902447"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9661601235"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09661086741"/>
                    <PropertyData symbol-ref="d_normal" value="0.8351689695"/>
                    <Center>20.0625,127.0625,0</Center>
                    <Nodes>18, 125, 0;19, 125, 0;20, 125, 0;21, 125, 0;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0</Nodes>
                </Cell>
                <Cell id="3361">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4916251613"/>
                    <PropertyData symbol-ref="d" value="84.42797527"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9666749047"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09667272612"/>
                    <PropertyData symbol-ref="d_normal" value="0.8367551524"/>
                    <Center>182.3333333,81.12121212,0</Center>
                    <Nodes>179, 79, 0;180, 79, 0;181, 79, 0;182, 79, 0;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0</Nodes>
                </Cell>
                <Cell id="3403">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4915289208"/>
                    <PropertyData symbol-ref="d" value="84.30370374"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9660477589"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09661118727"/>
                    <PropertyData symbol-ref="d_normal" value="0.8348258409"/>
                    <Center>167.625,49.53125,0</Center>
                    <Nodes>168, 46, 0;166, 47, 0;167, 47, 0;168, 47, 0;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0</Nodes>
                </Cell>
                <Cell id="3637">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.492634993"/>
                    <PropertyData symbol-ref="d" value="85.3953867"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9697543017"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09701006181"/>
                    <PropertyData symbol-ref="d_normal" value="0.8467688774"/>
                    <Center>182.8181818,120.8181818,0</Center>
                    <Nodes>182, 118, 0;183, 118, 0;184, 118, 0;185, 118, 0;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0</Nodes>
                </Cell>
                <Cell id="3662">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4923749048"/>
                    <PropertyData symbol-ref="d" value="85.2441984"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9698600115"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09697274825"/>
                    <PropertyData symbol-ref="d_normal" value="0.8471298932"/>
                    <Center>34.87096774,45.12903226,0</Center>
                    <Nodes>33, 43, 0;34, 43, 0;35, 43, 0;36, 43, 0;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0</Nodes>
                </Cell>
                <Cell id="3695">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4903771511"/>
                    <PropertyData symbol-ref="d" value="83.39529012"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9623264833"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09619426649"/>
                    <PropertyData symbol-ref="d_normal" value="0.82403964"/>
                    <Center>26.75,140.03125,0</Center>
                    <Nodes>25, 137, 0;27, 137, 0;28, 137, 0;24, 138, 0;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0</Nodes>
                </Cell>
                <Cell id="3954">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4899061576"/>
                    <PropertyData symbol-ref="d" value="82.64526202"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9589095174"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09599293319"/>
                    <PropertyData symbol-ref="d_normal" value="0.8150020191"/>
                    <Center>33.78125,50.34375,0</Center>
                    <Nodes>35, 47, 0;31, 48, 0;32, 48, 0;33, 48, 0;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0</Nodes>
                </Cell>
                <Cell id="4005">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4978275237"/>
                    <PropertyData symbol-ref="d" value="95.71711921"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9913130595"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09913730866"/>
                    <PropertyData symbol-ref="d_normal" value="0.9737209576"/>
                    <Center>135.28125,188.90625,0</Center>
                    <Nodes>132, 187, 0;133, 187, 0;134, 187, 0;135, 187, 0;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0</Nodes>
                </Cell>
                <Cell id="4219">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.491306744"/>
                    <PropertyData symbol-ref="d" value="84.11827843"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9659108137"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0965486522"/>
                    <PropertyData symbol-ref="d_normal" value="0.8344091288"/>
                    <Center>179.96875,126.09375,0</Center>
                    <Nodes>179, 122, 0;178, 123, 0;179, 123, 0;180, 123, 0;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0</Nodes>
                </Cell>
                <Cell id="4396">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4902087382"/>
                    <PropertyData symbol-ref="d" value="82.83314012"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9606779115"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0960581368"/>
                    <PropertyData symbol-ref="d_normal" value="0.8195852783"/>
                    <Center>174.5483871,136.5806452,0</Center>
                    <Nodes>174, 134, 0;175, 134, 0;176, 134, 0;177, 134, 0;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0</Nodes>
                </Cell>
                <Cell id="4473">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4902472344"/>
                    <PropertyData symbol-ref="d" value="83.10096288"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9610195789"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.0960612425"/>
                    <PropertyData symbol-ref="d_normal" value="0.8204935286"/>
                    <Center>176.2333333,67,0</Center>
                    <Nodes>177, 63, 0;177, 64, 0;176, 65, 0;177, 65, 0;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0</Nodes>
                </Cell>
                <Cell id="4482">
                    <PropertyData symbol-ref="c" value="1"/>
                    <PropertyData symbol-ref="vc" value="33"/>
                    <PropertyData symbol-ref="GSH" value="0.4964678611"/>
                    <PropertyData symbol-ref="d" value="91.6176478"/>
                    <PropertyData symbol-ref="GSH_local" value="0.9859432321"/>
                    <PropertyData symbol-ref="GSH_cell" value="0.09858731411"/>
                    <PropertyData symbol-ref="d_normal" value="0.9250494795"/>
                    <Center>42.43333333,28.8,0</Center>
                    <Nodes>43, 25, 0;42, 26, 0;43, 26, 0;41, 27, 0;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0</Nodes>
                </Cell>
            </Population>
            <Population size="6" type="PV">
                <Cell id="1">
                    <PropertyData symbol-ref="c" value="3"/>
                    <Center>53,13.5703125,0</Center>
                    <Nodes>51, 8, 0;52, 8, 0;53, 8, 0;54, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="2">
                    <PropertyData symbol-ref="c" value="3"/>
                    <Center>9.457142857,99.92857143,0</Center>
                    <Nodes>8, 91, 0;9, 91, 0;8, 92, 0;9, 92, 0;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0</Nodes>
                </Cell>
                <Cell id="3">
                    <PropertyData symbol-ref="c" value="3"/>
                    <Center>146.804878,13.60162602,0</Center>
                    <Nodes>141, 8, 0;142, 8, 0;143, 8, 0;144, 8, 0;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0</Nodes>
                </Cell>
                <Cell id="4">
                    <PropertyData symbol-ref="c" value="3"/>
                    <Center>190.2442748,100,0</Center>
                    <Nodes>191, 91, 0;192, 91, 0;190, 92, 0;191, 92, 0;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0</Nodes>
                </Cell>
                <Cell id="5">
                    <PropertyData symbol-ref="c" value="3"/>
                    <Center>53.0173913,185.973913,0</Center>
                    <Nodes>46, 181, 0;47, 181, 0;48, 181, 0;49, 181, 0;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0</Nodes>
                </Cell>
                <Cell id="6">
                    <PropertyData symbol-ref="c" value="3"/>
                    <Center>146.9473684,185.9561404,0</Center>
                    <Nodes>146, 181, 0;147, 181, 0;148, 181, 0;149, 181, 0;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0</Nodes>
                </Cell>
            </Population>
            <Population size="1" type="CV">
                <Cell id="7">
                    <PropertyData symbol-ref="c" value="2"/>
                    <Center>100,100,0</Center>
                    <Nodes>95, 87, 0;96, 87, 0;97, 87, 0;98, 87, 0;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0</Nodes>
                </Cell>
            </Population>
            <Population size="0" type="necrotic"/>
            <Population size="0" type="macrophages"/>
            <Population size="1" type="medium">
                <Cell id="0">
                    <Nodes></Nodes>
                </Cell>
            </Population>
            <Population size="6" type="macro_influx">
                <Cell id="12487">
                    <PropertyData symbol-ref="c" value="6"/>
                    <Center>54.85714286,16.9047619,0</Center>
                    <Nodes>60, 8, 0;61, 8, 0;60, 9, 0;61, 9, 0;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0</Nodes>
                </Cell>
                <Cell id="12490">
                    <PropertyData symbol-ref="c" value="6"/>
                    <Center>13.19047619,99.28571429,0</Center>
                    <Nodes>9, 89, 0;9, 90, 0;10, 90, 0;10, 91, 0;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0</Nodes>
                </Cell>
                <Cell id="12491">
                    <PropertyData symbol-ref="c" value="6"/>
                    <Center>144.1190476,16.35714286,0</Center>
                    <Nodes>139, 8, 0;140, 8, 0;139, 9, 0;140, 9, 0;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0</Nodes>
                </Cell>
                <Cell id="12498">
                    <PropertyData symbol-ref="c" value="6"/>
                    <Center>186.8095238,99.73809524,0</Center>
                    <Nodes>191, 89, 0;190, 90, 0;191, 90, 0;188, 91, 0;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0</Nodes>
                </Cell>
                <Cell id="12523">
                    <PropertyData symbol-ref="c" value="6"/>
                    <Center>54.64285714,182.6428571,0</Center>
                    <Nodes>47, 179, 0;48, 179, 0;49, 179, 0;50, 179, 0;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0</Nodes>
                </Cell>
                <Cell id="12766">
                    <PropertyData symbol-ref="c" value="6"/>
                    <Center>145.1860465,182.7906977,0</Center>
                    <Nodes>146, 179, 0;147, 179, 0;148, 179, 0;149, 179, 0;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0</Nodes>
                </Cell>
            </Population>
        </CellPopulations>
    </Disabled>
-->
    <CellPopulations>
        <!--    <Disabled>
        <Population name="Central Vein" size="1" type="CV">
            <Cell id="7">
                <PropertyData symbol-ref="c" value="2"/>
                <Center>100,100,0</Center>
                <Nodes>95, 87, 0;96, 87, 0;97, 87, 0;98, 87, 0;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0</Nodes>
            </Cell>
        </Population>
    </Disabled>
-->
        <!--    <Disabled>
        <Population name="Portal Veins" size="6" type="PV">
            <Cell id="1">
                <PropertyData symbol-ref="c" value="3"/>
                <Center>53,13.5703125,0</Center>
                <Nodes>51, 8, 0;52, 8, 0;53, 8, 0;54, 8, 0;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0</Nodes>
            </Cell>
            <Cell id="2">
                <PropertyData symbol-ref="c" value="3"/>
                <Center>9.457142857,99.92857143,0</Center>
                <Nodes>8, 91, 0;9, 91, 0;8, 92, 0;9, 92, 0;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0</Nodes>
            </Cell>
            <Cell id="3">
                <PropertyData symbol-ref="c" value="3"/>
                <Center>146.804878,13.60162602,0</Center>
                <Nodes>141, 8, 0;142, 8, 0;143, 8, 0;144, 8, 0;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0</Nodes>
            </Cell>
            <Cell id="4">
                <PropertyData symbol-ref="c" value="3"/>
                <Center>190.2442748,100,0</Center>
                <Nodes>191, 91, 0;192, 91, 0;190, 92, 0;191, 92, 0;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0</Nodes>
            </Cell>
            <Cell id="5">
                <PropertyData symbol-ref="c" value="3"/>
                <Center>53.0173913,185.973913,0</Center>
                <Nodes>46, 181, 0;47, 181, 0;48, 181, 0;49, 181, 0;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0</Nodes>
            </Cell>
            <Cell id="6">
                <PropertyData symbol-ref="c" value="3"/>
                <Center>146.9473684,185.9561404,0</Center>
                <Nodes>146, 181, 0;147, 181, 0;148, 181, 0;149, 181, 0;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0</Nodes>
            </Cell>
        </Population>
    </Disabled>
-->
        <Population name="Macrophages" size="0" type="macrophages"/>
        <Population name="Necrotic cells" size="0" type="necrotic"/>
        <Population name="Hepatocytes" size="600" type="hepatocytes">
            <InitCircle name="Hepatocyte initialisation" number-of-cells="600" mode="random">
                <Dimensions center="size.x/2, size.y/2, 0" radius="radius"/>
            </InitCircle>
        </Population>
        <Population name="Kupffer cells" size="150" type="kupffer">
            <InitCircle name="Kupffer cell initialisation" number-of-cells="150" mode="random">
                <Dimensions center="size.x/2, size.y/2, 0" radius="radius"/>
            </InitCircle>
        </Population>
        <Population name="Central vein" size="1" type="CV">
            <InitCellObjects name="Set coordinates" mode="order">
                <Arrangement repetitions="1, 1, 1" displacements="1, 1, 1">
                    <Sphere center="100, 100.0, 0.0" radius="14"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
        <Population name="Portal vein" size="1" type="PV">
            <InitCellObjects name="bottom left" mode="order">
                <Arrangement repetitions="1, 1, 1" displacements="1, 1, 1">
                    <Sphere center="50,5, 0.0" radius="5"/>
                </Arrangement>
            </InitCellObjects>
            <InitCellObjects name="bottom right" mode="order">
                <Arrangement repetitions="1, 1, 1" displacements="1, 1, 1">
                    <Sphere center="150, 5.0, 0.0" radius="5"/>
                </Arrangement>
            </InitCellObjects>
            <InitCellObjects name="mid left" mode="order">
                <Arrangement repetitions="1, 1, 1" displacements="1, 1, 1">
                    <Sphere center="5.0, 100.0, 0.0" radius="5"/>
                </Arrangement>
            </InitCellObjects>
            <InitCellObjects name="mid right" mode="order">
                <Arrangement repetitions="1, 1, 1" displacements="1, 1, 1">
                    <Sphere center="195.0, 100.0, 0.0" radius="5"/>
                </Arrangement>
            </InitCellObjects>
            <InitCellObjects name="upper left" mode="order">
                <Arrangement repetitions="1, 1, 1" displacements="1, 1, 1">
                    <Sphere center="50, 195.0, 0.0" radius="5"/>
                </Arrangement>
            </InitCellObjects>
            <InitCellObjects name="upper right" mode="order">
                <Arrangement repetitions="1, 1, 1" displacements="1, 1, 1">
                    <Sphere center="150.0, 195.0, 0.0" radius="5"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </CellPopulations>
</MorpheusModel>
